 namespace _Method { #include "389118_Pfizer\\IMCS\\JustBio\\SetCuttedTipType_Universal_V2.hs_" }
 namespace _Method { #include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLTrcLib.hsl" }
 namespace _Method { #include "IMCS\\HSLSeqLib.hsl" }
 namespace _Method { #include "IMCS\\HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Library\\Pfizer Tools\\PfizerTools.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Library\\Pfizer TipCounting\\PfizerTipCounter.hs_" }
 namespace _Method { #include "HSLVacuuBrandPump.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "389118_Pfizer\\IMCS\\JustBio\\HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.res"
variable EquilibrationDispenseHeight;
variable var_SEC_Dispense_FAST;
variable SampleVolume;
variable ChaserDispense;
variable ChaserDispenseHeight;
variable EquilibrationVolume;
variable ChaserVolume;
variable FullDispense;
variable var_SEC_Dispense_SLOW;
variable SampleDispenseHeight;
variable SampleDispense;
file worklist;
variable loopCounter3;
variable Tip300Counter;
variable Tip50Counter;
variable loopCounter4;
variable FileCheckReturn;
dialog customDialog_1;
dialog customDialog_2;
variable PlateStartPosition;
variable PlateEndPosition;
sequence wasteNTR;
sequence waste300NTR;
variable hhs1;
sequence _Seq_Sample;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable worklist__Tips_Total_300;
variable None;
sequence _Seq_Resin;
sequence _Seq_StorageBuffer1;
sequence _Seq_StorageBuffer2;
variable str_SampleList;
variable worklist__Tips_Total_1000;
variable worklist__Vol_Total_StorageBuffer1;
variable _StorageBuffer1_Vol;
variable _StorageBuffer2_Vol;
variable _ResinVol;
variable throwaway;
variable none1;
variable none2;
variable TransferChannel;
variable MixingChannels;
variable LiquidHeight;
variable LiquidHeightTop;
variable LiquidHeightMiddle;
variable temp;
variable loopCounter1;
variable avgLiquidHeight;
variable ActiveChannels;
variable worklist__Vol_Total_Resin;
dialog customDialog_6;
variable visible_Tip50;
variable LiquidHeightBottom;
variable LabID;
variable LiquidHeightDifferenceTopBottom;
variable PosID;
sequence _ResinTransferSeq;
sequence _ResinMixSeq;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    PFIZERTOOLS::_InitLibrary();
    PFIZERTIPCOUNTER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    SeqCopySequence(_Seq_Sample, ML_STAR._Vacuum_ProASelfPoured045um);
    SeqCopySequence(_Seq_Resin, ML_STAR.R1);
    SeqCopySequence(_Seq_StorageBuffer1, ML_STAR.T4);
    SeqCopySequence(_Seq_StorageBuffer2, ML_STAR.T4);
    FileCheckReturn = 7;
    {
      loopCounter4 = 0;
      while (FileCheckReturn == 7)
      {
        loopCounter4 = loopCounter4 + 1;
        customDialog_3.InitCustomDialog("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");
        customDialog_3.ShowCustomDialog();
        str_SampleList = customDialog_3.GetCustomDialogProperty( "path1.Path" );
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "textBlock2.Text", str_SampleList );
        customDialog_4.ShowCustomDialog();
        FileCheckReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      }
    }
    worklist.AddField("_ResinVol", _ResinVol, hslFloat);
    worklist.AddField("_StorageBuffer1_Vol", _StorageBuffer1_Vol, hslFloat);
    worklist.AddField("_StorageBuffer2_Vol", _StorageBuffer2_Vol, hslFloat);
    if( 0 == worklist.Open(str_SampleList + " " + "Worklist$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SampleList, "HxMetEdCompCmd");
    }
    if( 0 == worklist.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != worklist.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    worklist.RemoveFields();
    worklist.AddField("_Vol_Total_StorageBuffer1", worklist__Vol_Total_StorageBuffer1, hslFloat);
    worklist.AddField("_Vol_Total_Resin", worklist__Vol_Total_Resin, hslFloat);
    worklist.AddField("_Tips_Total_1000", worklist__Tips_Total_1000, hslFloat);
    worklist.AddField("_Tips_Total_300", worklist__Tips_Total_300, hslFloat);
    if( 0 == worklist.Open(str_SampleList + " " + "TipsAndVolumes$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_SampleList, "HxMetEdCompCmd");
    }
    if( 0 == worklist.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != worklist.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    worklist.RemoveFields();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "GnHCl.Text", worklist__Vol_Total_Resin );
    customDialog_1.SetCustomDialogProperty( "DTT1.Text", worklist__Vol_Total_StorageBuffer1 );
    customDialog_1.ShowCustomDialog();
    worklist__Vol_Total_Resin = customDialog_1.GetCustomDialogProperty( "GnHCl.Text" );
    worklist__Vol_Total_StorageBuffer1 = customDialog_1.GetCustomDialogProperty( "DTT1.Text" );
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "Tip50.Text", worklist__Tips_Total_1000 );
    customDialog_2.SetCustomDialogProperty( "Tip300.Text", worklist__Tips_Total_300 );
    customDialog_2.ShowCustomDialog();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "Tips_50uL_4.IsVisible", visible_Tip50 );
    customDialog_6.ShowCustomDialog();
    PFIZERTOOLS::GetContacts();
    var_SEC_Dispense_SLOW = Translate("IMCS_SEC_T1_SlowDispense");
    var_SEC_Dispense_FAST = Translate("IMCS_SEC_T1_FastDispense");
    EquilibrationDispenseHeight = 9;
    SampleDispenseHeight = 12;
    ChaserDispenseHeight = 13;
    FullDispense = 950;
    SampleDispense = 150;
    ChaserDispense = 200;
    SampleVolume = 100;
    ChaserVolume = 100;
    EquilibrationVolume = 300;
    Tip50Counter = Translate("Tip50Counter");
    Tip300Counter = Translate("Tip300Counter");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    AswStatusDialog::Initialize(Translate("Self Poured ProA Plate"));
    HSLStarBVSLib::BVSInitialize(1, 1);
    ChooseTips(0, 12, 0, 12, Tip50Counter, Tip300Counter, None, None, wasteNTR, waste300NTR);
    PlateStartPosition = 1;
    PlateEndPosition = 96 + 0;
    Trace("Plate Start Position : ",PlateStartPosition);
    Trace("Plate End Position : ",PlateEndPosition);
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if(0){
      AswStatusDialog::AppendText(Translate("Transfer resin to sample plate"));
      MECC::TraceComment(Translate("\n********Transfer resin to sample plate*********\n"));
      PFIZERTOOLS::SetSequence(_Seq_Sample, PlateStartPosition, PlateEndPosition);
      MixingChannels = Translate("10101010");
      TransferChannel = Translate("01010101");
      {
        for(loopCounter1 = 0; loopCounter1 < 8;)
        {
          loopCounter1 = loopCounter1 + 1;
          loopCounter1 = loopCounter1 - 1;
          temp = StrMid(MixingChannels, loopCounter1, 1);
          loopCounter1 = loopCounter1 + 1;
          _Seq_Resin.SetCount(loopCounter1);
          _Seq_Resin.SetCurrentPosition(loopCounter1);
          LabID = SeqGetLabwareId(_Seq_Resin);
          PosID = SeqGetPositionId(_Seq_Resin);
          if (temp == "1")
          {
            SeqAdd(_ResinMixSeq, LabID, PosID);
          }
          else
          {
            SeqAdd(_ResinTransferSeq, LabID, PosID);
          }
        }
      }
      temp = SeqGetTotal(_ResinMixSeq);
      PFIZERTOOLS::SetSequence(_ResinMixSeq, 1, temp);
      temp = SeqGetTotal(_ResinTransferSeq);
      PFIZERTOOLS::SetSequence(_ResinTransferSeq, 1, temp);
      TrcTraceSequence(_ResinMixSeq);
      TrcTraceSequence(_ResinTransferSeq);
      LabID = SeqGetLabwareId(_Seq_Resin);
      DevGetLabwarePosition(ML_STAR, LabID, None, None, LiquidHeightBottom, None);
      TrcTrace(Translate("Bottom"), LiquidHeightBottom);
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.seq_Tips_NTR_300ul, Tip300Counter, waste300NTR, ML_STAR.seq_COREGripTool, 1, 1, 0, ML_STAR.Tip300_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 999);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter3 = 0;
        while (
           (_Seq_Sample.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, _ResinMixSeq, 1, _ResinTransferSeq, 1, _Seq_Sample, 1);
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
            	none1 = arrRetValues[0];
            	none2 = arrRetValues[1];
            	LiquidHeight = arrRetValues[2];
          }
          ActiveChannels = 0;
          avgLiquidHeight = 0;
          {
            for(loopCounter1 = 0; loopCounter1 < 8;)
            {
              loopCounter1 = loopCounter1 + 1;
              loopCounter1 = loopCounter1 - 1;
              temp = StrMid(MixingChannels, loopCounter1, 1);
              loopCounter1 = loopCounter1 + 1;
              if (temp == "1")
              {
                temp = StepReturn::GetLastLiquidLevel(loopCounter1, LiquidHeight);
                ActiveChannels = ActiveChannels + 1;
                avgLiquidHeight = avgLiquidHeight + temp;
              }
              TrcTrace(temp, Translate(""));
            }
          }
          TrcTrace(avgLiquidHeight, Translate(""));
          TrcTrace(ActiveChannels, Translate(""));
          avgLiquidHeight = avgLiquidHeight / (ActiveChannels * 1.0);
          TrcTrace(avgLiquidHeight, Translate(""));
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          LiquidHeight = avgLiquidHeight;
          LiquidHeightTop = LiquidHeight + 0;
          LiquidHeightDifferenceTopBottom = LiquidHeightTop - LiquidHeightBottom;
          LiquidHeightMiddle = LiquidHeightDifferenceTopBottom / (2 * 1.0);
          TrcTrace(Translate(""), LiquidHeight);
          TrcTrace(Translate(""), LiquidHeightTop);
          TrcTrace(Translate(""), LiquidHeightMiddle);
          TrcTrace(Translate(""), LiquidHeightBottom);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (_Seq_Sample.GetCurrentPosition() > 0 && _Seq_Sample.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        _ResinMixSeq.SetMax(_ResinMixSeq.GetTotal());
        _ResinTransferSeq.SetMax(_ResinTransferSeq.GetTotal());
        _Seq_Sample.SetMax(_Seq_Sample.GetTotal());
        _ResinMixSeq.SetCurrentPosition(1);
        _ResinTransferSeq.SetCurrentPosition(1);
        _Seq_Sample.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    AswStatusDialog::AppendText(Translate("Vacuum (40 s)"));
    HSLStarBVSLib::BVSVacuum(1, 350, 40, 1, 70, throwaway);
    AswStatusDialog::AppendText(Translate("Add Storage Buffer"));
    MECC::TraceComment(Translate("\n********Add Storage Buffer*********\n"));
    PFIZERTOOLS::SetSequence(_Seq_Sample, PlateStartPosition, PlateEndPosition);
    PFIZERTOOLS::SetSequence(_Seq_StorageBuffer1, PlateStartPosition, PlateEndPosition);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.seq_Tips_NTR_300ul, Tip300Counter, waste300NTR, ML_STAR.seq_COREGripTool, 1, 1, 0, ML_STAR.Tip300_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 999);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter3 = 0;
      while (
         (_Seq_Sample.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_Tips_NTR_300ul, 1, _Seq_Sample, 1, _Seq_StorageBuffer1, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (_Seq_Sample.GetCurrentPosition() > 0 && _Seq_Sample.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_Tips_NTR_300ul.SetMax(ML_STAR.seq_Tips_NTR_300ul.GetTotal());
      _Seq_Sample.SetMax(_Seq_Sample.GetTotal());
      _Seq_StorageBuffer1.SetMax(_Seq_StorageBuffer1.GetTotal());
      _Seq_Sample.SetCurrentPosition(1);
      _Seq_StorageBuffer1.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    AswStatusDialog::AppendText(Translate("Vacuum (80 s)"));
    HSLStarBVSLib::BVSVacuum(1, 350, 80, 1, 70, throwaway);
    AswStatusDialog::AppendText(Translate("Add 600uL Storage Buffer"));
    MECC::TraceComment(Translate("\n********Add Storage Buffer - 600uL*********\n"));
    PFIZERTOOLS::SetSequence(_Seq_Sample, PlateStartPosition, PlateEndPosition);
    PFIZERTOOLS::SetSequence(_Seq_StorageBuffer2, PlateStartPosition, PlateEndPosition);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter3 = 0;
      while (
         (_Seq_Sample.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_Tips_FTR_1000ul, 1, _Seq_Sample, 1, _Seq_StorageBuffer2, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (_Seq_Sample.GetCurrentPosition() > 0 && _Seq_Sample.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_Tips_FTR_1000ul.SetMax(ML_STAR.seq_Tips_FTR_1000ul.GetTotal());
      _Seq_Sample.SetMax(_Seq_Sample.GetTotal());
      _Seq_StorageBuffer2.SetMax(_Seq_StorageBuffer2.GetTotal());
      _Seq_Sample.SetCurrentPosition(1);
      _Seq_StorageBuffer2.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    SaveTips();
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    AswStatusDialog::Terminate();
    PFIZERTOOLS::NotifyContacts(Translate("Run Finished"), Translate("Hello, Your current Hamilton run has finished successfully"));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    FileCheckReturn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    PFIZERTOOLS::_ExitLibrary();
    PFIZERTIPCOUNTER::_ExitLibrary();
  } }
