function ChooseTips( variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip50Counter, variable & Tip300Counter, variable & Tip300SlimCounter, variable & Tip1000Counter, sequence & wasteNTR, sequence & waste300NTR ) void ;
private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool ) void ;
private function SaveTips(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  SaveTips();
  SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  HSLHamHeaterShaker::StopTempCtrl(hhs1);
  HSLHamHeaterShaker::Terminate();
  AswStatusDialog::Terminate();
  PFIZERTOOLS::NotifyContacts(Translate("Hamilton Software crash"), Translate("The Hamilton has experienced an undefined error and crashed..."));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  FileCheckReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
}

private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool ) void {
  private variable ret_TipToolError;
  if (int_FlipTubeFunction == 1)
  {
    MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
    FLIPTUBETOOL::Initialize(0);
  }
  if (int_FlipTubeFunction == 2)
  {
    MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
    if (ret_TipToolError == 0)
    {
      TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
    }
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
  if (int_FlipTubeFunction == 3)
  {
    MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
  if (int_FlipTubeFunction == 4)
  {
    MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
    if (var_PickUpTool == 1)
    {
      FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
    }
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
    FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
    if (var_EjectTool == 1)
    {
      FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
    }
  }
}

function ChooseTips( variable _Num_NTR50Tips, variable _Num_NTR300Tips, variable _Num_Slim300Tips, variable _Num_Slim1000Tips, variable & Tip50Counter, variable & Tip300Counter, variable & Tip300SlimCounter, variable & Tip1000Counter, sequence & wasteNTR, sequence & waste300NTR ) void {
  private variable Tip1000SlimCounter;
  Tip50Counter = 0;
  Tip300Counter = 0;
  Tip300SlimCounter = 0;
  Tip1000Counter = 0;
  { sequence __temp; wasteNTR = __temp; }
  { sequence __temp; waste300NTR = __temp; }
  PFIZERTIPCOUNTER::ChooseTipsNTR(ML_STAR, ML_STAR.seq_Tips_NTR_50ul, ML_STAR.seq_Tips_NTR_300ul, ML_STAR.Tip50_NTR_Waste, ML_STAR.Tip300_NTR_Waste, _Num_NTR50Tips, _Num_NTR300Tips, Tip50Counter, Tip300Counter, wasteNTR, waste300NTR);
  PFIZERTIPCOUNTER::ChooseTipsFTR(ML_STAR, ML_STAR.MAM_Slim300_Tips, ML_STAR.seq_Tips_FTR_1000ul, _Num_Slim300Tips, _Num_Slim1000Tips, Tip300SlimCounter, Tip1000SlimCounter);
}

private function SaveTips(  ) void {
  PFIZERTIPCOUNTER::SaveTipsNTR(ML_STAR, ML_STAR.seq_COREGripTool, ML_STAR.seq_Tips_NTR_300ul, ML_STAR.seq_Tips_NTR_50ul, wasteNTR, waste300NTR);
  PFIZERTIPCOUNTER::SaveTipsFTR(ML_STAR, ML_STAR.MAM_Slim300_Tips, ML_STAR.seq_Tips_FTR_1000ul);
}
