#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Module\\Vacuum.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\MagneticBeads\\Module\\Magnetic Beads.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\IMCS SizeX Desalting\\Module\\IMCS SizeX Desalting.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace DECKLOADINGVCURRENT {
  global variable Carrier38_Pos1;
  global variable Carrier38_Pos2;
  global variable Carrier38_Pos3;
  global variable Carrier38_Pos4;
  global variable Carrier14_Pos1;
  global variable Carrier38_Pos5;
  global variable Carrier14_Pos2;
  global variable Carrier14_Pos3;
  global variable Carrier14_Pos4;
  global variable Carrier14_Pos5;
  global variable SizeX100_1;
  global variable SizeX100_2;
  global variable VacuumPos1;
  global variable MagRackPos1;
  global variable DesaltingPos1;
  global variable DesaltingPos2;
  global variable DesaltingPos3;
  global variable DesaltingPos4;
  function DoDeckLoading(  ) void ;
  function _InitLibrary() {
    LABWARE::_InitLibrary();
    PIPETTE::_InitLibrary();
    COMMANDS::_InitLibrary();
    VACUUM::_InitLibrary();
    MAGNETIC_BEADS::_InitLibrary();
    IMCS_SIZEX_DESALTING::_InitLibrary();
  }
  function _ExitLibrary() {
    LABWARE::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    VACUUM::_ExitLibrary();
    MAGNETIC_BEADS::_ExitLibrary();
    IMCS_SIZEX_DESALTING::_ExitLibrary();
  }

  function DoDeckLoading(  ) void {
    private dialog customDialog_1;
    private variable CT;
    private variable Len;
    private variable RR;
    private variable Tip50;
    private variable PlateName;
    private variable TipSlim300;
    private variable Plate;
    private variable NumLabware;
    private variable Counter;
    private variable Loading;
    private variable Volume;
    private variable FT_Ambient;
    private variable Tip300;
    private variable FT_Cold;
    private variable EvalExpression;
    private variable Tip1000;
    private variable FindVal;
    private variable PlateList[];
    private variable VolumeList[];
    private variable PlateNameList[];
    private variable LoadingList[];
    private variable UsedTipsDict[];
    private variable CounterString;
    private variable NumMagRacks;
    private variable MagneticRackInfo[];
    private variable NumVacuumPlates;
    private variable NumDesaltingPositions;
    private variable NumTipsString;
    private variable VacuumPlateName;
    private variable VacuumInfoArray[];
    private variable DesaltInfoArray[];
    MagRackPos1 = 0;
    MAGNETIC_BEADS::GetDeckLoadingInfo(MagneticRackInfo);
    NumMagRacks=MagneticRackInfo.GetSize();
    {
      for(Counter = 0; Counter < NumMagRacks;)
      {
        Counter = Counter + 1;
        CounterString = StrIStr(Counter);
        EvalExpression = StrConcat8(Translate("MagRackPos"), CounterString, Translate(" = "), Translate("\""), Translate("True"), Translate(""), Translate(""), Translate("\""));
        StrEvaluateExpr(EvalExpression);
      }
    }
    VacuumPos1 = 0;
    VACUUM::GetDeckLoadingInfo(VacuumInfoArray);
    NumVacuumPlates=VacuumInfoArray.GetSize();
    {
      for(Counter = 0; Counter < NumVacuumPlates;)
      {
        Counter = Counter + 1;
        CounterString = StrIStr(Counter);
        VacuumPlateName=VacuumInfoArray.GetAt(Counter-1);
        EvalExpression = StrConcat8(Translate("VacuumPos"), CounterString, Translate(" = "), Translate("\""), Translate(""), VacuumPlateName, Translate(""), Translate("\""));
        StrEvaluateExpr(EvalExpression);
      }
    }
    DesaltingPos1 = 0;
    DesaltingPos2 = 0;
    DesaltingPos3 = 0;
    DesaltingPos4 = 0;
    IMCS_SIZEX_DESALTING::GetDeckLoadingInfo(DesaltInfoArray);
    NumDesaltingPositions=DesaltInfoArray.GetSize();
    {
      for(Counter = 0; Counter < NumDesaltingPositions;)
      {
        Counter = Counter + 1;
        CounterString = StrIStr(Counter);
        NumTipsString = StrIStr(DesaltInfoArray.ElementAt( Counter -1));
        EvalExpression = StrConcat8(Translate("DesaltingPos"), CounterString, Translate(" = "), Translate("\""), Translate("Required: "), NumTipsString, Translate("                  IMCS SizeX100 Tips loaded column-wise from position A1"), Translate("\""));
        StrEvaluateExpr(EvalExpression);
      }
    }
    PIPETTE::GetNumUsedTips(UsedTipsDict);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("NTR50"), Tip50);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("NTR300"), Tip300);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("FTR300"), TipSlim300);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("FTR1000"), Tip1000);
    Carrier14_Pos1 = 0;
    Carrier14_Pos2 = 0;
    Carrier14_Pos3 = 0;
    Carrier14_Pos4 = 0;
    Carrier14_Pos5 = 0;
    Carrier38_Pos1 = 0;
    Carrier38_Pos2 = 0;
    Carrier38_Pos3 = 0;
    Carrier38_Pos4 = 0;
    Carrier38_Pos5 = 0;
    FT_Cold = Translate("");
    FT_Ambient = Translate("");
    CT = Translate("");
    RR = Translate("");
    LABWARE::GetPlateNames(PlateList);
    LABWARE::GetPlateLoadingLocation(PlateList, LoadingList);
    LABWARE::GetPlateVolume(PlateList, VolumeList);
    LABWARE::GetPlateLabwareName(PlateList, PlateNameList);
    NumLabware=PlateList.GetSize();
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        Loading=LoadingList.GetAt(Counter-1);
        if (Loading != "")
        {
          Plate=PlateList.GetAt(Counter-1);
          PlateName=PlateNameList.GetAt(Counter-1);
          Volume=VolumeList.GetAt(Counter-1);
          FindVal = StrFind(Loading, Translate("Carrier"));
          if (FindVal != -1)
          {
            EvalExpression = StrConcat8(Loading, Translate(" = "), Translate("\""), Plate, Translate(":                                           "), Translate(""), PlateName, Translate("\""));
            StrEvaluateExpr(EvalExpression);
          }
          else
          {
            FindVal = StrFind(Loading, Translate("C"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              CT = StrConcat2(CT, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("R"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              RR = StrConcat2(RR, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("F"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              FT_Ambient = StrConcat2(FT_Ambient, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("E"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              FT_Cold = StrConcat2(FT_Cold, EvalExpression);
            }
          }
        }
      }
    }
    Len = StrGetLength(FT_Ambient);
    if (Len == 0)
    {
      FT_Ambient = 0;
    }
    Len = StrGetLength(FT_Cold);
    if (Len == 0)
    {
      FT_Cold = 0;
    }
    Len = StrGetLength(RR);
    if (Len == 0)
    {
      RR = 0;
    }
    Len = StrGetLength(CT);
    if (Len == 0)
    {
      CT = 0;
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock1.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock3.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock5.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock9.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock10.Text", DesaltingPos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock10.IsVisible", DesaltingPos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock11.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock2.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock12.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock17.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock4.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock6.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock7.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock8.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock13.IsVisible", Carrier14_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock13.Text", Carrier14_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock18.IsVisible", Carrier14_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock18.Text", Carrier14_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock19.Text", Carrier14_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock19.IsVisible", Carrier14_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock20.IsVisible", Carrier14_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock20.Text", Carrier14_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock21.Text", Carrier14_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock21.IsVisible", Carrier14_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock24.Text", Carrier38_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock24.IsVisible", Carrier38_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock25.Text", Carrier38_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock25.IsVisible", Carrier38_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock37.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock37.Text", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock40.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock40.Text", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock41.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock41.Text", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock42.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock44.Text", VacuumPos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock44.IsVisible", VacuumPos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock22.IsVisible", Carrier38_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock22.Text", Carrier38_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock23.IsVisible", Carrier38_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock23.Text", Carrier38_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock26.IsVisible", Carrier38_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock26.Text", Carrier38_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock38.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock39.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock46.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock47.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock47.Text", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock51.IsVisible", DesaltingPos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock51.Text", DesaltingPos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock45.IsVisible", MagRackPos1 );
    customDialog_1.ShowCustomDialog();
  }
} // library namespace
