#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Configuration\\Heater Config.hs_"
#include "HSLTrcLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HEATER {
  variable HeaterReservations[];
  variable HeaterHandles[];
  variable IsInit("False");
  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function CheckReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ConfirmReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function DoCommand( device & ML_STAR, variable CommandString, variable & i_CommandParameterStrings ) variable ;
  private function EndReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function GetReservationPlateSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function StartReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HEATER_CONFIG::_InitLibrary();
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
    RETURN::_InitLibrary();
  }
  function _ExitLibrary() {
    HEATER_CONFIG::_ExitLibrary();
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    RETURN::_ExitLibrary();
  }

  private function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable ComPorts[];
    private variable Counter;
    private variable ComPort;
    private variable TempArray[];
    private variable ReturnString;
    MECC::TraceComment(Translate("HHS HHC module initialization beginning"));
    HEATER_CONFIG::Init();
    HEATER_CONFIG::GetComPorts(ComPorts);
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    TrcTrace4(Translate("There are "), NumHeaters, Translate(" Heaters to initialize."), Translate(""));
    HeaterReservations.SetSize(NumHeaters);
    HeaterHandles.SetSize(NumHeaters);
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        HeaterReservations.SetAt(Counter-1, Translate(""));
        if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
        {
          MECC::TraceComment(Translate("Attempting HeaterShaker initialization"));
          ComPort = StrIVal(ComPorts.ElementAt( Counter -1));
          HSLHamHeaterShaker::CreateUsbDevice(ComPort, HeaterHandles.ElementAt( Counter -1));
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterShaker."), Translate(""));
        }
        else
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            MECC::TraceComment(Translate("Attempting HeaterCooler initialization"));
            HamiltonHeaterCooler::Connect(ComPorts.ElementAt( Counter -1), 5, 0, TempArray);
            HeaterHandles.SetAt(Counter-1, TempArray.ElementAt( 1 -1));
            TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterCooler."), Translate(""));
          }
          else
          {
            MECC::TraceComment(Translate("HHS HHC HeaterType was not found. Acceptable values are HeaterShaker and HeaterCooler"));
            TrcTrace(Translate("Failed Heater Type: "), HeaterTypes.ElementAt( Counter -1));
            TrcTrace(Translate("Failed Heater Index: "), Counter);
            abort;
          }
        }
      }
    }
    MECC::TraceComment(Translate("HHS HHC module initialization succeeded"));
    IsInit = Translate("True");
    ReturnString = RETURN::CreateReturnString(0, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable Counter;
    private variable NumHeaters;
    private variable PlateTypes[];
    private variable AmbientTemp;
    private variable ReturnValue;
    private variable PlateTypesArray[];
    private variable CurrentTemp;
    private variable BestHeater;
    private variable TempDifference;
    private variable HistoricalTempDifference;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    private variable Temp;
    private variable RPM;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    COMMANDS::GetDictionaryItem(Dict, Translate("RPM"), RPM);
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    HEATER_CONFIG::GetPlateTypes(PlateTypes);
    AmbientTemp = HEATER_CONFIG::GetAmbientTemp();
    RPM = StrFVal(RPM);
    AmbientTemp = StrFVal(AmbientTemp);
    if (RPM == 0)
    {
      if (Temp == "")
      {
        TrcTrace(Translate("Incubation is at ambient without shaking so no heater is required"), Translate(""));
        ReturnString = RETURN::CreateReturnString(1, Translate("Incubation is at ambient without shaking so no heater is required"), Translate(""), Translate(""));
        return (ReturnString);
      }
    }
    else
    {
      if (Temp == "")
      {
        Temp = AmbientTemp;
      }
    }
    Temp = StrFVal(Temp);
    HistoricalTempDifference = 9999;
    BestHeater = 0;
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        CurrentTemp = 9999;
        if (HeaterReservations.ElementAt( Counter -1) == "")
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          ReturnValue = TOOLS::IsInArray(PlateType, PlateTypesArray);
          if (ReturnValue == "True")
          {
            if (RPM == 0)
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
              if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
              {
                HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
              }
            }
            else
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
            }
            if (CurrentTemp != 9999)
            {
              if (CurrentTemp > Temp)
              {
                TempDifference = CurrentTemp - Temp;
              }
              else
              {
                TempDifference = Temp - CurrentTemp;
              }
              if (TempDifference < HistoricalTempDifference)
              {
                HistoricalTempDifference = TempDifference;
                BestHeater = Counter;
              }
            }
          }
        }
      }
    }
    if (BestHeater == 0)
    {
      MECC::TraceComment(Translate("There was not a heater available for this reservation... Please try again after an incubation ends."));
      ReturnString = RETURN::CreateReturnString(-2, Translate("No heaters available or not heater match reservation criteria."), Translate(""), Translate(""));
      return (ReturnString);
    }
    else
    {
      HeaterReservations[ BestHeater -1] = PlateName;
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterShaker")
      {
        HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( BestHeater -1), Temp, 0);
      }
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterCooler")
      {
        HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( BestHeater -1), 0, 100, Temp, 0, 0);
      }
      TrcTrace8(Translate("Heater # "), BestHeater, Translate(" with ID "), HeaterIDs.ElementAt( BestHeater -1), Translate(" and type "), HeaterTypes.ElementAt( BestHeater -1), Translate(" was reserved for plate "), PlateName);
      ReturnString = RETURN::CreateReturnString(0, Translate("Reservation Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
  }

  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable NumHeaters;
    private variable Counter;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          HeaterReservations.SetAt(Counter-1, Translate(""));
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
          TrcTrace8(Translate("Reservation was released for "), PlateName, Translate(" on heater # "), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1));
          break;
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(0, Translate("Reservation released"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationPlateSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable Counter2;
    private variable PlateSequenceStringsArray[];
    private variable PlateTypes[];
    private variable PlateSequenceStrings[];
    private variable PlateTypesArray[];
    private variable ReturnVal;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    HEATER_CONFIG::GetPlateTypes(PlateTypes);
    HEATER_CONFIG::GetPlateSequenceStrings(PlateSequenceStrings);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          PlateSequenceStringsArray = HSLExtensions::Array2D::GetColumn(PlateSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = PlateSequenceStringsArray.ElementAt( Counter2 -1);
                ReturnString = RETURN::CreateReturnString(0, Translate("PlateSequenceString Returned"), Translate("PlateSequenceString"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("Plate was not found for reservation and or PlateType"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable ReturnVal;
    private variable Counter2;
    private variable PlateTypes[];
    private variable PlateTypesArray[];
    private variable LidSequenceStrings[];
    private variable LidSequenceStringsArray[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    HEATER_CONFIG::GetPlateTypes(PlateTypes);
    HEATER_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          LidSequenceStringsArray = HSLExtensions::Array2D::GetColumn(LidSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = LidSequenceStringsArray.ElementAt( Counter2 -1);
                ReturnString = RETURN::CreateReturnString(0, Translate("LidSequenceString Returned"), Translate("LidSequenceString"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("Lid was not found for reservation and or PlateType"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function StartReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable Temp;
    private variable RPM;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    COMMANDS::GetDictionaryItem(Dict, Translate("RPM"), RPM);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    RPM = StrFVal(RPM);
    Temp = StrFVal(Temp);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
            if (RPM > 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
              HSLHamHeaterShaker::StartShaker(HeaterHandles.ElementAt( Counter -1), RPM);
            }
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
          ReturnString = RETURN::CreateReturnString(0, Translate("Reservation Started"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("Reservation not found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function EndReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopShaker(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(0, Translate("Reservation Ended"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function ConfirmReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable TempDifference;
    private variable CurrentTemp;
    private variable HeaterTypes[];
    private variable TempDelta;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable Temp;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    TempDelta = HEATER_CONFIG::GetTempDelta();
    TempDelta = StrFVal(TempDelta);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          Temp = StrFVal(Temp);
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (CurrentTemp > Temp)
          {
            TempDifference = CurrentTemp - Temp;
          }
          else
          {
            TempDifference = Temp - CurrentTemp;
          }
          if (TempDifference <= TempDelta)
          {
            ReturnString = RETURN::CreateReturnString(0, Translate("Temperature is within range. Incubation is ready"), Translate(""), Translate(""));
            return (ReturnString);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
          ReturnString = RETURN::CreateReturnString(-2, Translate("Temperature is out of range. Proceed accordingly"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(1, Translate("Incubation is ambient so no reservation was found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function CheckReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          ReturnString = RETURN::CreateReturnString(0, Translate("Plate was found"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(1, Translate("Plate not found but it doesn't have it be found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable CommandString, variable & i_CommandParameterStrings ) variable {
    private variable ReturnString;
    if (CommandString == "Init")
    {
      ReturnString = Init(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (IsInit == "False")
    {
      ReturnString = RETURN::CreateReturnString(-2, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (CommandString == "AcquireReservation")
    {
      ReturnString = AcquireReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "CheckReservation")
    {
      ReturnString = CheckReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "ConfirmReservation")
    {
      ReturnString = ConfirmReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "StartReservation")
    {
      ReturnString = StartReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "EndReservation")
    {
      ReturnString = EndReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "ReleaseReservation")
    {
      ReturnString = ReleaseReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "GetReservationLidSequenceString")
    {
      ReturnString = GetReservationLidSequenceString(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "GetReservationPlateSequenceString")
    {
      ReturnString = GetReservationPlateSequenceString(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    ReturnString = RETURN::CreateReturnString(-1, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }
} // library namespace
