#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace IMCS_SIZEX_DESALTING_CONFIG {
  variable TipSupportRackSequence;
  variable SupportedTipTypes[];
  variable IMCSSampleSequences[];
  variable SupportedRackTipTypes[];
  variable IMCSRackSequences[];
  variable IMCSLiquidHandlingParameters[];
  variable SupportedRackTipTypesSupportRackSequences[];
  function EDIT_Configuration(  ) void ;
  function GetIMCSRackSequences( variable & i_IMCSRackSequences[] ) void ;
  function GetIMCSSampleSequenceStrings( variable & i_IMCSSampleSequences[] ) void ;
  function GetLiquidHandlingParameters( variable & i_LiquidHandlingParameters[] ) void ;
  function GetSupportedIMCSTipsPerRack( variable & i_SupportedIMCSTipsPerRack[] ) void ;
  function GetSupportedRackTipTypes( variable & i_SupportedRackTipTypes[] ) void ;
  function GetSupportedRackTipTypesSupportRackSequenceStrings( variable & i_SupportedRackTipTypesSupportRackSequenceStrings[] ) void ;
  function GetTipSupportRackSequenceString(  ) variable ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    TipSupportRackSequence = Translate("Carrier32_Pos1_TipSupportRack_1mLChannel");
    SupportedRackTipTypes.SetSize(0);
    SupportedRackTipTypes.AddAsLast(Translate("NTR"));
    SupportedRackTipTypes.AddAsLast(Translate("FTR"));
    SupportedRackTipTypesSupportRackSequences.SetSize(0);
    SupportedRackTipTypesSupportRackSequences.AddAsLast(Translate("Carrier32_Pos1_TipSupportRack_300Standard_96CoreHead"));
    SupportedRackTipTypesSupportRackSequences.AddAsLast(Translate("Carrier32_Pos1_TipSupportRack_300Slim_96CoreHead"));
    IMCSSampleSequences.SetSize(0);
    IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsSample_96CoreHead"));
    IMCSSampleSequences.AddAsLast(Translate("Carrier26_Pos5_IMCSTipsSample_96CoreHead"));
    IMCSRackSequences.SetSize(0);
    IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsRack_96CoreHead"));
    IMCSRackSequences.AddAsLast(Translate("Carrier26_Pos5_IMCSTipsRack_96CoreHead"));
    SupportedTipTypes = HSLExtensions::Array2D::Create(2, 1);
    HSLExtensions::Array2D::SetValue(SupportedTipTypes, 1, 1, Translate("SizeX100"));
    HSLExtensions::Array2D::SetValue(SupportedTipTypes, 2, 1, Translate("SizeX100"));
    IMCSLiquidHandlingParameters = HSLExtensions::Array3D::Create(1, 2, 11);
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 3, Translate("30"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 4, Translate("30"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 5, Translate("30"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 6, Translate("950"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 7, Translate("150"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 8, Translate("150"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 9, Translate("300"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 10, Translate("100"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 1, 11, Translate("100"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 2, Translate("IMCS_Desalting_SLIM"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 3, Translate("9"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 4, Translate("12"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 5, Translate("13"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 6, Translate("950"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 7, Translate("150"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 8, Translate("150"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 9, Translate("300"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 10, Translate("100"));
    HSLExtensions::Array3D::SetValue(IMCSLiquidHandlingParameters, 1, 2, 11, Translate("100"));
  }

  function GetTipSupportRackSequenceString(  ) variable {
    return (TipSupportRackSequence);
  }

  function GetSupportedRackTipTypes( variable & i_SupportedRackTipTypes[] ) void {
    i_SupportedRackTipTypes.SetSize( 0);
    i_SupportedRackTipTypes=SupportedRackTipTypes;
  }

  function GetSupportedRackTipTypesSupportRackSequenceStrings( variable & i_SupportedRackTipTypesSupportRackSequenceStrings[] ) void {
    i_SupportedRackTipTypesSupportRackSequenceStrings.SetSize( 0);
    i_SupportedRackTipTypesSupportRackSequenceStrings=SupportedRackTipTypesSupportRackSequences;
  }

  function GetIMCSSampleSequenceStrings( variable & i_IMCSSampleSequences[] ) void {
    i_IMCSSampleSequences.SetSize( 0);
    i_IMCSSampleSequences=IMCSSampleSequences;
  }

  function GetIMCSRackSequences( variable & i_IMCSRackSequences[] ) void {
    i_IMCSRackSequences.SetSize( 0);
    i_IMCSRackSequences=IMCSRackSequences;
  }

  function GetSupportedIMCSTipsPerRack( variable & i_SupportedIMCSTipsPerRack[] ) void {
    i_SupportedIMCSTipsPerRack.SetSize( 0);
    i_SupportedIMCSTipsPerRack=SupportedTipTypes;
  }

  function GetLiquidHandlingParameters( variable & i_LiquidHandlingParameters[] ) void {
    i_LiquidHandlingParameters.SetSize( 0);
    i_LiquidHandlingParameters=IMCSLiquidHandlingParameters;
  }

  function Init(  ) void {
    EDIT_Configuration();
  }
} // library namespace
