#pragma once
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace IMCS_SIZEX_DESALTING_CONFIG {
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSupportRackSequence;
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_SupportedPipetteTipTypes[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceType;
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceWasteSequenceString;
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceString;
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipPickupRackSequence;
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSTipVolumes[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_CONFIG_CoreGripToolSequenceString;
  function EDIT_Configuration(  ) void ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetIMCSCarrierPosStrings( variable & o_CarrierPosStrings[] ) void ;
  function GetIMCSElutionMethodStrings( variable & o_ElutionMethods[] ) void ;
  function GetIMCSRackSequences( variable & o_IMCSRackSequenceStrings[] ) void ;
  function GetIMCSSampleSequences( variable & o_IMCSSampleSequenceStrings[] ) void ;
  function GetIMCSTipVolumes( variable & o_IMCSTipSizeStrings[] ) void ;
  function GetLiquidHandlingParameters( variable & o_LiquidHandlingParametersStrings[] ) void ;
  function GetPipettePickupSequence(  ) variable ;
  function GetPipetteTipDropoffSequence(  ) variable ;
  function GetPipetteTipSequence(  ) variable ;
  function GetPipetteTipType(  ) variable ;
  function GetPipetteTipWasteSequenceString(  ) variable ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSupportRackSequence = Translate("Carrier32_Pos1_TipSupportRack_1mLChannel");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipPickupRackSequence = Translate("Carrier32_Pos1_TipSupportRack_300Standard_96CoreHead");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceString = Translate("seq_Tips_NTR_300ul");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceType = Translate("NTR");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceWasteSequenceString = Translate("Tip300_NTR_Waste");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_CoreGripToolSequenceString = Translate("seq_COREGripTool");
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos4_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos3_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos2_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos4_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos3_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos2_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos.AddAsLast(Translate("Carrier32_Pos5"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos.AddAsLast(Translate("Carrier32_Pos4"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos.AddAsLast(Translate("Carrier32_Pos3"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos.AddAsLast(Translate("Carrier32_Pos2"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods.AddAsLast(Translate("MAM/Low Artifact"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods.AddAsLast(Translate("HCP/Proteomics"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods.AddAsLast(Translate("Low Sample Elution"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods.AddAsLast(Translate("Corrected Sample Elution"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSTipVolumes.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSTipVolumes.AddAsLast(Translate("100"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSTipVolumes.AddAsLast(Translate("150"));
    _MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters = HSLExtensions::Array3D::Create(2, 2, 11);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 3, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 4, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 5, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 6, 950);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 7, 150);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 8, 150);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 9, 300);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 10, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 1, 11, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 3, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 4, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 5, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 6, 950);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 7, 150);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 8, 200);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 9, 300);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 10, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 1, 11, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 3, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 4, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 5, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 6, 950);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 7, 110);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 8, 150);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 9, 300);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 10, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 3, 1, 11, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 3, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 4, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 5, 30);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 6, 950);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 7, 110);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 8, 200);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 9, 300);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 10, 100);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 4, 1, 11, 100);
    if(0){
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 1, Translate("IMCS_SEC_T1_FastDispense"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 2, Translate("IMCS_Desalting_SLIM"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 3, Translate("9"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 4, Translate("12"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 5, Translate("13"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 6, Translate("950"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 7, Translate("150"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 8, Translate("150"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 9, Translate("300"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 10, Translate("100"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 1, 2, 11, Translate("100"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 1, Translate("IMCS_SEC_T1_FastDispense"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 2, Translate("IMCS_Desalting_SLIM"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 3, Translate("9"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 4, Translate("12"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 5, Translate("13"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 6, Translate("950"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 7, Translate("150"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 8, Translate("200"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 9, Translate("300"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 10, Translate("100"));
      HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters, 2, 2, 11, Translate("100"));
    }
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetPipetteTipDropoffSequence(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSupportRackSequence);
  }

  function GetLiquidHandlingParameters( variable & o_LiquidHandlingParametersStrings[] ) void {
    o_LiquidHandlingParametersStrings.SetSize( 0);
    o_LiquidHandlingParametersStrings=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSLiquidHandlingParameters;
  }

  function GetIMCSRackSequences( variable & o_IMCSRackSequenceStrings[] ) void {
    o_IMCSRackSequenceStrings.SetSize( 0);
    o_IMCSRackSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSRackSequences;
  }

  function GetIMCSSampleSequences( variable & o_IMCSSampleSequenceStrings[] ) void {
    o_IMCSSampleSequenceStrings.SetSize( 0);
    o_IMCSSampleSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSSampleSequences;
  }

  function GetPipettePickupSequence(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipPickupRackSequence);
  }

  function GetPipetteTipSequence(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceString);
  }

  function GetPipetteTipType(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceType);
  }

  function GetIMCSTipVolumes( variable & o_IMCSTipSizeStrings[] ) void {
    o_IMCSTipSizeStrings.SetSize( 0);
    o_IMCSTipSizeStrings=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSTipVolumes;
  }

  function GetIMCSCarrierPosStrings( variable & o_CarrierPosStrings[] ) void {
    o_CarrierPosStrings.SetSize( 0);
    o_CarrierPosStrings=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSCarrierPos;
  }

  function GetPipetteTipWasteSequenceString(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_TipSequenceWasteSequenceString);
  }

  function GetIMCSElutionMethodStrings( variable & o_ElutionMethods[] ) void {
    o_ElutionMethods.SetSize( 0);
    o_ElutionMethods=_MODULE_IMCS_SIZEX_DESALTING_CONFIG_IMCSElutionMethods;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_CONFIG_CoreGripToolSequenceString);
  }
} // library namespace
