#pragma once
#include "389118_Pfizer\\IMCS\\JustBio\\SetCuttedTipType_Universal_V2.hs_"
#include "IMCS\\HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLTrcLib.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\HSLExtensions\\Venus.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\SMTs\\Asp_Disp_FW\\STAR_Channel_MPH_fwCmd.hs_"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\IMCS SizeX Desalting\\Configuration\\IMCS SizeX Desalting Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Debugging\\Debugging.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace IMCS_SIZEX_DESALTING {
  sequence _Seq_TipSupport_96Head;
  global variable _MODULE_IMCS_SIZEX_DESALTING_IsInit("False");
  global variable _MODULE_IMCS_SIZEX_DESALTING_Reservations[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationSources[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationWastes[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions[];
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function Equilibrate( device & ML_STAR, variable CommandString ) variable ;
  function GetDeckLoadingInfo( variable & OutputNumTipsPerPosition[] ) void ;
  function Init( device & ML_STAR, variable CommandString ) variable ;
  function Process( device & ML_STAR, variable CommandString ) variable ;
  private function SE_Dispense( device & ML_STAR, sequence & seq_tips, sequence & seq_aspdisp, variable iTime, variable Plunger_Dispense, variable EluteFlag, variable DispenseHeight, variable LiquidClass ) void ;
  private function Sample_Dispense( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable SampleVol, variable DispenseHeight, variable LiquidClass, variable TipEjectFlag ) void ;
  private function _ChangeSpecialPickUp( device & ML_STAR, sequence & io_seq_TipPickUp, variable i_bool_UseSpecialPickUp, variable i_strTipPropertyValue ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    IMCS_SIZEX_DESALTING_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    RETURNIDS::_InitLibrary();
    SEQUENCES::_InitLibrary();
    PIPETTE::_InitLibrary();
    LABWARE::_InitLibrary();
    DEBUGGING::_InitLibrary();
  }
  function _ExitLibrary() {
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    IMCS_SIZEX_DESALTING_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    LABWARE::_ExitLibrary();
    DEBUGGING::_ExitLibrary();
  }

  private function Sample_Dispense( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable SampleVol, variable DispenseHeight, variable LiquidClass, variable TipEjectFlag ) void {
    private variable Actual_SampleVol;
    private variable LiquidHandling3DArray[];
    private sequence SequenceOut[];
    private variable SupportRackSequence;
    private variable SequenceIn[];
    TrcTrace(Translate("Sample"), Translate(""));
    SupportRackSequence = IMCS_SIZEX_DESALTING_CONFIG::GetPipettePickupSequence();
    SequenceIn.SetSize(0);
    SequenceIn.AddAsLast(SupportRackSequence);
    SequenceOut.SetSize(0);
    SEQUENCES::StringToSequence(ML_STAR, SequenceIn, SequenceOut);
    SeqCopySequence(_Seq_TipSupport_96Head, SequenceOut.ElementAt( 1 -1));
    IMCS_SIZEX_DESALTING_CONFIG::GetLiquidHandlingParameters(LiquidHandling3DArray);
    Actual_SampleVol = SampleVol - 5;
    _Seq_TipSupport_96Head.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    SeqResetSequenceIndexes(seqSource);
    seqSource.SetCurrentPosition(1);
    seqDestination.SetCurrentPosition(1);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    if (TipEjectFlag == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    else
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
  }

  private function _ChangeSpecialPickUp( device & ML_STAR, sequence & io_seq_TipPickUp, variable i_bool_UseSpecialPickUp, variable i_strTipPropertyValue ) void {
    private variable str_LabID;
    private variable str_SpecialPickup;
    private variable str_NormalPickup;
    private variable str_PropertyName;
    str_PropertyName = Translate("MlStarIsCoreHeadSpecialTipPickup");
    if(0){
      str_SpecialPickup = Translate("2");
      str_SpecialPickup = Translate("1");
    }
    str_NormalPickup = Translate("0");
    str_LabID = SeqGetLabwareId(io_seq_TipPickUp);
    if (i_bool_UseSpecialPickUp == 1)
    {
      if(0){
        HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_SpecialPickup, str_PropertyName, str_LabID);
      }
      HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, i_strTipPropertyValue, str_PropertyName, str_LabID);
    }
    else
    {
      if(0){
        HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_NormalPickup, str_PropertyName, str_LabID);
      }
      HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_NormalPickup, str_PropertyName, str_LabID);
    }
  }

  private function SE_Dispense( device & ML_STAR, sequence & seq_tips, sequence & seq_aspdisp, variable iTime, variable Plunger_Dispense, variable EluteFlag, variable DispenseHeight, variable LiquidClass ) void {
    private variable bin_SimulationMode;
    private variable RetractHeight;
    private variable bin_StoppableTimer;
    private sequence SequenceOut[];
    private variable PickupSequenceString;
    private sequence IMCS_ResetSequence;
    private variable SequenceIn[];
    TrcTrace(Translate("Dispense"), Translate(""));
    TrcTrace(Translate("Sample Dispense:"), Plunger_Dispense);
    MECC::TraceComment(Translate("+++++++++++++++  IMCStip Dispense  +++++++++++++++++++++++++"));
    bin_SimulationMode = HSLExtensions::Venus::IsStarSimulated(ML_STAR);
    if (bin_SimulationMode == 1)
    {
      bin_StoppableTimer = 1;
    }
    else
    {
      bin_StoppableTimer = 0;
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByLength(ML_STAR, 4, 14.3);
    seq_aspdisp.SetCurrentPosition(1);
    seq_tips.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (EluteFlag == 0)
    {
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 0, 1, 0, 0, 0, 0.1, 0, 0, LiquidClass, 0, 0, 0, Plunger_Dispense, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, iTime, bin_StoppableTimer, 0);
    }
    else
    {
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 0, 1, 0, 0, 0, 0.1, 0, 0, LiquidClass, 0, 0, 0, Plunger_Dispense, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, iTime, bin_StoppableTimer, 0);
    }
    RetractHeight = DispenseHeight + 3;
    if (DispenseHeight < 2)
    {
      DispenseHeight = 2 + 0;
    }
    DispenseHeight = DispenseHeight - 2;
    STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 1, 0, DispenseHeight, RetractHeight, 1, LiquidClass, 0, 0, 1, 0, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, 0, bin_StoppableTimer, 0);
    if (EluteFlag == 0)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    else
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    PickupSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipettePickupSequence();
    SequenceIn.SetSize(0);
    SequenceIn.AddAsLast(PickupSequenceString);
    SequenceOut.SetSize(0);
    SEQUENCES::StringToSequence(ML_STAR, SequenceIn, SequenceOut);
    SeqCopySequence(IMCS_ResetSequence, SequenceOut.ElementAt( 1 -1));
    _ChangeSpecialPickUp(ML_STAR, IMCS_ResetSequence, 1, Translate("1"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _ChangeSpecialPickUp(ML_STAR, IMCS_ResetSequence, 0, 1);
  }

  function Init( device & ML_STAR, variable CommandString ) variable {
    private variable MethodsString;
    private variable VolumesString;
    private variable PositionsString;
    private variable SourcesString;
    private variable BufferPlatesString;
    private variable DestinationsString;
    private variable ParentsString;
    private variable WastePlatesString;
    private variable Dict[];
    private variable Delimiter;
    private variable Counter;
    private variable ID;
    private variable ReturnString;
    private variable NumRacksRequired;
    private variable NumRacks;
    private variable NumParents;
    private variable Racks[];
    private variable Counter2;
    private variable NumSets;
    private variable SetsArray[];
    private dialog customDialog_1;
    private variable Sets[];
    private variable NumTips;
    private variable TipType;
    private variable TipSequence;
    private variable TipWasteSequence;
    private variable NumSamples;
    private variable PositionsArray[];
    private variable ElutionMethodIndex;
    private variable ElutionMethodStrings[];
    private variable TipVolumeStrings[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_TipType;
    private variable SourceStringsArray[];
    private variable WastePlateStringsArray[];
    private variable BufferPlatesStringsArray[];
    private variable PositionsStringsArray[];
    private variable ParentStringsArray[];
    private variable MethodsStringsArray[];
    private variable VolumesStringsArray[];
    private variable DestinationStringsArray[];
    private variable SizeIndex;
    if(0){
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      _MODULE_IMCS_SIZEX_DESALTING_TipType = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    }
    IMCS_SIZEX_DESALTING_CONFIG::Init();
    COMMANDS::ParseCommandParametersString(CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Parents"), ParentsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Destination"), DestinationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Source"), SourcesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Waste"), WastePlatesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Buffer"), BufferPlatesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), VolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Method"), MethodsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Positions"), PositionsString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, ParentsString, ParentStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, DestinationsString, DestinationStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcesString, SourceStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, WastePlatesString, WastePlateStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, BufferPlatesString, BufferPlatesStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, VolumesString, VolumesStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, MethodsString, MethodsStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, PositionsString, PositionsStringsArray);
    NumRacksRequired = 0;
    NumParents=ParentStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumParents;)
      {
        Counter = Counter + 1;
        TOOLS::ParseDelimitedList(Translate(","), VolumesStringsArray.ElementAt( Counter -1), Sets);
        NumSets=Sets.GetSize();
        NumRacksRequired = NumRacksRequired + NumSets;
      }
    }
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSRackSequences(Racks);
    NumRacks=Racks.GetSize();
    TrcTrace(Translate("NumRacks: "), NumRacks);
    TrcTrace(Translate("NumRacksRequired: "), NumRacksRequired);
    if (NumRacksRequired > NumRacks)
    {
      MECC::TraceComment(Translate("###############################\n###############################\n\nThere are not enough IMCS racks to perform this method\n\n###############################\n###############################"));
      abort;
    }
    _MODULE_IMCS_SIZEX_DESALTING_Reservations.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationSources.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.SetSize(0);
    TipSequence = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipSequence();
    TipType = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipType();
    TipWasteSequence = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipWasteSequenceString();
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSElutionMethodStrings(ElutionMethodStrings);
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSTipVolumes(TipVolumeStrings);
    NumParents=ParentStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumParents;)
      {
        Counter = Counter + 1;
        TOOLS::ParseDelimitedList(Translate(","), VolumesStringsArray.ElementAt( Counter -1), SetsArray);
        TOOLS::ParseDelimitedList(Translate(","), PositionsStringsArray.ElementAt( Counter -1), PositionsArray);
        NumSamples=PositionsArray.GetSize();
        NumSets=SetsArray.GetSize();
        NumTips = NumSamples * NumSets;
        NumTips = NumTips * 3;
        PIPETTE::AddUsedTips(TipSequence, TipType, 300, TipWasteSequence, NumTips);
        ElutionMethodIndex = TOOLS::IsInArray(MethodsStringsArray.ElementAt( Counter -1), ElutionMethodStrings);
        {
          for(Counter2 = 0; Counter2 < NumSets;)
          {
            Counter2 = Counter2 + 1;
            SizeIndex = TOOLS::IsInArray(SetsArray.ElementAt( Counter2 -1), TipVolumeStrings);
            _MODULE_IMCS_SIZEX_DESALTING_Reservations.AddAsLast(ParentStringsArray.ElementAt( Counter -1));
            _MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations.AddAsLast(DestinationStringsArray.ElementAt( Counter -1));
            _MODULE_IMCS_SIZEX_DESALTING_ReservationSources.AddAsLast(SourceStringsArray.ElementAt( Counter -1));
            _MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.AddAsLast(WastePlateStringsArray.ElementAt( Counter -1));
            _MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers.AddAsLast(BufferPlatesStringsArray.ElementAt( Counter -1));
            _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.AddAsLast(ElutionMethodIndex);
            _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.AddAsLast(SizeIndex);
            _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.AddAsLast(PositionsStringsArray.ElementAt( Counter -1));
          }
        }
      }
    }
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_Reservations);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationSources);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationWastes);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices);
    Util2::Debug::TraceArray(Translate(""), _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions);
    MECC::TraceComment(Translate("Desalt module initialization succeeded"));
    _MODULE_IMCS_SIZEX_DESALTING_IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Enough Desalting space is available"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function Equilibrate( device & ML_STAR, variable CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    private variable Dict[];
    private variable ParentString;
    private variable PositionsArray[];
    private variable PositionStringsArray[];
    private variable Counter;
    private variable NumPositions;
    private variable NumReservations;
    private variable Counter2;
    private variable NumWorkingIndices;
    private variable WorkingIndices[];
    private variable RackIndex;
    private variable IMCSRackSequenceStrings[];
    private sequence IMCSRackSequences[];
    private sequence WorkingSequence;
    private variable LabID;
    private variable PosID;
    private variable Pos;
    private sequence SourceSequence;
    private sequence DestinationSequence;
    private variable StartPositionString;
    private variable StartPosition;
    private variable loopCounter1;
    private variable TipDropOffSequenceString;
    private sequence TipSequence;
    private sequence Sequences[];
    private variable TipPickupSequenceString;
    private variable TipSequenceString;
    private sequence TipDropOffSequence;
    private variable SequenceStrings[];
    private sequence TipPickupSequence;
    private variable TipInfoDict[];
    private variable TipType;
    private variable TipCounterString;
    private variable GeneratedWasteSequenceString;
    private variable CoreGripToolSequenceString;
    private variable LiquidHandling3DArray[];
    private variable ParentIndex;
    private variable WellVolume;
    private variable DispensedVolume;
    private variable LabwareNameOutArray[];
    private variable LabwareNameInArray[];
    private variable VolumeHeightsOutArray[];
    private variable VolumeHeightsInArray[];
    private sequence SequenceOut[];
    private variable SequenceIn[];
    private variable SampleDipenseLiquidClass;
    private variable DispenseHeight;
    private variable IMCSSampleSequenceStrings[];
    private variable FullDispensedVolume;
    private variable FullDipenseLiquidClass;
    private variable SequenceStringIn[];
    private variable SequenceStringOut[];
    private variable TipEjectFlag;
    private variable InsertPositionCounter;
    private variable InsertPosition;
    private variable Temp;
    MECC::TraceComment(Translate("Doing IMCS tip EQ"));
    COMMANDS::ParseCommandParametersString(CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Parent"), ParentString);
    COMMANDS::GetDictionaryItem(Dict, Translate("StartPosition"), StartPositionString);
    StartPosition = StrIVal(StartPositionString);
    WorkingIndices.SetSize(0);
    NumReservations=_MODULE_IMCS_SIZEX_DESALTING_Reservations.GetSize();
    {
      for(Counter = 0; Counter < NumReservations;)
      {
        Counter = Counter + 1;
        if (ParentString == _MODULE_IMCS_SIZEX_DESALTING_Reservations.ElementAt( Counter -1))
        {
          WorkingIndices.AddAsLast(Counter);
        }
      }
    }
    NumWorkingIndices=WorkingIndices.GetSize();
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSRackSequences(IMCSRackSequenceStrings);
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSSampleSequences(IMCSSampleSequenceStrings);
    SEQUENCES::StringToSequence(ML_STAR, IMCSRackSequenceStrings, IMCSRackSequences);
    SeqAdd(SourceSequence, Translate(""), Translate(""));
    SeqAdd(DestinationSequence, Translate(""), Translate(""));
    InsertPositionCounter = 1;
    InsertPosition = 1;
    {
      for(Counter = 0; Counter < NumWorkingIndices;)
      {
        Counter = Counter + 1;
        RackIndex = WorkingIndices.ElementAt( Counter -1);
        SeqCopySequence(WorkingSequence, IMCSRackSequences.ElementAt( RackIndex -1));
        TOOLS::ParseDelimitedList(Translate(","), _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.ElementAt( RackIndex -1), PositionStringsArray);
        TOOLS::StringArrayToIntArray(PositionStringsArray, PositionsArray);
        NumPositions=PositionsArray.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumPositions;)
          {
            Counter2 = Counter2 + 1;
            Pos = NumPositions - Counter2;
            Pos = Pos + 1;
            WorkingSequence.SetCount(Pos);
            WorkingSequence.SetCurrentPosition(Pos);
            LabID = SeqGetLabwareId(WorkingSequence);
            PosID = SeqGetPositionId(WorkingSequence);
            SeqInsertAt(SourceSequence, InsertPosition, LabID, PosID);
            Pos = PositionsArray.ElementAt( Pos -1) + StartPosition;
            Pos = Pos - 1;
            WorkingSequence.SetCount(Pos);
            WorkingSequence.SetCurrentPosition(Pos);
            LabID = SeqGetLabwareId(WorkingSequence);
            PosID = SeqGetPositionId(WorkingSequence);
            SeqInsertAt(DestinationSequence, InsertPosition, LabID, PosID);
            Temp = InsertPositionCounter % 8;
            if (Temp == 0)
            {
              InsertPosition = InsertPosition + 8;
            }
            InsertPositionCounter = InsertPositionCounter + 1;
          }
        }
      }
    }
    NumPositions = SeqGetTotal(DestinationSequence);
    SeqRemoveAt(DestinationSequence, NumPositions);
    NumPositions = SeqGetTotal(SourceSequence);
    SeqRemoveAt(SourceSequence, NumPositions);
    SourceSequence.SetCount(NumPositions);
    SourceSequence.SetCurrentPosition(1);
    DestinationSequence.SetCount(NumPositions);
    DestinationSequence.SetCurrentPosition(1);
    {
      Counter = 0;
      while (
         (DestinationSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, DestinationSequence, 1, SourceSequence, 1);
        Counter = Counter + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (DestinationSequence.GetCurrentPosition() > 0 && DestinationSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      DestinationSequence.SetMax(DestinationSequence.GetTotal());
      SourceSequence.SetMax(SourceSequence.GetTotal());
      DestinationSequence.SetCurrentPosition(1);
      SourceSequence.SetCurrentPosition(1);
    }
    ParentIndex = TOOLS::IsInArray(ParentString, _MODULE_IMCS_SIZEX_DESALTING_Reservations);
    TOOLS::ParseDelimitedList(Translate(","), _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.ElementAt( ParentIndex -1), PositionStringsArray);
    TOOLS::StringArrayToIntArray(PositionStringsArray, PositionsArray);
    NumPositions=PositionsArray.GetSize();
    TipDropOffSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipDropoffSequence();
    TipPickupSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipettePickupSequence();
    TipSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipSequence();
    CoreGripToolSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetCoreGripToolSequenceString();
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipCounterString"), TipCounterString);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("GeneratedWasteSequenceString"), GeneratedWasteSequenceString);
    SequenceStrings.SetSize(0);
    SequenceStrings.AddAsLast(TipDropOffSequenceString);
    SequenceStrings.AddAsLast(TipPickupSequenceString);
    SequenceStrings.AddAsLast(TipSequenceString);
    SequenceStrings.AddAsLast(GeneratedWasteSequenceString);
    SequenceStrings.AddAsLast(CoreGripToolSequenceString);
    SEQUENCES::StringToSequence(ML_STAR, SequenceStrings, Sequences);
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    SeqCopySequence(WorkingSequence, Sequences.ElementAt( 1 -1));
    {
      for(Counter2 = 0; Counter2 < NumPositions;)
      {
        Counter2 = Counter2 + 1;
        Pos = PositionsArray.ElementAt( Counter2 -1) + StartPosition;
        Pos = Pos - 1;
        WorkingSequence.SetCount(Pos);
        WorkingSequence.SetCurrentPosition(Pos);
        LabID = SeqGetLabwareId(WorkingSequence);
        PosID = SeqGetPositionId(WorkingSequence);
        SeqAdd(TipDropOffSequence, LabID, PosID);
      }
    }
    TipDropOffSequence.SetCount(NumPositions);
    TipDropOffSequence.SetCurrentPosition(1);
    if(0){
      SeqCopySequence(TipSequence, Sequences.ElementAt( 3 -1));
    }
    DevGetSequenceRef(ML_STAR, TipSequenceString, TipSequence);
    {
      Counter = 0;
      while (
         (TipDropOffSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, TipDropOffSequence, 1, TipSequence, 1);
        Counter = Counter + 1;
        if (TipType == "NTR")
        {
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TipCounterString, Sequences.ElementAt( 4 -1), Sequences.ElementAt( 5 -1), 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload Tips"), 1);
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (TipDropOffSequence.GetCurrentPosition() > 0 && TipDropOffSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      TipDropOffSequence.SetMax(TipDropOffSequence.GetTotal());
      TipSequence.SetMax(TipSequence.GetTotal());
    }
    IMCS_SIZEX_DESALTING_CONFIG::GetLiquidHandlingParameters(LiquidHandling3DArray);
    WellVolume = 0;
    {
      for(Counter = 0; Counter < NumWorkingIndices;)
      {
        Counter = Counter + 1;
        RackIndex = WorkingIndices.ElementAt( Counter -1);
        DispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 9);
        FullDispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 6);
        SampleDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 2);
        FullDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 1);
        DispenseHeight = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 3);
        TrcTrace(Translate("DispensedVolume: "), DispensedVolume);
        TrcTrace(Translate("FullDispensedVolume: "), FullDispensedVolume);
        SequenceStringIn.SetSize(0);
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        SequenceStringOut.SetSize(0);
        LABWARE::GetPlateSequenceString(SequenceStringIn, SequenceStringOut);
        LabwareNameInArray.SetSize(0);
        LabwareNameInArray.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        LabwareNameOutArray.SetSize(0);
        LABWARE::GetPlateLabwareName(LabwareNameInArray, LabwareNameOutArray);
        SequenceIn.SetSize(0);
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 1 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 2 -1));
        SequenceIn.AddAsLast(IMCSRackSequenceStrings.ElementAt( RackIndex -1));
        SequenceIn.AddAsLast(IMCSSampleSequenceStrings.ElementAt( RackIndex -1));
        SequenceOut.SetSize(0);
        SEQUENCES::StringToSequence(ML_STAR, SequenceIn, SequenceOut);
        {
          for(loopCounter1 = 0; loopCounter1 < 3;)
          {
            loopCounter1 = loopCounter1 + 1;
            WellVolume = WellVolume + DispensedVolume;
            TrcTrace(Translate("@@@@@@@@@@@@@ WELL VOLUME: "), WellVolume);
            VolumeHeightsInArray.SetSize(0);
            VolumeHeightsInArray.AddAsLast(WellVolume);
            VolumeHeightsOutArray.SetSize(0);
            PIPETTE::CalculateVolumeHeights(LabwareNameOutArray, VolumeHeightsInArray, VolumeHeightsOutArray);
            TipEjectFlag = 1;
            if (loopCounter1 == 3)
            {
              if (Counter == NumWorkingIndices)
              {
                TipEjectFlag = 0;
              }
            }
            Sample_Dispense(ML_STAR, SequenceOut.ElementAt( 1 -1), SequenceOut.ElementAt( 4 -1), DispensedVolume, DispenseHeight, SampleDipenseLiquidClass, TipEjectFlag);
            SE_Dispense(ML_STAR, SequenceOut.ElementAt( 3 -1), SequenceOut.ElementAt( 2 -1), 30, FullDispensedVolume, 0, VolumeHeightsOutArray.ElementAt( 1 -1), FullDipenseLiquidClass);
          }
        }
      }
    }
    if(0){
      SeqCopySequence(TipPickupSequence, Sequences.ElementAt( 2 -1));
      TipPickupSequence.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("EQ Always Succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable Command;
    private variable ID;
    private variable ReturnString;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (_MODULE_IMCS_SIZEX_DESALTING_IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "Equilibrate")
    {
      ReturnString = Equilibrate(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "Process")
    {
      ReturnString = Process(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function Process( device & ML_STAR, variable CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    private sequence Sequences[];
    private sequence SequenceOut[];
    private variable CoreGripToolSequenceString;
    private variable NumReservations;
    private variable ParentString;
    private variable DispensedVolume;
    private variable TipPickupSequenceString;
    private variable TipDropOffSequenceString;
    private variable Counter;
    private variable LabID;
    private variable TipSequenceString;
    private variable TipType;
    private variable Counter2;
    private variable StartPositionString;
    private variable NumPositions;
    private variable SampleDipenseLiquidClass;
    private variable TipCounterString;
    private variable WellVolume;
    private variable GeneratedWasteSequenceString;
    private variable RackIndex;
    private variable PosID;
    private variable StartPosition;
    private variable FullDipenseLiquidClass;
    private variable ParentIndex;
    private variable NumWorkingIndices;
    private variable Pos;
    private sequence WorkingSequence;
    private sequence TipPickupSequence;
    private sequence TipDropOffSequence;
    private sequence TipSequence;
    private variable SequenceStrings[];
    private variable LabwareNameOutArray[];
    private variable TipInfoDict[];
    private variable LabwareNameInArray[];
    private variable Dict[];
    private variable SequenceStringIn[];
    private variable VolumeHeightsOutArray[];
    private variable IMCSRackSequenceStrings[];
    private variable VolumeHeightsInArray[];
    private variable IMCSSampleSequenceStrings[];
    private variable PositionsArray[];
    private variable SequenceStringOut[];
    private variable LiquidHandling3DArray[];
    private variable WorkingIndices[];
    private variable SequenceIn[];
    private variable PositionStringsArray[];
    private variable ChaserDispenseHeight;
    private variable SampleFullDispensedVolume;
    private variable SampleDispenseHeight;
    private variable ChaserFullDispensedVolume;
    private variable ChaserDispensedVolume;
    private variable SampleDispensedVolume;
    private variable TipEjectFlag;
    MECC::TraceComment(Translate("Doing IMCS tips Processing"));
    COMMANDS::ParseCommandParametersString(CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Parent"), ParentString);
    COMMANDS::GetDictionaryItem(Dict, Translate("StartPosition"), StartPositionString);
    StartPosition = StrIVal(StartPositionString);
    WorkingIndices.SetSize(0);
    NumReservations=_MODULE_IMCS_SIZEX_DESALTING_Reservations.GetSize();
    {
      for(Counter = 0; Counter < NumReservations;)
      {
        Counter = Counter + 1;
        if (ParentString == _MODULE_IMCS_SIZEX_DESALTING_Reservations.ElementAt( Counter -1))
        {
          WorkingIndices.AddAsLast(Counter);
        }
      }
    }
    NumWorkingIndices=WorkingIndices.GetSize();
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSRackSequences(IMCSRackSequenceStrings);
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSSampleSequences(IMCSSampleSequenceStrings);
    ParentIndex = TOOLS::IsInArray(ParentString, _MODULE_IMCS_SIZEX_DESALTING_Reservations);
    TOOLS::ParseDelimitedList(Translate(","), _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.ElementAt( ParentIndex -1), PositionStringsArray);
    TOOLS::StringArrayToIntArray(PositionStringsArray, PositionsArray);
    NumPositions=PositionsArray.GetSize();
    TipDropOffSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipDropoffSequence();
    TipPickupSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipettePickupSequence();
    TipSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipSequence();
    CoreGripToolSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetCoreGripToolSequenceString();
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipCounterString"), TipCounterString);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("GeneratedWasteSequenceString"), GeneratedWasteSequenceString);
    SequenceStrings.SetSize(0);
    SequenceStrings.AddAsLast(TipDropOffSequenceString);
    SequenceStrings.AddAsLast(TipPickupSequenceString);
    SequenceStrings.AddAsLast(TipSequenceString);
    SequenceStrings.AddAsLast(GeneratedWasteSequenceString);
    SequenceStrings.AddAsLast(CoreGripToolSequenceString);
    SEQUENCES::StringToSequence(ML_STAR, SequenceStrings, Sequences);
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    SeqCopySequence(WorkingSequence, Sequences.ElementAt( 1 -1));
    {
      for(Counter2 = 0; Counter2 < NumPositions;)
      {
        Counter2 = Counter2 + 1;
        Pos = PositionsArray.ElementAt( Counter2 -1) + StartPosition;
        Pos = Pos - 1;
        WorkingSequence.SetCount(Pos);
        WorkingSequence.SetCurrentPosition(Pos);
        LabID = SeqGetLabwareId(WorkingSequence);
        PosID = SeqGetPositionId(WorkingSequence);
        SeqAdd(TipDropOffSequence, LabID, PosID);
      }
    }
    TipDropOffSequence.SetCount(NumPositions);
    TipDropOffSequence.SetCurrentPosition(1);
    if(0){
      SeqCopySequence(TipSequence, Sequences.ElementAt( 3 -1));
    }
    DevGetSequenceRef(ML_STAR, TipSequenceString, TipSequence);
    {
      Counter = 0;
      while (
         (TipDropOffSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, TipDropOffSequence, 1, TipSequence, 1);
        Counter = Counter + 1;
        if (TipType == "NTR")
        {
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TipCounterString, Sequences.ElementAt( 4 -1), Sequences.ElementAt( 5 -1), 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload Tips"), 1);
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (TipDropOffSequence.GetCurrentPosition() > 0 && TipDropOffSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      TipDropOffSequence.SetMax(TipDropOffSequence.GetTotal());
      TipSequence.SetMax(TipSequence.GetTotal());
      TipDropOffSequence.SetCurrentPosition(1);
    }
    IMCS_SIZEX_DESALTING_CONFIG::GetLiquidHandlingParameters(LiquidHandling3DArray);
    WellVolume = 0;
    {
      for(Counter = 0; Counter < NumWorkingIndices;)
      {
        Counter = Counter + 1;
        RackIndex = WorkingIndices.ElementAt( Counter -1);
        DispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 9);
        {
          for(Counter2 = 0; Counter2 < 3;)
          {
            Counter2 = Counter2 + 1;
            WellVolume = WellVolume + DispensedVolume;
          }
        }
      }
    }
    {
      for(Counter = 0; Counter < NumWorkingIndices;)
      {
        Counter = Counter + 1;
        RackIndex = WorkingIndices.ElementAt( Counter -1);
        SampleDispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 10);
        SampleFullDispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 7);
        SampleDispenseHeight = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 4);
        SampleDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 2);
        FullDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 1);
        TrcTrace(Translate("DispensedVolume: "), SampleDispensedVolume);
        TrcTrace(Translate("FullDispensedVolume: "), SampleFullDispensedVolume);
        WellVolume = WellVolume + SampleDispensedVolume;
        TrcTrace(Translate("@@@@@@@@@@@@@ WELL VOLUME: "), WellVolume);
        SequenceStringIn.SetSize(0);
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationSources.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations.ElementAt( RackIndex -1));
        SequenceStringOut.SetSize(0);
        LABWARE::GetPlateSequenceString(SequenceStringIn, SequenceStringOut);
        LabwareNameInArray.SetSize(0);
        LabwareNameInArray.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        LabwareNameOutArray.SetSize(0);
        LABWARE::GetPlateLabwareName(LabwareNameInArray, LabwareNameOutArray);
        SequenceIn.SetSize(0);
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 1 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 2 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 3 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 4 -1));
        SequenceIn.AddAsLast(IMCSRackSequenceStrings.ElementAt( RackIndex -1));
        SequenceIn.AddAsLast(IMCSSampleSequenceStrings.ElementAt( RackIndex -1));
        SequenceOut.SetSize(0);
        SEQUENCES::StringToSequence(ML_STAR, SequenceIn, SequenceOut);
        VolumeHeightsInArray.SetSize(0);
        VolumeHeightsInArray.AddAsLast(WellVolume);
        VolumeHeightsOutArray.SetSize(0);
        PIPETTE::CalculateVolumeHeights(LabwareNameOutArray, VolumeHeightsInArray, VolumeHeightsOutArray);
        TipEjectFlag = 1;
        if (Counter == NumWorkingIndices)
        {
          TipEjectFlag = 0;
        }
        Sample_Dispense(ML_STAR, SequenceOut.ElementAt( 3 -1), SequenceOut.ElementAt( 6 -1), SampleDispensedVolume, SampleDispenseHeight, SampleDipenseLiquidClass, TipEjectFlag);
        SE_Dispense(ML_STAR, SequenceOut.ElementAt( 5 -1), SequenceOut.ElementAt( 2 -1), 60, SampleFullDispensedVolume, 0, VolumeHeightsOutArray.ElementAt( 1 -1), FullDipenseLiquidClass);
      }
    }
    if(0){
      SeqCopySequence(TipPickupSequence, Sequences.ElementAt( 2 -1));
      TipPickupSequence.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    TipDropOffSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipDropoffSequence();
    TipPickupSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipettePickupSequence();
    TipSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetPipetteTipSequence();
    CoreGripToolSequenceString = IMCS_SIZEX_DESALTING_CONFIG::GetCoreGripToolSequenceString();
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipCounterString"), TipCounterString);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("GeneratedWasteSequenceString"), GeneratedWasteSequenceString);
    SequenceStrings.SetSize(0);
    SequenceStrings.AddAsLast(TipDropOffSequenceString);
    SequenceStrings.AddAsLast(TipPickupSequenceString);
    SequenceStrings.AddAsLast(TipSequenceString);
    SequenceStrings.AddAsLast(GeneratedWasteSequenceString);
    SequenceStrings.AddAsLast(CoreGripToolSequenceString);
    SEQUENCES::StringToSequence(ML_STAR, SequenceStrings, Sequences);
    PIPETTE::GetTipSequenceInfo(TipSequenceString, TipInfoDict);
    COMMANDS::GetDictionaryItem(TipInfoDict, Translate("TipType"), TipType);
    SeqCopySequence(WorkingSequence, Sequences.ElementAt( 1 -1));
    {
      for(Counter2 = 0; Counter2 < NumPositions;)
      {
        Counter2 = Counter2 + 1;
        Pos = PositionsArray.ElementAt( Counter2 -1) + StartPosition;
        Pos = Pos - 1;
        WorkingSequence.SetCount(Pos);
        WorkingSequence.SetCurrentPosition(Pos);
        LabID = SeqGetLabwareId(WorkingSequence);
        PosID = SeqGetPositionId(WorkingSequence);
        SeqAdd(TipDropOffSequence, LabID, PosID);
      }
    }
    TipDropOffSequence.SetCount(NumPositions);
    TipDropOffSequence.SetCurrentPosition(1);
    if(0){
      SeqCopySequence(TipSequence, Sequences.ElementAt( 3 -1));
    }
    DevGetSequenceRef(ML_STAR, TipSequenceString, TipSequence);
    {
      Counter = 0;
      while (
         (TipDropOffSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, TipDropOffSequence, 1, TipSequence, 1);
        Counter = Counter + 1;
        if (TipType == "NTR")
        {
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TipCounterString, Sequences.ElementAt( 4 -1), Sequences.ElementAt( 5 -1), 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload Tips"), 1);
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (TipDropOffSequence.GetCurrentPosition() > 0 && TipDropOffSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      TipDropOffSequence.SetMax(TipDropOffSequence.GetTotal());
      TipSequence.SetMax(TipSequence.GetTotal());
      TipDropOffSequence.SetCurrentPosition(1);
    }
    WellVolume = 0;
    {
      for(Counter = 0; Counter < NumWorkingIndices;)
      {
        Counter = Counter + 1;
        RackIndex = WorkingIndices.ElementAt( Counter -1);
        ChaserDispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 11);
        ChaserFullDispensedVolume = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 8);
        ChaserDispenseHeight = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 5);
        SampleDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 2);
        FullDipenseLiquidClass = HSLExtensions::Array3D::GetValue(LiquidHandling3DArray, _MODULE_IMCS_SIZEX_DESALTING_ReservationElutionIndices.ElementAt( RackIndex -1), _MODULE_IMCS_SIZEX_DESALTING_ReservationSizeIndices.ElementAt( RackIndex -1), 1);
        TrcTrace(Translate("DispensedVolume: "), ChaserDispensedVolume);
        TrcTrace(Translate("FullDispensedVolume: "), ChaserFullDispensedVolume);
        WellVolume = WellVolume + ChaserDispensedVolume;
        TrcTrace(Translate("@@@@@@@@@@@@@ WELL VOLUME: "), WellVolume);
        SequenceStringIn.SetSize(0);
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationBuffers.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationSources.ElementAt( RackIndex -1));
        SequenceStringIn.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationDestinations.ElementAt( RackIndex -1));
        SequenceStringOut.SetSize(0);
        LABWARE::GetPlateSequenceString(SequenceStringIn, SequenceStringOut);
        LabwareNameInArray.SetSize(0);
        LabwareNameInArray.AddAsLast(_MODULE_IMCS_SIZEX_DESALTING_ReservationWastes.ElementAt( RackIndex -1));
        LabwareNameOutArray.SetSize(0);
        LABWARE::GetPlateLabwareName(LabwareNameInArray, LabwareNameOutArray);
        SequenceIn.SetSize(0);
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 1 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 2 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 3 -1));
        SequenceIn.AddAsLast(SequenceStringOut.ElementAt( 4 -1));
        SequenceIn.AddAsLast(IMCSRackSequenceStrings.ElementAt( RackIndex -1));
        SequenceIn.AddAsLast(IMCSSampleSequenceStrings.ElementAt( RackIndex -1));
        SequenceOut.SetSize(0);
        SEQUENCES::StringToSequence(ML_STAR, SequenceIn, SequenceOut);
        VolumeHeightsInArray.SetSize(0);
        VolumeHeightsInArray.AddAsLast(WellVolume);
        VolumeHeightsOutArray.SetSize(0);
        PIPETTE::CalculateVolumeHeights(LabwareNameOutArray, VolumeHeightsInArray, VolumeHeightsOutArray);
        TipEjectFlag = 1;
        if (Counter == NumWorkingIndices)
        {
          TipEjectFlag = 0;
        }
        Sample_Dispense(ML_STAR, SequenceOut.ElementAt( 1 -1), SequenceOut.ElementAt( 6 -1), ChaserDispensedVolume, ChaserDispenseHeight, SampleDipenseLiquidClass, TipEjectFlag);
        SE_Dispense(ML_STAR, SequenceOut.ElementAt( 5 -1), SequenceOut.ElementAt( 4 -1), 60, ChaserFullDispensedVolume, 1, VolumeHeightsOutArray.ElementAt( 1 -1), FullDipenseLiquidClass);
      }
    }
    if(0){
      SeqCopySequence(TipPickupSequence, Sequences.ElementAt( 2 -1));
      TipPickupSequence.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Processing always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function GetDeckLoadingInfo( variable & OutputNumTipsPerPosition[] ) void {
    private variable NumReservations;
    private variable Counter;
    private variable PositionStringsArray[];
    private variable NumPositions;
    OutputNumTipsPerPosition.SetSize( 0);
    if (_MODULE_IMCS_SIZEX_DESALTING_IsInit == "False")
    {
      OutputNumTipsPerPosition.SetSize(0);
      return;
    }
    NumReservations=_MODULE_IMCS_SIZEX_DESALTING_Reservations.GetSize();
    {
      for(Counter = 0; Counter < NumReservations;)
      {
        Counter = Counter + 1;
        TOOLS::ParseDelimitedList(Translate(","), _MODULE_IMCS_SIZEX_DESALTING_ReservationPositions.ElementAt( Counter -1), PositionStringsArray);
        NumPositions=PositionStringsArray.GetSize();
        OutputNumTipsPerPosition.AddAsLast(NumPositions);
      }
    }
  }
} // library namespace
