#pragma once
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Lid\\Configuration\\Lid Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LID {
  global variable _MODULE_LID_IsInit("False");
  global variable _MODULE_LID_ReservedLids[];
  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function GetReservationLidTransportType( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LID_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    COMMANDS::_InitLibrary();
    SEQUENCES::_InitLibrary();
    RETURNIDS::_InitLibrary();
  }
  function _ExitLibrary() {
    LID_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable LidIDs[];
    private variable ReturnString;
    private variable SSA[];
    private variable ID;
    if (_MODULE_LID_IsInit == "True")
    {
      ID = RETURNIDS::SuccessRequestSkipped();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Already Initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    MECC::TraceComment(Translate("Lid module initialization beginning"));
    LID_CONFIG::Init();
    NumLids = LID_CONFIG::GetNumLids();
    MECC::TraceComment(Translate("***** Checking Lid module sequences for validity *****"));
    MECC::TraceComment(Translate("***** Checking Pipette module sequences for validity ***** Lids"));
    LID_CONFIG::GetLidSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Lid module sequences for validity ***** SUCCESS"));
    LID_CONFIG::GetLidIDs(LidIDs);
    _MODULE_LID_ReservedLids.SetSize(0);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        _MODULE_LID_ReservedLids.AddAsLast(Translate(""));
        TrcTrace8(Translate("Lid # "), Counter, Translate(" with ID "), LidIDs.ElementAt( Counter -1), Translate(" was successfully intialized"), Translate(""), Translate(""), Translate(""));
      }
    }
    MECC::TraceComment(Translate("Lid module initialization succeeded"));
    _MODULE_LID_IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (_MODULE_LID_ReservedLids.ElementAt( Counter -1) == "")
        {
          _MODULE_LID_ReservedLids.SetAt(Counter-1, PlateName);
          ID = RETURNIDS::SuccessNoErrors();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation Successful"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("No lids available"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (_MODULE_LID_ReservedLids.ElementAt( Counter -1) == PlateName)
        {
          _MODULE_LID_ReservedLids.SetAt(Counter-1, Translate(""));
          ID = RETURNIDS::SuccessNoErrors();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation released"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable LidSequenceStrings[];
    private variable LidString;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    LID_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (_MODULE_LID_ReservedLids.ElementAt( Counter -1) == PlateName)
        {
          LidString = LidSequenceStrings.ElementAt( Counter -1);
          ID = RETURNIDS::SuccessItemsReturned();
          ReturnString = RETURN::CreateReturnString(ID, Translate("LidSequenceString Returned"), Translate("Response"), LidString);
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnString;
    private variable ID;
    private variable Command;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (_MODULE_LID_IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "AcquireReservation")
    {
      ReturnString = AcquireReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "ReleaseReservation")
    {
      ReturnString = ReleaseReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationLidSequenceString")
    {
      ReturnString = GetReservationLidSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationLidTransportType")
    {
      ReturnString = GetReservationLidTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    if (_MODULE_LID_IsInit == "True")
    {
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit not required"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationLidTransportType( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable ID;
    private variable ReturnString;
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("LidTransportType Returned"), Translate("Response"), Translate("Lid"));
    return (ReturnString);
  }
} // library namespace
