#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace MAGNETIC_BEADS_CONFIG {
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_MinimumCondenseTimeSeconds;
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_SupportedLiquidClassVolumes[];
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_GeneralLiquidTransferLiquidClassStrings[];
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypesSequenceString[];
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypes[];
  global variable _MODULE_MAGNETIC_BEADS_CONFIG_CondensedBeadsLiquidClassStrings[];
  function EDIT_Configuration(  ) void ;
  function GetCondensedBeadsLiquidClassStrings( variable & o_CondensedBeadsLiquidClassStrings[] ) void ;
  function GetGeneralLiquidTransferLiquidClassStrings( variable & o_GeneralLiquidTransferLiquidClassStrings[] ) void ;
  function GetMinimumCondenseTimeSeconds( variable o_MinimumCondenseTimeSeconds ) void ;
  function GetSupportedLiquidClassVolumes( variable & o_SupportedLiquidClassVolumes[] ) void ;
  function GetSupportedPlateTypesArray( variable & o_SupportedPlateTypesArray[] ) void ;
  function GetSupportedPlateTypesSequenceStringsArray( variable & o_SupportedPlateTypesSequenceStringsArray[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    _MODULE_MAGNETIC_BEADS_CONFIG_MinimumCondenseTimeSeconds = Translate("0");
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypes.SetSize(0);
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypes.AddAsLast(Translate("200uL Biorad 96 Well PCR Plate"));
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypesSequenceString.SetSize(0);
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypesSequenceString.AddAsLast(Translate("_MagneticRack1_BioRad200uL96WellPCRPlate"));
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedLiquidClassVolumes.SetSize(0);
    _MODULE_MAGNETIC_BEADS_CONFIG_SupportedLiquidClassVolumes.AddAsLast(300);
    _MODULE_MAGNETIC_BEADS_CONFIG_CondensedBeadsLiquidClassStrings = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(_MODULE_MAGNETIC_BEADS_CONFIG_CondensedBeadsLiquidClassStrings, 1, 1, Translate("MagneticBeads_300uL_CondensedBeadsLiquidRemovalClass"));
    _MODULE_MAGNETIC_BEADS_CONFIG_GeneralLiquidTransferLiquidClassStrings = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(_MODULE_MAGNETIC_BEADS_CONFIG_GeneralLiquidTransferLiquidClassStrings, 1, 1, Translate("MagneticBeads_300uL_GeneralLiquidTransferClass"));
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetSupportedPlateTypesArray( variable & o_SupportedPlateTypesArray[] ) void {
    o_SupportedPlateTypesArray.SetSize( 0);
    o_SupportedPlateTypesArray=_MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypes;
  }

  function GetMinimumCondenseTimeSeconds( variable o_MinimumCondenseTimeSeconds ) void {
    o_MinimumCondenseTimeSeconds = _MODULE_MAGNETIC_BEADS_CONFIG_MinimumCondenseTimeSeconds;
  }

  function GetSupportedPlateTypesSequenceStringsArray( variable & o_SupportedPlateTypesSequenceStringsArray[] ) void {
    o_SupportedPlateTypesSequenceStringsArray.SetSize( 0);
    o_SupportedPlateTypesSequenceStringsArray=_MODULE_MAGNETIC_BEADS_CONFIG_SupportedPlateTypesSequenceString;
  }

  function GetGeneralLiquidTransferLiquidClassStrings( variable & o_GeneralLiquidTransferLiquidClassStrings[] ) void {
    o_GeneralLiquidTransferLiquidClassStrings.SetSize( 0);
    o_GeneralLiquidTransferLiquidClassStrings=_MODULE_MAGNETIC_BEADS_CONFIG_GeneralLiquidTransferLiquidClassStrings;
  }

  function GetCondensedBeadsLiquidClassStrings( variable & o_CondensedBeadsLiquidClassStrings[] ) void {
    o_CondensedBeadsLiquidClassStrings.SetSize( 0);
    o_CondensedBeadsLiquidClassStrings=_MODULE_MAGNETIC_BEADS_CONFIG_CondensedBeadsLiquidClassStrings;
  }

  function GetSupportedLiquidClassVolumes( variable & o_SupportedLiquidClassVolumes[] ) void {
    o_SupportedLiquidClassVolumes.SetSize( 0);
    o_SupportedLiquidClassVolumes=_MODULE_MAGNETIC_BEADS_CONFIG_SupportedLiquidClassVolumes;
  }
} // library namespace
