#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace MAGNETIC_BEADS_CONFIG {
  variable MinimumCondenseTimeSeconds;
  variable SupportedPlateTypesSequenceString[];
  variable SupportedPlateTypes[];
  variable GeneralLiquidTransferLiquidClassStrings[];
  variable CondensedBeadsLiquidClassStrings[];
  variable SupportedLiquidClassVolumes[];
  function EDIT_Configuration(  ) void ;
  function GetCondensedBeadsLiquidClassStrings( variable & o_CondensedBeadsLiquidClassStrings[] ) void ;
  function GetGeneralLiquidTransferLiquidClassStrings( variable & o_GeneralLiquidTransferLiquidClassStrings[] ) void ;
  function GetMinimumCondenseTimeSeconds( variable o_MinimumCondenseTimeSeconds ) void ;
  function GetSupportedLiquidClassVolumes( variable & o_SupportedLiquidClassVolumes[] ) void ;
  function GetSupportedPlateTypesArray( variable & o_SupportedPlateTypesArray[] ) void ;
  function GetSupportedPlateTypesSequenceStringsArray( variable & o_SupportedPlateTypesSequenceStringsArray[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    MinimumCondenseTimeSeconds = Translate("0");
    SupportedPlateTypes.SetSize(0);
    SupportedPlateTypes.AddAsLast(Translate("200uL Biorad 96 Well PCR Plate"));
    SupportedPlateTypesSequenceString.SetSize(0);
    SupportedPlateTypesSequenceString.AddAsLast(Translate(""));
    SupportedLiquidClassVolumes.SetSize(0);
    SupportedLiquidClassVolumes.AddAsLast(300);
    CondensedBeadsLiquidClassStrings = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(CondensedBeadsLiquidClassStrings, 1, 1, Translate("MagneticBeads_300uL_CondensedBeadsLiquidRemovalClass"));
    GeneralLiquidTransferLiquidClassStrings = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(GeneralLiquidTransferLiquidClassStrings, 1, 1, Translate("MagneticBeads_300uL_GeneralLiquidTransferClass"));
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetSupportedPlateTypesArray( variable & o_SupportedPlateTypesArray[] ) void {
    o_SupportedPlateTypesArray.SetSize( 0);
    o_SupportedPlateTypesArray=SupportedPlateTypes;
  }

  function GetMinimumCondenseTimeSeconds( variable o_MinimumCondenseTimeSeconds ) void {
    o_MinimumCondenseTimeSeconds = MinimumCondenseTimeSeconds;
  }

  function GetSupportedPlateTypesSequenceStringsArray( variable & o_SupportedPlateTypesSequenceStringsArray[] ) void {
    o_SupportedPlateTypesSequenceStringsArray.SetSize( 0);
    o_SupportedPlateTypesSequenceStringsArray=SupportedPlateTypesSequenceString;
  }

  function GetGeneralLiquidTransferLiquidClassStrings( variable & o_GeneralLiquidTransferLiquidClassStrings[] ) void {
    o_GeneralLiquidTransferLiquidClassStrings.SetSize( 0);
    o_GeneralLiquidTransferLiquidClassStrings=GeneralLiquidTransferLiquidClassStrings;
  }

  function GetCondensedBeadsLiquidClassStrings( variable & o_CondensedBeadsLiquidClassStrings[] ) void {
    o_CondensedBeadsLiquidClassStrings.SetSize( 0);
    o_CondensedBeadsLiquidClassStrings=CondensedBeadsLiquidClassStrings;
  }

  function GetSupportedLiquidClassVolumes( variable & o_SupportedLiquidClassVolumes[] ) void {
    o_SupportedLiquidClassVolumes.SetSize( 0);
    o_SupportedLiquidClassVolumes=SupportedLiquidClassVolumes;
  }
} // library namespace
