#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\MagneticBeads\\Configuration\\Magnetic Beads Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace MAGNETIC_BEADS {
  global variable _MODULE_MAGNETIC_BEADS_IsInit("False");
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetCondensedBeadsLiquidClassStrings( device & ML_STAR, variable i_CommandParametersString ) variable ;
  function GetDeckLoadingInfo( variable & OutputMagneticRacksArray[] ) void ;
  private function GetGeneralLiquidTransferLiquidClassStrings( device & ML_STAR, variable i_CommandParametersString ) variable ;
  private function GetMagneticRackPlateSequenceString( device & ML_STAR, variable i_CommandParametersString ) variable ;
  private function GetMagneticRackPlateTransportType( device & ML_STAR, variable i_CommandParametersString ) variable ;
  function Init( device & ML_STAR, variable i_CommandString ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    MAGNETIC_BEADS_CONFIG::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    RETURN::_InitLibrary();
    RETURNIDS::_InitLibrary();
    LABWARE::_InitLibrary();
  }
  function _ExitLibrary() {
    MAGNETIC_BEADS_CONFIG::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    RETURN::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
    LABWARE::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandString ) variable {
    private variable Dict[];
    private variable NumPlateTypes;
    private variable Counter;
    private variable Delimiter;
    private variable PlateTypeArray[];
    private variable SupportedPlateTypesArray[];
    private variable ReturnValue;
    private variable Counter2;
    private variable NumSupportedPlateTypes;
    private variable NumNotSupported;
    private variable UnsupportedTypesString;
    private variable NotSupportedTypes[];
    private variable ID;
    private variable ReturnString;
    private variable PlateName;
    private variable LabwareTypeGetterTemp[];
    private variable Delmiter;
    private variable SupportedSequenceStringsArray[];
    if (_MODULE_MAGNETIC_BEADS_IsInit == "True")
    {
      ID = RETURNIDS::SuccessRequestSkipped();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Already Initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    _MODULE_MAGNETIC_BEADS_IsInit = Translate("True");
    MAGNETIC_BEADS_CONFIG::Init();
    Delmiter = COMMANDS::GetCommandStringDelimiter();
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateNames"), PlateName);
    TrcTrace(Translate("PlateName"), PlateName);
    if(0){
      TOOLS::ParseDelimitedList(Delimiter, PlateName, LabwareTypeGetterTemp);
    }
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    TrcTrace(Translate("PreLabwareModular"), Translate(""));
    LABWARE::GetPlateLabwareName(LabwareTypeGetterTemp, PlateTypeArray);
    TrcTrace(Translate("PostModule"), Translate(""));
    NumPlateTypes=PlateTypeArray.GetSize();
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesArray(SupportedPlateTypesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesSequenceStringsArray(SupportedSequenceStringsArray);
    NumSupportedPlateTypes=SupportedPlateTypesArray.GetSize();
    {
      for(Counter = 0; Counter < NumSupportedPlateTypes;)
      {
        Counter = Counter + 1;
        LABWARE::AddSingleLabware(SupportedSequenceStringsArray.ElementAt( Counter -1), SupportedSequenceStringsArray.ElementAt( Counter -1), Translate(""), Translate("96 Well PCR Plate"), SupportedPlateTypesArray.ElementAt( Counter -1), Translate("Plate"), Translate(""), Translate(""));
      }
    }
    NotSupportedTypes.SetSize(0);
    TrcTrace(Translate("PostModule"), Translate(""));
    {
      for(Counter = 0; Counter < NumPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumSupportedPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            TrcTrace(Translate("Counter 2 Loop"), Translate(""));
            if (PlateTypeArray.ElementAt( Counter -1) == SupportedPlateTypesArray.ElementAt( Counter2 -1))
            {
              break;
            }
            TrcTrace(Translate("Counter 2 Loop 2"), Translate(""));
            if (Counter2 == NumSupportedPlateTypes)
            {
              NotSupportedTypes.AddAsLast(PlateTypeArray.ElementAt( Counter -1));
            }
          }
        }
      }
    }
    NumNotSupported=NotSupportedTypes.GetSize();
    if (NumNotSupported == 0)
    {
      ID = RETURNIDS::SuccessNoErrors();
      ReturnValue = RETURN::CreateReturnString(ID, Translate("All Plate types were supported"), Translate(""), Translate(""));
    }
    else
    {
      UnsupportedTypesString = TOOLS::ArrayToDelimitedList(Delimiter, NotSupportedTypes);
      ID = RETURNIDS::FailNotPossible();
      ReturnValue = RETURN::CreateReturnString(ID, Translate("Found unsupported plate types AS UnsupportedPlateTypes."), Translate("Response"), UnsupportedTypesString);
    }
    return (ReturnValue);
  }

  private function GetGeneralLiquidTransferLiquidClassStrings( device & ML_STAR, variable i_CommandParametersString ) variable {
    private variable Counter;
    private variable Delimiter;
    private variable SupportedPlateIndex;
    private variable NumSupportedPlateTypes;
    private variable TransferVolumesString;
    private variable PlateTypeString;
    private variable SupportPlateTypesArray[];
    private variable Dict[];
    private variable TransferVolumeStringsArray[];
    private variable GeneratedLiquidClassesArray[];
    private variable TransferVolumesArray[];
    private variable GeneralLiquidTransferLiquidClassesArray[];
    private variable Counter2;
    private variable NumTransferVolumes;
    private variable NumSupportedVolumes;
    private variable SupportedLiquidClassVolumes[];
    private variable LiquidClass;
    private variable OutputString;
    private variable ID;
    private variable ReturnString;
    private variable PlateName;
    private variable LabwareTypeGetterTemp[];
    private variable Out[];
    COMMANDS::ParseCommandParametersString(i_CommandParametersString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareName(LabwareTypeGetterTemp, Out);
    PlateTypeString=Out.GetAt(1-1);
    COMMANDS::GetDictionaryItem(Dict, Translate("TransferVolumes"), TransferVolumesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, TransferVolumesString, TransferVolumeStringsArray);
    TOOLS::StringArrayToFloatArray(TransferVolumeStringsArray, TransferVolumesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesArray(SupportPlateTypesArray);
    MAGNETIC_BEADS_CONFIG::GetGeneralLiquidTransferLiquidClassStrings(GeneralLiquidTransferLiquidClassesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedLiquidClassVolumes(SupportedLiquidClassVolumes);
    NumSupportedPlateTypes=SupportPlateTypesArray.GetSize();
    {
      for(Counter = 0; Counter < NumSupportedPlateTypes;)
      {
        Counter = Counter + 1;
        if (PlateTypeString == SupportPlateTypesArray.ElementAt( Counter -1))
        {
          SupportedPlateIndex = Counter;
        }
      }
    }
    NumTransferVolumes=TransferVolumesArray.GetSize();
    NumSupportedVolumes=SupportedLiquidClassVolumes.GetSize();
    GeneratedLiquidClassesArray.SetSize(0);
    {
      for(Counter = 0; Counter < NumTransferVolumes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumSupportedVolumes;)
          {
            Counter2 = Counter2 + 1;
            if (TransferVolumesArray.ElementAt( Counter -1) <= SupportedLiquidClassVolumes.ElementAt( Counter2 -1))
            {
              LiquidClass = HSLExtensions::Array2D::GetValue(GeneralLiquidTransferLiquidClassesArray, SupportedPlateIndex, Counter2);
              GeneratedLiquidClassesArray.AddAsLast(LiquidClass);
            }
          }
        }
      }
    }
    ID = RETURNIDS::SuccessItemsReturned();
    OutputString = TOOLS::ArrayToDelimitedList(Delimiter, GeneratedLiquidClassesArray);
    ReturnString = RETURN::CreateReturnString(ID, Translate("Returned GeneralLiquidTransferLiquidClassStrings"), Translate("Response"), OutputString);
    return (ReturnString);
  }

  private function GetCondensedBeadsLiquidClassStrings( device & ML_STAR, variable i_CommandParametersString ) variable {
    private variable OutputString;
    private variable Counter;
    private variable Delimiter;
    private variable Counter2;
    private variable SupportedPlateIndex;
    private variable NumSupportedPlateTypes;
    private variable NumTransferVolumes;
    private variable TransferVolumesString;
    private variable LiquidClass;
    private variable ID;
    private variable NumSupportedVolumes;
    private variable ReturnString;
    private variable PlateTypeString;
    private variable SupportPlateTypesArray[];
    private variable Dict[];
    private variable TransferVolumeStringsArray[];
    private variable TransferVolumesArray[];
    private variable SupportedLiquidClassVolumes[];
    private variable GeneratedLiquidClassesArray[];
    private variable CondensedBeadsLiquidClassesArray[];
    private variable PlateName;
    private variable LabwareTypeGetterTemp[];
    private variable Out[];
    COMMANDS::ParseCommandParametersString(i_CommandParametersString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareName(LabwareTypeGetterTemp, Out);
    PlateTypeString=Out.GetAt(1-1);
    COMMANDS::GetDictionaryItem(Dict, Translate("TransferVolumes"), TransferVolumesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, TransferVolumesString, TransferVolumeStringsArray);
    TOOLS::StringArrayToFloatArray(TransferVolumeStringsArray, TransferVolumesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesArray(SupportPlateTypesArray);
    MAGNETIC_BEADS_CONFIG::GetCondensedBeadsLiquidClassStrings(CondensedBeadsLiquidClassesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedLiquidClassVolumes(SupportedLiquidClassVolumes);
    NumSupportedPlateTypes=SupportPlateTypesArray.GetSize();
    {
      for(Counter = 0; Counter < NumSupportedPlateTypes;)
      {
        Counter = Counter + 1;
        if (PlateTypeString == SupportPlateTypesArray.ElementAt( Counter -1))
        {
          SupportedPlateIndex = Counter;
        }
      }
    }
    NumTransferVolumes=TransferVolumesArray.GetSize();
    NumSupportedVolumes=SupportedLiquidClassVolumes.GetSize();
    GeneratedLiquidClassesArray.SetSize(0);
    {
      for(Counter = 0; Counter < NumTransferVolumes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumSupportedVolumes;)
          {
            Counter2 = Counter2 + 1;
            if (TransferVolumesArray.ElementAt( Counter -1) <= SupportedLiquidClassVolumes.ElementAt( Counter2 -1))
            {
              LiquidClass = HSLExtensions::Array2D::GetValue(CondensedBeadsLiquidClassesArray, SupportedPlateIndex, Counter2);
              GeneratedLiquidClassesArray.AddAsLast(LiquidClass);
            }
          }
        }
      }
    }
    ID = RETURNIDS::SuccessItemsReturned();
    OutputString = TOOLS::ArrayToDelimitedList(Delimiter, GeneratedLiquidClassesArray);
    ReturnString = RETURN::CreateReturnString(ID, Translate("Returned CondensedBeadsLiquidClassStrings"), Translate("Response"), OutputString);
    return (ReturnString);
  }

  private function GetMagneticRackPlateSequenceString( device & ML_STAR, variable i_CommandParametersString ) variable {
    private variable Counter;
    private variable PlateSequenceString;
    private variable NumSupportedPlateTypes;
    private variable ID;
    private variable ReturnString;
    private variable PlateTypeString;
    private variable SupportPlateTypesArray[];
    private variable Dict[];
    private variable SupportPlateTypeSequenceStringArray[];
    private variable PlateName;
    private variable LabwareTypeGetterTemp[];
    private variable Out[];
    COMMANDS::ParseCommandParametersString(i_CommandParametersString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareName(LabwareTypeGetterTemp, Out);
    PlateTypeString=Out.GetAt(1-1);
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesArray(SupportPlateTypesArray);
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesSequenceStringsArray(SupportPlateTypeSequenceStringArray);
    NumSupportedPlateTypes=SupportPlateTypesArray.GetSize();
    {
      for(Counter = 0; Counter < NumSupportedPlateTypes;)
      {
        Counter = Counter + 1;
        if (PlateTypeString == SupportPlateTypesArray.ElementAt( Counter -1))
        {
          PlateSequenceString = SupportPlateTypeSequenceStringArray.ElementAt( Counter -1);
        }
      }
    }
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Returned CondensedBeadsLiquidClassStrings"), Translate("Response"), PlateSequenceString);
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable Command;
    private variable ID;
    private variable ReturnString;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (_MODULE_MAGNETIC_BEADS_IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "GetCondensedBeadsLiquidClassStrings")
    {
      ReturnString = GetCondensedBeadsLiquidClassStrings(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetGeneralLiquidTransferLiquidClassStrings")
    {
      ReturnString = GetGeneralLiquidTransferLiquidClassStrings(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetMagneticRackPlateSequenceString")
    {
      ReturnString = GetMagneticRackPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetMagneticRackPlateTransportType")
    {
      ReturnString = GetMagneticRackPlateTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    if (_MODULE_MAGNETIC_BEADS_IsInit == "True")
    {
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit not required"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetMagneticRackPlateTransportType( device & ML_STAR, variable i_CommandParametersString ) variable {
    private variable PlateName;
    private variable ID;
    private variable ReturnString;
    private variable PlateType;
    private variable LabwareTypeGetterTemp[];
    private variable Dict[];
    private variable Out[];
    COMMANDS::ParseCommandParametersString(i_CommandParametersString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    TrcTrace(Translate("PlateName"), PlateName);
    LABWARE::GetPlateLabwareName(LabwareTypeGetterTemp, Out);
    TrcTrace(Translate("PlateName"), PlateName);
    PlateType=Out.GetAt(1-1);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("MagneticRackTransportType Returned"), Translate("Response"), PlateType);
    return (ReturnString);
  }

  function GetDeckLoadingInfo( variable & OutputMagneticRacksArray[] ) void {
    OutputMagneticRacksArray.SetSize( 0);
    if (_MODULE_MAGNETIC_BEADS_IsInit == "False")
    {
      OutputMagneticRacksArray.SetSize(0);
      return;
    }
    OutputMagneticRacksArray.AddAsLast(Translate("True"));
  }
} // library namespace
