#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG_LIQUID_CLASSES {
  global variable _MODULE_PIPETTE_CONFIG_LiquidClassLiquidCategories[];
  global variable _MODULE_PIPETTE_CONFIG_LiquidClassVolumes[];
  global variable _MODULE_PIPETTE_CONFIG_LiquidClassClasses[];
  function EDIT_ConfigurationLiquidClasses(  ) void ;
  function GetLiquidClassCategories( variable & o_LiquidClassCategories[] ) void ;
  function GetLiquidClassClasses( variable & o_LiquidClassClasses[] ) void ;
  function GetLiquidClassVolumes( variable & o_LiquidClassVolumes[] ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_ConfigurationLiquidClasses(  ) void {
    _MODULE_PIPETTE_CONFIG_LiquidClassVolumes.SetSize(0);
    _MODULE_PIPETTE_CONFIG_LiquidClassVolumes.AddAsLast(5);
    _MODULE_PIPETTE_CONFIG_LiquidClassVolumes.AddAsLast(50);
    _MODULE_PIPETTE_CONFIG_LiquidClassVolumes.AddAsLast(300);
    _MODULE_PIPETTE_CONFIG_LiquidClassVolumes.AddAsLast(1000);
    _MODULE_PIPETTE_CONFIG_LiquidClassLiquidCategories.SetSize(0);
    _MODULE_PIPETTE_CONFIG_LiquidClassLiquidCategories.AddAsLast(Translate("Water"));
    _MODULE_PIPETTE_CONFIG_LiquidClassClasses = HSLExtensions::Array2D::Create(1, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_LiquidClassClasses, 1, 1, Translate("Tip_50_TrisTweenBuffer_SurfaceEmpty_Normalization_WithFilter"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_LiquidClassClasses, 1, 2, Translate("Tip_50ul_Water_DispenseSurface_Empty_WithFilter"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_LiquidClassClasses, 1, 3, Translate("StandardVolume_Water_DispenseSurface_Empty_WithFilter"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_LiquidClassClasses, 1, 4, Translate("HighVolume_Water_DispenseSurface_Empty_WithFilter"));
  }

  function GetLiquidClassVolumes( variable & o_LiquidClassVolumes[] ) void {
    o_LiquidClassVolumes.SetSize( 0);
    o_LiquidClassVolumes=_MODULE_PIPETTE_CONFIG_LiquidClassVolumes;
  }

  function GetLiquidClassCategories( variable & o_LiquidClassCategories[] ) void {
    o_LiquidClassCategories.SetSize( 0);
    o_LiquidClassCategories=_MODULE_PIPETTE_CONFIG_LiquidClassLiquidCategories;
  }

  function GetLiquidClassClasses( variable & o_LiquidClassClasses[] ) void {
    o_LiquidClassClasses.SetSize( 0);
    o_LiquidClassClasses=_MODULE_PIPETTE_CONFIG_LiquidClassClasses;
  }
} // library namespace
