#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG_PLATE_EQUATIONS {
  global variable _MODULE_PIPETTE_CONFIG_SegmentEquations[];
  global variable _MODULE_PIPETTE_CONFIG_NumSegments[];
  global variable _MODULE_PIPETTE_CONFIG_SegmentHeights[];
  global variable _MODULE_PIPETTE_CONFIG_PlateTypes[];
  function EDIT_ConfigurationPlateEquations(  ) void ;
  function GetNumSegments( variable & o_NumSegments[] ) void ;
  function GetPlateTypes( variable & o_PlateTypes[] ) void ;
  function GetSegmentEquations( variable & o_SegmentEquations[] ) void ;
  function GetSegmentHeights( variable & o_SegmentHeights[] ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_ConfigurationPlateEquations(  ) void {
    _MODULE_PIPETTE_CONFIG_PlateTypes.SetSize(0);
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("200uL Biorad 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("400uL Thermo 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("1200uL DeepWell 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("2000uL Corning 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("0.45um Self Poured ProA Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("Waters Glycoworks HILIC Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("400uL Corning Costar 96 Well UV Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("Waters 2000uL Total Recovery Vial Rack"));
    _MODULE_PIPETTE_CONFIG_NumSegments.SetSize(0);
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("3"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("1"));
    _MODULE_PIPETTE_CONFIG_SegmentHeights = HSLExtensions::Array2D::Create(8, 3);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_PIPETTE_CONFIG_SegmentHeights, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 1, 1, Translate("0"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 1, 2, Translate("15"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 2, 1, Translate("3"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 2, 2, Translate("8"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 3, 1, Translate("3"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 3, 2, Translate("18"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 4, 1, Translate("4"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 4, 2, Translate("38"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 5, 1, Translate("1.07"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 5, 2, Translate("3.73"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 5, 3, Translate("38.9"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 6, 1, Translate("3.8"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 6, 2, Translate("22.64"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 7, 1, Translate("0"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 7, 2, Translate("10.67"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 8, 1, Translate("32"));
    _MODULE_PIPETTE_CONFIG_SegmentEquations = HSLExtensions::Array2D::Create(8, 3);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_PIPETTE_CONFIG_SegmentEquations, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 1, 1, Translate("x * 2.3562"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 1, 2, Translate("x * 14.5953"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 2, 1, Translate("x * 18.9150"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 2, 2, Translate("x * 56.7450"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 3, 1, Translate("x * x * (13.1947 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 3, 2, Translate("x * 70.5600"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 4, 1, Translate("x * x * (12.5664 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 4, 2, Translate("x * 64.0000"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 5, 1, Translate("x * x * (8.2938 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 5, 2, Translate("x * 33.9190"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 5, 3, Translate("x * 50.5287"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 6, 1, Translate("x * 12.4643"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 6, 2, Translate("x * 37.3928"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 7, 1, Translate("x * 12.3202"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 7, 2, Translate("x * 36.9605"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 8, 1, Translate("x * x * ((17.2788 - (1.0472 * x))"));
  }

  function GetPlateTypes( variable & o_PlateTypes[] ) void {
    o_PlateTypes.SetSize( 0);
    o_PlateTypes=_MODULE_PIPETTE_CONFIG_PlateTypes;
  }

  function GetNumSegments( variable & o_NumSegments[] ) void {
    o_NumSegments.SetSize( 0);
    o_NumSegments=_MODULE_PIPETTE_CONFIG_NumSegments;
  }

  function GetSegmentHeights( variable & o_SegmentHeights[] ) void {
    o_SegmentHeights.SetSize( 0);
    o_SegmentHeights=_MODULE_PIPETTE_CONFIG_SegmentHeights;
  }

  function GetSegmentEquations( variable & o_SegmentEquations[] ) void {
    o_SegmentEquations.SetSize( 0);
    o_SegmentEquations=_MODULE_PIPETTE_CONFIG_SegmentEquations;
  }
} // library namespace
