#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG {
  variable SegmentHeights[];
  variable PlateTypes[];
  variable NumSegments[];
  variable SegmentEquations[];
  variable NumChannels;
  variable ChannelString;
  variable TipSequenceStrings[];
  variable TipSequenceVolumes[];
  variable TipSequenceTypes[];
  variable CoreGripToolSequenceString;
  variable TipSequenceWasteSequenceString[];
  variable MaxPipettingVolume;
  variable FlipTubeToolSequenceString;
  function EDIT_Configuration(  ) void ;
  function EDIT_TipsDialog( variable & TipNumbers2DArray[] ) void ;
  function GetChannelString(  ) variable ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetFlipTubeToolSequenceString(  ) variable ;
  function GetMaxPipettingVolume(  ) variable ;
  function GetNumChannels(  ) variable ;
  function GetNumSegments( variable & o_NumSegments[] ) void ;
  function GetPlateTypes( variable & o_PlateTypes[] ) void ;
  function GetSegmentEquations( variable & o_SegmentEquations[] ) void ;
  function GetSegmentHeights( variable & o_SegmentHeights[] ) void ;
  function GetTipSequenceStrings( variable & o_TipSequenceStringsArray[] ) void ;
  function GetTipSequenceTypes( variable & o_TipSequenceTypesArray[] ) void ;
  function GetTipSequenceVolumes( variable & o_TipSequenceVolumesArray[] ) void ;
  function GetTipSequenceWasteSequenceStrings( variable & o_TipSequenceWasteSequenceStrings[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    NumChannels = 8;
    ChannelString = Translate("11111111");
    MaxPipettingVolume = 0;
    CoreGripToolSequenceString = Translate("seq_COREGripTool");
    FlipTubeToolSequenceString = Translate("Ham_4_FlipTubeTools_OnWaste_0001");
    TipSequenceStrings.SetSize(0);
    TipSequenceStrings.AddAsLast(Translate("seq_Tips_NTR_50ul"));
    TipSequenceStrings.AddAsLast(Translate("seq_Tips_NTR_300ul"));
    TipSequenceStrings.AddAsLast(Translate("seq_Tips_FTR_1000ul"));
    TipSequenceTypes.SetSize(0);
    TipSequenceTypes.AddAsLast(Translate("NTR"));
    TipSequenceTypes.AddAsLast(Translate("NTR"));
    TipSequenceTypes.AddAsLast(Translate("FTR"));
    TipSequenceWasteSequenceString.SetSize(0);
    TipSequenceWasteSequenceString.AddAsLast(Translate("Tip50_NTR_Waste"));
    TipSequenceWasteSequenceString.AddAsLast(Translate("Tip300_NTR_Waste"));
    TipSequenceWasteSequenceString.AddAsLast(Translate("N/A"));
    TipSequenceVolumes.SetSize(0);
    TipSequenceVolumes.AddAsLast(50);
    TipSequenceVolumes.AddAsLast(300);
    TipSequenceVolumes.AddAsLast(1000);
    PlateTypes.SetSize(0);
    PlateTypes.AddAsLast(Translate("200uL Biorad 96 Well PCR Plate"));
    PlateTypes.AddAsLast(Translate("400uL Thermo 96 Well PCR Plate"));
    PlateTypes.AddAsLast(Translate("1200uL DeepWell 96 Well PCR Plate"));
    PlateTypes.AddAsLast(Translate("2000uL Corning 96 Well PCR Plate"));
    NumSegments.SetSize(0);
    NumSegments.AddAsLast(Translate("2"));
    NumSegments.AddAsLast(Translate("2"));
    NumSegments.AddAsLast(Translate("2"));
    NumSegments.AddAsLast(Translate("2"));
    SegmentHeights = HSLExtensions::Array2D::Create(4, 2);
    HSLExtensions::Array2D::SetValue(SegmentHeights, 1, 1, Translate("0"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 1, 2, Translate("14.68"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 2, 1, Translate("3"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 2, 2, Translate("8"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 3, 1, Translate("3"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 3, 2, Translate("18"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 4, 1, Translate("4"));
    HSLExtensions::Array2D::SetValue(SegmentHeights, 4, 2, Translate("38"));
    SegmentEquations = HSLExtensions::Array2D::Create(4, 2);
    HSLExtensions::Array2D::SetValue(SegmentEquations, 1, 1, Translate("x * 2.3562"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 1, 2, Translate("x * 16.4934"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 2, 1, Translate("x * 18.9150"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 2, 2, Translate("x * 56.7450"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 3, 1, Translate("x * x * (13.1947 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 3, 2, Translate("x * 70.5600"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 4, 1, Translate("x * x * (12.5664 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(SegmentEquations, 4, 2, Translate("x * 64.0000"));
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetPlateTypes( variable & o_PlateTypes[] ) void {
    o_PlateTypes.SetSize( 0);
    o_PlateTypes=PlateTypes;
  }

  function GetNumSegments( variable & o_NumSegments[] ) void {
    o_NumSegments.SetSize( 0);
    o_NumSegments=NumSegments;
  }

  function GetSegmentHeights( variable & o_SegmentHeights[] ) void {
    o_SegmentHeights.SetSize( 0);
    o_SegmentHeights=SegmentHeights;
  }

  function GetSegmentEquations( variable & o_SegmentEquations[] ) void {
    o_SegmentEquations.SetSize( 0);
    o_SegmentEquations=SegmentEquations;
  }

  function GetNumChannels(  ) variable {
    return (NumChannels);
  }

  function GetChannelString(  ) variable {
    return (ChannelString);
  }

  function GetTipSequenceStrings( variable & o_TipSequenceStringsArray[] ) void {
    o_TipSequenceStringsArray.SetSize( 0);
    o_TipSequenceStringsArray=TipSequenceStrings;
  }

  function GetTipSequenceVolumes( variable & o_TipSequenceVolumesArray[] ) void {
    o_TipSequenceVolumesArray.SetSize( 0);
    o_TipSequenceVolumesArray=TipSequenceVolumes;
  }

  function GetTipSequenceTypes( variable & o_TipSequenceTypesArray[] ) void {
    o_TipSequenceTypesArray.SetSize( 0);
    o_TipSequenceTypesArray=TipSequenceTypes;
  }

  function GetTipSequenceWasteSequenceStrings( variable & o_TipSequenceWasteSequenceStrings[] ) void {
    o_TipSequenceWasteSequenceStrings.SetSize( 0);
    o_TipSequenceWasteSequenceStrings=TipSequenceWasteSequenceString;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (CoreGripToolSequenceString);
  }

  function EDIT_TipsDialog( variable & TipNumbers2DArray[] ) void {
    private variable FTR300;
    private variable NTR50;
    private variable NTR300;
    private variable FTR1000;
    private dialog customDialog_1;
    private variable NumItems;
    private variable Counter;
    private variable NumbersArray[];
    private variable SequenceStringsArray[];
    NTR50 = 0;
    NTR300 = 0;
    FTR300 = 0;
    FTR1000 = 0;
    SequenceStringsArray = HSLExtensions::Array2D::GetColumn(TipNumbers2DArray, 1);
    NumbersArray = HSLExtensions::Array2D::GetColumn(TipNumbers2DArray, 2);
    NumItems=SequenceStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumItems;)
      {
        Counter = Counter + 1;
        if (SequenceStringsArray.ElementAt( Counter -1) == "seq_Tips_NTR_50ul")
        {
          NTR50 = NumbersArray.ElementAt( Counter -1);
        }
        if (SequenceStringsArray.ElementAt( Counter -1) == "seq_Tips_NTR_300ul")
        {
          NTR300 = NumbersArray.ElementAt( Counter -1);
        }
        if (SequenceStringsArray.ElementAt( Counter -1) == "MAM_Slim300_Tips")
        {
          FTR300 = NumbersArray.ElementAt( Counter -1);
        }
        if (SequenceStringsArray.ElementAt( Counter -1) == "seq_Tips_FTR_1000ul")
        {
          FTR1000 = NumbersArray.ElementAt( Counter -1);
        }
      }
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "Tip50.Text", NTR50 );
    customDialog_1.SetCustomDialogProperty( "Tip300.Text", NTR300 );
    customDialog_1.SetCustomDialogProperty( "Slim300.Text", FTR1000 );
    customDialog_1.SetCustomDialogProperty( "SizeX.Text", FTR300 );
    customDialog_1.ShowCustomDialog();
  }

  function GetMaxPipettingVolume(  ) variable {
    return (MaxPipettingVolume);
  }

  function GetFlipTubeToolSequenceString(  ) variable {
    return (FlipTubeToolSequenceString);
  }
} // library namespace
