#pragma once
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Configuration\\Pipette Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLUtilLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTE {
  variable TipSequencesWasteSequence[];
  variable TipSequencesTipCounter[];
  variable TipSequencesNumUsed[];
  private function CalculateUsedTips( device & ML_STAR, variable UseCase, variable & VolumesArray[] ) void ;
  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable ;
  function DoTipLoading( device & ML_STAR ) void ;
  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) void ;
  function SaveTipLoading( device & ML_STAR ) void ;
  function SetDesaltingUseCase( variable DesaltingUseCase ) void ;
  function ShowTipsDialog(  ) void ;
  function TransferLiquid( device & ML_STAR, variable i_CommandParameterStrings ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PIPETTE_CONFIG::_InitLibrary();
    SCRIPT::_InitLibrary();
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    LABWARE::_InitLibrary();
    SEQUENCES::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    LABWARE::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) void {
    private variable Counter;
    private variable NumTypes;
    private variable TipCounter;
    private variable TipSequenceTypes[];
    private variable Volume;
    private variable Dict[];
    private variable Delimiter;
    private variable VolumeStringArray[];
    private variable VolumeArray[];
    SCRIPT::Init();
    PIPETTE_CONFIG::Init();
    PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
    NumTypes=TipSequenceTypes.GetSize();
    TipSequencesNumUsed.SetSize(0);
    TipSequencesTipCounter.SetSize(0);
    TipSequencesWasteSequence.SetSize(0);
    {
      for(Counter = 0; Counter < NumTypes;)
      {
        Counter = Counter + 1;
        TipCounter = StrConcat2(Translate("TipCounter"), Counter);
        TipSequencesTipCounter.AddAsLast(TipCounter);
        TipSequencesNumUsed.AddAsLast(0);
        TipSequencesWasteSequence.AddAsLast(Translate("N/A"));
      }
    }
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), Volume);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, Volume, VolumeStringArray);
    TOOLS::StringArrayToFloatArray(VolumeStringArray, VolumeArray);
    CalculateUsedTips(ML_STAR, Translate("General"), VolumeArray);
  }

  function TransferLiquid( device & ML_STAR, variable i_CommandParameterStrings ) void {
    private variable SourcePositionsString;
    private variable DestinationPositionsString;
    private variable SourcesString;
    private variable DestinationsString;
    private variable PreTransferDestinationWellVolumesString;
    private variable TransferVolumesString;
    private variable Dict[];
    private variable Delimiter;
    private variable DestinationSequenceStringsArray[];
    private variable DestinationPositionStringsArray[];
    private variable SourceStringsArray[];
    private variable SourceSequenceStringsArray[];
    private variable PreTransferDestinationWellVolumeStringsArray[];
    private variable TransferVolumeStringsArray[];
    private variable SourcePositionStringsArray[];
    private variable DestinationStringsArray[];
    private variable SourcePositionsArray[];
    private variable DestinationPositionsArray[];
    private sequence DestinationSequencesArray[];
    private sequence SourceSequencesArray[];
    private variable MixParametersString;
    private variable MixParameterStringsArray[];
    private variable TransferVolumesArray[];
    private variable MixParametersArray[];
    private variable PreTransferDestinationWellVolumesArray[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Destination"), DestinationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationPosition"), DestinationPositionsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Source"), SourcesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourcePosition"), SourcePositionsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("TransferVolume"), TransferVolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Total"), PreTransferDestinationWellVolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Mix"), MixParametersString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, DestinationsString, DestinationStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, DestinationPositionsString, DestinationPositionStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcesString, SourceStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcePositionsString, SourcePositionStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, TransferVolumesString, TransferVolumeStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, PreTransferDestinationWellVolumesString, PreTransferDestinationWellVolumeStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, MixParametersString, MixParameterStringsArray);
    LABWARE::GetPlateSequenceString(DestinationStringsArray, DestinationSequenceStringsArray);
    LABWARE::GetPlateSequenceString(SourceStringsArray, SourceSequenceStringsArray);
    SEQUENCES::StringToSequence(ML_STAR, DestinationSequenceStringsArray, DestinationSequencesArray);
    TOOLS::StringArrayToIntArray(DestinationPositionStringsArray, DestinationPositionsArray);
    SEQUENCES::StringToSequence(ML_STAR, SourceSequenceStringsArray, SourceSequencesArray);
    TOOLS::StringArrayToIntArray(SourcePositionStringsArray, SourcePositionsArray);
    TOOLS::StringArrayToFloatArray(TransferVolumeStringsArray, TransferVolumesArray);
    TOOLS::StringArrayToFloatArray(PreTransferDestinationWellVolumeStringsArray, PreTransferDestinationWellVolumesArray);
    MixParametersArray=MixParameterStringsArray;
  }

  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void {
    private variable ret_TipToolError;
    if (int_FlipTubeFunction == 1)
    {
      MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
      FLIPTUBETOOL::Initialize(0);
    }
    if (int_FlipTubeFunction == 2)
    {
      MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
      if (ret_TipToolError == 0)
      {
        TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 3)
    {
      MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 4)
    {
      MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
  }

  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable {
    private variable NumPlateTypes;
    private variable Counter;
    private variable Counter2;
    private variable Segments;
    private variable SegmentHeights[];
    private variable PlateTypes[];
    private variable NumSegments[];
    private variable SegmentEquations[];
    private variable OutputFile;
    private variable Height;
    private variable InputFile;
    private file File;
    private variable NumInputPlateTypes;
    private variable MatchedTypeIndexes[];
    private variable NumMatched;
    private variable MaxSegments;
    private variable Index;
    private variable PlateTypeSegments[];
    private variable Equation;
    private variable ParamsString;
    private variable CalculatedHeightsString;
    private variable RootPath;
    private variable PythonScript;
    private variable RunnableCommand;
    private variable _Temp;
    PIPETTE_CONFIG::GetPlateTypes(PlateTypes);
    PIPETTE_CONFIG::GetNumSegments(NumSegments);
    PIPETTE_CONFIG::GetSegmentHeights(SegmentHeights);
    PIPETTE_CONFIG::GetSegmentEquations(SegmentEquations);
    NumInputPlateTypes=i_PlateTypes.GetSize();
    NumPlateTypes=PlateTypes.GetSize();
    MatchedTypeIndexes.SetSize(0);
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            if (i_PlateTypes.ElementAt( Counter -1) == PlateTypes.ElementAt( Counter2 -1))
            {
              MatchedTypeIndexes.AddAsLast(Counter2);
            }
          }
        }
      }
    }
    NumMatched=MatchedTypeIndexes.GetSize();
    if (NumMatched != NumInputPlateTypes)
    {
      return (Translate("False"));
    }
    PlateTypeSegments.SetSize(0);
    MaxSegments = 0;
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        Segments = StrIVal(Segments);
        if (Segments > MaxSegments)
        {
          MaxSegments = Segments;
        }
        PlateTypeSegments.AddAsLast(Segments);
      }
    }
    ParamsString = Translate("");
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        ParamsString = StrConcat12(ParamsString, Translate(""), i_Volumes.ElementAt( Counter -1), Translate(","), Segments, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Segments = StrIVal(Segments);
        {
          for(Counter2 = 0; Counter2 < Segments;)
          {
            Counter2 = Counter2 + 1;
            Equation = HSLExtensions::Array2D::GetValue(SegmentEquations, Index, Counter2);
            Height = HSLExtensions::Array2D::GetValue(SegmentHeights, Index, Counter2);
            ParamsString = StrConcat12(ParamsString, Translate(","), Equation, Translate(","), Height, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
        if (Counter != NumInputPlateTypes)
        {
          ParamsString = StrConcat2(ParamsString, Translate(","));
        }
      }
    }
    RootPath = SCRIPT::GetConfigurationRootPath();
    InputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Input.txt"));
    File.AddField(1, ParamsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(InputFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, InputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    PythonScript = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\CalculateVolumeHeight.py"));
    RunnableCommand = SCRIPT::GeneratePythonScriptCommand(PythonScript, Translate(""), Translate("True"));
    Util::SyncShell(RunnableCommand, 1, _Temp);
    OutputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Output.txt"));
    File.AddField(1, CalculatedHeightsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(OutputFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, OutputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    TOOLS::ParseDelimitedList(Translate(","), CalculatedHeightsString, o_CalculatedHeights);
    return (Translate("True"));
  }

  function ShowTipsDialog(  ) void {
    PIPETTE_CONFIG::EDIT_TipsDialog(TipSequencesNumUsed);
  }

  private function CalculateUsedTips( device & ML_STAR, variable UseCase, variable & VolumesArray[] ) void {
    private variable NumTips;
    private variable Temp;
    private variable Counter;
    private variable TipsUsed;
    private variable MaxPipettingVolume;
    private variable Counter2;
    private variable Volume;
    private variable UsedTipIndex;
    private variable NumVolumes;
    private variable NumTipVolumes;
    private variable TipVolumes[];
    private variable GeneralTipVolumeStrings[];
    private variable SortedGeneralTipIndices[];
    private variable GeneralTipVolumes[];
    private variable GeneralTipIndices[];
    private variable TipUseCases[];
    private variable SortedGeneralTipVolumes[];
    private variable TipUseCasesString;
    private variable NumUseCases;
    private variable TipUseCasesArray[];
    PIPETTE_CONFIG::GetTipSequenceUseCases(TipUseCases);
    PIPETTE_CONFIG::GetTipSequenceVolumes(TipVolumes);
    MaxPipettingVolume = PIPETTE_CONFIG::GetMaxPipettingVolume();
    NumTips=TipUseCases.GetSize();
    GeneralTipVolumeStrings.SetSize(0);
    GeneralTipIndices.SetSize(0);
    {
      for(Counter = 0; Counter < NumTips;)
      {
        Counter = Counter + 1;
        TipUseCasesString = TipUseCases.ElementAt( Counter -1);
        TOOLS::ParseDelimitedList(Translate(","), TipUseCasesString, TipUseCasesArray);
        NumUseCases=TipUseCasesArray.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumUseCases;)
          {
            Counter2 = Counter2 + 1;
            if (TipUseCasesArray.ElementAt( Counter2 -1) == UseCase)
            {
              GeneralTipVolumeStrings.AddAsLast(TipVolumes.ElementAt( Counter -1));
              GeneralTipIndices.AddAsLast(Counter);
              break;
            }
          }
        }
      }
    }
    TOOLS::StringArrayToFloatArray(GeneralTipVolumeStrings, GeneralTipVolumes);
    TOOLS::SortFloatArrayL2G(GeneralTipVolumes, SortedGeneralTipVolumes, SortedGeneralTipIndices);
    NumTipVolumes=SortedGeneralTipVolumes.GetSize();
    NumVolumes=VolumesArray.GetSize();
    {
      for(Counter = 0; Counter < NumVolumes;)
      {
        Counter = Counter + 1;
        Volume = VolumesArray.ElementAt( Counter -1);
        if (MaxPipettingVolume != 0)
        {
          if (Volume > MaxPipettingVolume)
          {
            MECC::TraceComment(Translate("*******************************************************************************************\n******************************************ATTENTION**********************************\n*******************************************************************************************\n\nPipetting volumes are greater than the max pipetting volume for this \nconfiguration.\nPlease resolve by doing one of the following:\n1. reducing the pipetting volume in the method \n2. increasing the max pipetting volume by modifying the Pipette module configuration file.\n\n*******************************************************************************************\n******************************************ATTENTION**********************************\n*******************************************************************************************"));
            abort;
          }
        }
        {
          for(Counter2 = 0; Counter2 < NumTipVolumes;)
          {
            Counter2 = Counter2 + 1;
            UsedTipIndex = SortedGeneralTipIndices.ElementAt( Counter2 -1);
            UsedTipIndex = GeneralTipIndices.ElementAt( UsedTipIndex -1);
            if (Volume <= SortedGeneralTipVolumes.ElementAt( Counter2 -1))
            {
              TipsUsed=TipSequencesNumUsed.GetAt(UsedTipIndex-1);
              TipsUsed = TipsUsed + 1;
              TipSequencesNumUsed.SetAt(UsedTipIndex-1, TipsUsed);
              break;
            }
            else
            {
              if (Counter2 == NumTipVolumes)
              {
                Temp = Volume / (SortedGeneralTipVolumes.ElementAt( Counter2 -1) * 1.0);
                Temp = StrFStr(Temp);
                Temp = StrIVal(Temp);
                Temp = Temp + 1;
                TipsUsed=TipSequencesNumUsed.GetAt(UsedTipIndex-1);
                TipsUsed = TipsUsed + 1;
                TipSequencesNumUsed.SetAt(UsedTipIndex-1, TipsUsed);
                break;
              }
            }
          }
        }
      }
    }
  }

  function DoTipLoading( device & ML_STAR ) void {
    private variable Required;
    private variable NumTipsRequired;
    private variable TotalTips;
    private variable Remainder;
    private variable NumSetsRequired;
    private variable loopCounter1;
    private variable NumChannels;
    private variable Available;
    private variable Counter;
    private variable TipType;
    private variable NumTipSequences;
    private variable TipSequenceTypes[];
    private variable TipSequenceStrings[];
    private dialog customDialog_1;
    private dialog customDialog_2;
    private variable NumTipsLoaded;
    private variable WasteSequenceName;
    private variable NumUsed;
    private variable LoadingString;
    private sequence Waste;
    private sequence TipSequenceWasteSequence;
    private sequence TipSequence;
    private variable TipSequenceVolumes[];
    private variable TipSequenceWasteSequenceStrings[];
    NumChannels = PIPETTE_CONFIG::GetNumChannels();
    PIPETTE_CONFIG::GetTipSequenceStrings(TipSequenceStrings);
    PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
    PIPETTE_CONFIG::GetTipSequenceVolumes(TipSequenceVolumes);
    PIPETTE_CONFIG::GetTipSequenceWasteSequenceStrings(TipSequenceWasteSequenceStrings);
    NumTipSequences=TipSequenceStrings.GetSize();
    {
      for(Counter = 0; Counter < NumTipSequences;)
      {
        Counter = Counter + 1;
        NumUsed = TipSequencesNumUsed.ElementAt( Counter -1);
        TipType = TipSequenceTypes.ElementAt( Counter -1);
        DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( Counter -1), TipSequence);
        if (NumUsed > 0)
        {
          Remainder = NumUsed % NumChannels;
          NumSetsRequired = NumUsed / NumChannels;
          NumSetsRequired = StrFStr(NumSetsRequired);
          NumSetsRequired = StrIVal(NumSetsRequired);
          if (Remainder == 0)
          {
            NumSetsRequired = NumSetsRequired + 1;
          }
          else
          {
            NumSetsRequired = NumSetsRequired + 2;
          }
          NumTipsRequired = NumSetsRequired * NumChannels;
          if (TipType == "NTR")
          {
            LoadingString = StrConcat4(Translate("Edit "), TipSequenceVolumes.ElementAt( Counter -1), Translate("uL Tip Locations"), Translate(""));
            DevGetSequenceRef(ML_STAR, TipSequenceWasteSequenceStrings.ElementAt( Counter -1), TipSequenceWasteSequence);
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), LoadingString, 1, 1000);
                NumTipsLoaded = TipSequence.GetCurrentPosition();
                NumTipsLoaded = NumTipsLoaded - 1;
                TotalTips = SeqGetTotal(TipSequence);
                NumTipsLoaded = TotalTips - NumTipsLoaded;
                if (NumTipsRequired <= NumTipsLoaded)
                {
                  VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(TipSequenceWasteSequence, 0, Waste, ML_STAR);
                  WasteSequenceName = SeqGetName(Waste);
                  TipSequencesWasteSequence.SetAt(Counter-1, WasteSequenceName);
                  break;
                }
                Required = NumTipsRequired;
                Available = NumTipsLoaded;
                customDialog_2.InitCustomDialog("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");
                customDialog_2.SetCustomDialogProperty( "textBox1.Text", Required );
                customDialog_2.SetCustomDialogProperty( "textBox2.Text", Available );
                customDialog_2.ShowCustomDialog();
              }
            }
          }
          if (TipType == "FTR")
          {
            TipCount::Read2(TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                TipCount::Edit2(TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), ML_STAR, 10000);
                NumTipsLoaded = SeqGetTotal(TipSequence);
                if (NumTipsRequired <= NumTipsLoaded)
                {
                  break;
                }
                Required = NumTipsRequired;
                Available = NumTipsLoaded;
                customDialog_1.InitCustomDialog("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");
                customDialog_1.SetCustomDialogProperty( "textBox1.Text", Required );
                customDialog_1.SetCustomDialogProperty( "textBox2.Text", Available );
                customDialog_1.ShowCustomDialog();
              }
            }
            TipCount::Write2(TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
          }
        }
      }
    }
  }

  function SaveTipLoading( device & ML_STAR ) void {
    private variable CoreGripToolSequenceString;
    private variable NumTips;
    private variable Counter;
    private variable TipType;
    private variable NumTipSequences;
    private variable LoadingString;
    private sequence TipSequence;
    private sequence TipWasteSequence;
    private sequence CoreGripToolSequence;
    private variable TipSequenceVolumes[];
    private variable TipSequenceTypes[];
    private variable TipSequenceStrings[];
    PIPETTE_CONFIG::GetTipSequenceStrings(TipSequenceStrings);
    PIPETTE_CONFIG::GetTipSequenceVolumes(TipSequenceVolumes);
    PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
    NumTipSequences=TipSequenceStrings.GetSize();
    {
      for(Counter = 0; Counter < NumTipSequences;)
      {
        Counter = Counter + 1;
        TipType = TipSequenceTypes.ElementAt( Counter -1);
        DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( Counter -1), TipSequence);
        DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( Counter -1), TipSequence);
        NumTips = TipSequence.GetCurrentPosition();
        if (NumTips != 1)
        {
          if (TipType == "NTR")
          {
            LoadingString = StrConcat4(Translate("Please Reload "), TipSequenceVolumes.ElementAt( Counter -1), Translate(" NTR Tips"), Translate(""));
            CoreGripToolSequenceString = PIPETTE_CONFIG::GetCoreGripToolSequenceString();
            DevGetSequenceRef(ML_STAR, CoreGripToolSequenceString, CoreGripToolSequence);
            DevGetSequenceRef(ML_STAR, TipSequencesWasteSequence.ElementAt( Counter -1), TipWasteSequence);
            VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), TipWasteSequence, CoreGripToolSequence, 1, 1, 0, TipWasteSequence, 0, 8, 0, 1, LoadingString, 999);
          }
          if (TipType == "FTR")
          {
            TipCount::Write2(TipSequence, TipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
          }
        }
      }
    }
  }

  function SetDesaltingUseCase( variable DesaltingUseCase ) void {
    PIPETTE_CONFIG::EDIT_SetDesaltingUseCase(DesaltingUseCase);
  }
} // library namespace
