#pragma once
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Configuration\\Pipette Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLUtilLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\PfizerTools\\PfizerToolsVCurrent.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTE {
  variable TrackedTipSequenceStrings[];
  variable TrackedTipSequenceTypes[];
  variable TrackedTipSequenceVolumes[];
  variable TrackedTipSequencesTipCounter[];
  variable TrackedTipSequencesNumUsed[];
  variable TrackedTipSequencesWasteSequence[];
  variable TrackedTipSequencesGeneratedWasteSequence[];
  function AddUsedTips( variable TipSequenceString, variable TipSequenceType, variable TipSequenceVolume, variable TipSequenceWasteSequenceString, variable NumTips ) void ;
  private function CalculateUsedTips( device & ML_STAR, variable & VolumesArray[] ) void ;
  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable ;
  function DoTipLoading( device & ML_STAR ) void ;
  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) void ;
  function SaveTipLoading( device & ML_STAR ) void ;
  function ShowTipsDialog(  ) void ;
  function TransferLiquid( device & ML_STAR, variable i_CommandParameterStrings ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PIPETTE_CONFIG::_InitLibrary();
    SCRIPT::_InitLibrary();
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    LABWARE::_InitLibrary();
    SEQUENCES::_InitLibrary();
    PFIZERTOOLSVCURRENT::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    LABWARE::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    PFIZERTOOLSVCURRENT::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) void {
    private variable NumTypes;
    private variable TipSequenceTypes[];
    private variable Volume;
    private variable Dict[];
    private variable Delimiter;
    private variable VolumeStringArray[];
    private variable VolumeArray[];
    SCRIPT::Init();
    PIPETTE_CONFIG::Init();
    PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
    NumTypes=TipSequenceTypes.GetSize();
    TrackedTipSequenceStrings.SetSize(0);
    TrackedTipSequenceTypes.SetSize(0);
    TrackedTipSequenceVolumes.SetSize(0);
    TrackedTipSequencesNumUsed.SetSize(0);
    TrackedTipSequencesTipCounter.SetSize(0);
    TrackedTipSequencesWasteSequence.SetSize(0);
    TrackedTipSequencesGeneratedWasteSequence.SetSize(0);
    TrackedTipSequencesTipCounter.SetSize(0);
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), Volume);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, Volume, VolumeStringArray);
    TOOLS::StringArrayToFloatArray(VolumeStringArray, VolumeArray);
    CalculateUsedTips(ML_STAR, VolumeArray);
  }

  function TransferLiquid( device & ML_STAR, variable i_CommandParameterStrings ) void {
    private variable SourcePositionsString;
    private variable DestinationPositionsString;
    private variable SourcesString;
    private variable DestinationsString;
    private variable TransferVolumesString;
    private variable Dict[];
    private variable Delimiter;
    private variable DestinationSequenceStringsArray[];
    private variable DestinationPositionStringsArray[];
    private variable SourceStringsArray[];
    private variable SourceSequenceStringsArray[];
    private variable TransferVolumeStringsArray[];
    private variable SourcePositionStringsArray[];
    private variable DestinationStringsArray[];
    private variable SourcePositionsArray[];
    private variable DestinationPositionsArray[];
    private sequence DestinationSequencesArray[];
    private sequence SourceSequencesArray[];
    private variable MixParametersString;
    private variable MixParameterStringsArray[];
    private variable TransferVolumesArray[];
    private variable MixParametersArray[];
    private variable CurrentDestinationWellVolumesString;
    private variable CurrentDestinationWellVolumesArray[];
    private variable CurrentDestinationWellVolumeStringsArray[];
    private variable Counter;
    private variable NumTransfers;
    private variable cLLD1000[];
    private variable DispenseHeight5[];
    private variable cLLD300[];
    private variable LidSequenceList[];
    private variable LiquidFollowing50[];
    private variable DispenseHeight50[];
    private variable FixedHeight1000[];
    private variable LiquidFollowing1000[];
    private variable FixedHeight50[];
    private variable LiquidFollowing300[];
    private variable LiquidFollowing5[];
    private variable FixedHeight5[];
    private variable TransferVolume50[];
    private variable FixedHeight300[];
    private variable DispenseHeight1000[];
    private variable TransferVolume300[];
    private variable TransferVolume5[];
    private variable cLLD50[];
    private variable TransferVolume1000[];
    private variable cLLD5[];
    private variable DispenseHeight300[];
    private variable Trash;
    private variable DestinationDispenseHeightsArray[];
    private variable DestinationTypesArray[];
    private variable LiquidFollowing;
    private variable ItemIndex;
    private variable cLLD;
    private variable FixedHeight;
    private variable DestinationMix50[];
    private variable SourceMix5[];
    private variable DestinationMixVolume300[];
    private variable SourceMixVolume1000[];
    private variable DestinationMix5[];
    private variable DestinationMix300[];
    private variable SourceMixVolume300[];
    private variable SourceTypesArray[];
    private variable SourceMixVolume50[];
    private variable SourceMix1000[];
    private variable DestinationMixVolume50[];
    private variable DestinationMixVolume5[];
    private variable SourceLidSequenceStringsArray[];
    private variable DestinationMixVolume1000[];
    private variable SourceMixVolume5[];
    private variable SourceMix300[];
    private variable SourceMix50[];
    private variable DestinationMix1000[];
    private variable DestinationLabID;
    private variable SourceMix;
    private variable SourcePosID;
    private variable MixVolume;
    private variable TransfersRequired;
    private variable DestinationPosID;
    private variable SourceLabID;
    private variable DestinationMix;
    private sequence DispenseSequence50;
    private sequence AspirateSequence5;
    private sequence DispenseSequence300;
    private sequence DispenseSequence5;
    private sequence Sequence;
    private sequence AspirateSequence300;
    private sequence AspirateSequence50;
    private sequence DispenseSequence1000;
    private sequence AspirateSequence1000;
    private variable DispenseHeight;
    private variable DispenseHeightDifference;
    private variable DispenseHeightStep;
    private variable DestinationFinalDispenseHeightsArray[];
    private variable FinalDestinationWellVolumesArray[];
    private variable Counter2;
    private variable NumLids;
    private variable Storage;
    private variable CoreGripToolSequenceString;
    private variable FlipTubeToolSequenceString;
    private sequence FlipTubeToolSequence;
    private sequence CoreGripToolSequence;
    private variable SourcePlateLoadingLocationsArray[];
    private variable loopCounter11;
    private variable TrackedIndex;
    private variable TipType;
    private variable SequenceIndex;
    private variable Index;
    private variable SequenceSize;
    private sequence wasteNTR;
    private sequence TipSequence;
    private variable TipSequenceVolumes[];
    private variable TipSequenceTypes[];
    private variable TipSequenceStrings[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Destination"), DestinationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationPosition"), DestinationPositionsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Source"), SourcesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourcePosition"), SourcePositionsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("TransferVolume"), TransferVolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("CurrentDestinationVolume"), CurrentDestinationWellVolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Mix"), MixParametersString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, DestinationsString, DestinationStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, DestinationPositionsString, DestinationPositionStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcesString, SourceStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcePositionsString, SourcePositionStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, TransferVolumesString, TransferVolumeStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, CurrentDestinationWellVolumesString, CurrentDestinationWellVolumeStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, MixParametersString, MixParameterStringsArray);
    LABWARE::GetPlateSequenceString(DestinationStringsArray, DestinationSequenceStringsArray);
    LABWARE::GetPlateSequenceString(SourceStringsArray, SourceSequenceStringsArray);
    SEQUENCES::StringToSequence(ML_STAR, DestinationSequenceStringsArray, DestinationSequencesArray);
    TOOLS::StringArrayToIntArray(DestinationPositionStringsArray, DestinationPositionsArray);
    SEQUENCES::StringToSequence(ML_STAR, SourceSequenceStringsArray, SourceSequencesArray);
    TOOLS::StringArrayToIntArray(SourcePositionStringsArray, SourcePositionsArray);
    TOOLS::StringArrayToFloatArray(TransferVolumeStringsArray, TransferVolumesArray);
    TOOLS::StringArrayToFloatArray(CurrentDestinationWellVolumeStringsArray, CurrentDestinationWellVolumesArray);
    MixParametersArray=MixParameterStringsArray;
    Trash = LABWARE::GetPlateLabwareType(DestinationStringsArray, DestinationTypesArray);
    Trash = LABWARE::GetPlateLabwareType(SourceStringsArray, SourceTypesArray);
    Trash = LABWARE::GetPlateLidSequenceString(SourceStringsArray, SourceLidSequenceStringsArray);
    Trash = LABWARE::GetPlateLoadingLocation(SourceStringsArray, SourcePlateLoadingLocationsArray);
    TOOLS::AddArrays(TransferVolumesArray, CurrentDestinationWellVolumesArray, FinalDestinationWellVolumesArray);
    Trash = CalculateVolumeHeights(DestinationTypesArray, CurrentDestinationWellVolumesArray, DestinationDispenseHeightsArray);
    Trash = CalculateVolumeHeights(DestinationTypesArray, FinalDestinationWellVolumesArray, DestinationFinalDispenseHeightsArray);
    LidSequenceList.SetSize(0);
    SourceMix5.SetSize(0);
    SourceMix50.SetSize(0);
    SourceMix300.SetSize(0);
    SourceMix1000.SetSize(0);
    SourceMixVolume5.SetSize(0);
    SourceMixVolume50.SetSize(0);
    SourceMixVolume300.SetSize(0);
    SourceMixVolume1000.SetSize(0);
    DestinationMix5.SetSize(0);
    DestinationMix50.SetSize(0);
    DestinationMix300.SetSize(0);
    DestinationMix1000.SetSize(0);
    DestinationMixVolume5.SetSize(0);
    DestinationMixVolume50.SetSize(0);
    DestinationMixVolume300.SetSize(0);
    DestinationMixVolume1000.SetSize(0);
    cLLD5.SetSize(0);
    cLLD50.SetSize(0);
    cLLD300.SetSize(0);
    cLLD1000.SetSize(0);
    FixedHeight5.SetSize(0);
    FixedHeight50.SetSize(0);
    FixedHeight300.SetSize(0);
    FixedHeight1000.SetSize(0);
    LiquidFollowing5.SetSize(0);
    LiquidFollowing50.SetSize(0);
    LiquidFollowing300.SetSize(0);
    LiquidFollowing1000.SetSize(0);
    TransferVolume5.SetSize(0);
    TransferVolume50.SetSize(0);
    TransferVolume300.SetSize(0);
    TransferVolume1000.SetSize(0);
    DispenseHeight5.SetSize(0);
    DispenseHeight50.SetSize(0);
    DispenseHeight300.SetSize(0);
    DispenseHeight1000.SetSize(0);
    NumTransfers=DestinationStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumTransfers;)
      {
        Counter = Counter + 1;
        MixVolume = TransferVolumesArray.ElementAt( Counter -1) + CurrentDestinationWellVolumesArray.ElementAt( Counter -1);
        if (SourceTypesArray.ElementAt( Counter -1) == "Plate")
        {
          cLLD = 0;
          FixedHeight = 0.75;
          LiquidFollowing = 0;
        }
        else
        {
          if (SourceLidSequenceStringsArray.ElementAt( Counter -1) != "False")
          {
            ItemIndex = TOOLS::IsInArray(SourceLidSequenceStringsArray.ElementAt( Counter -1), LidSequenceList);
            if (ItemIndex == 0)
            {
              LidSequenceList.AddAsLast(SourceLidSequenceStringsArray.ElementAt( Counter -1));
            }
            cLLD = 1;
            FixedHeight = 0;
            LiquidFollowing = 1;
          }
          SourceMix = 0;
          DestinationMix = 0;
          if (MixParametersArray.ElementAt( Counter -1) == "Yes")
          {
            DestinationMix = 10;
          }
        }
        Sequence=DestinationSequencesArray.GetAt(Counter-1);
        Sequence.SetCount(DestinationPositionsArray.ElementAt( Counter -1));
        Sequence.SetCurrentPosition(DestinationPositionsArray.ElementAt( Counter -1));
        DestinationLabID = SeqGetLabwareId(Sequence);
        DestinationPosID = SeqGetPositionId(Sequence);
        Sequence=SourceSequencesArray.GetAt(Counter-1);
        Sequence.SetCount(SourcePositionsArray.ElementAt( Counter -1));
        Sequence.SetCurrentPosition(SourcePositionsArray.ElementAt( Counter -1));
        SourceLabID = SeqGetLabwareId(Sequence);
        SourcePosID = SeqGetPositionId(Sequence);
        if (TransferVolumesArray.ElementAt( Counter -1) <= 5)
        {
          SeqAdd(DispenseSequence5, DestinationLabID, DestinationPosID);
          SeqAdd(AspirateSequence5, SourceLabID, SourcePosID);
          cLLD5.AddAsLast(cLLD);
          FixedHeight5.AddAsLast(FixedHeight);
          DispenseHeight5.AddAsLast(DestinationDispenseHeightsArray.ElementAt( Counter -1));
          LiquidFollowing5.AddAsLast(LiquidFollowing);
          TransferVolume5.AddAsLast(TransferVolumesArray.ElementAt( Counter -1));
          if (MixVolume == 66)
          {
            MixVolume = 50;
          }
          else
          {
            MixVolume = MixVolume * 0.75;
          }
          DestinationMixVolume5.AddAsLast(MixVolume);
          DestinationMix5.AddAsLast(DestinationMix);
          SourceMixVolume5.AddAsLast(0);
          SourceMix5.AddAsLast(0);
        }
        else
        {
          if (TransferVolumesArray.ElementAt( Counter -1) <= 50)
          {
            SeqAdd(DispenseSequence50, DestinationLabID, DestinationPosID);
            SeqAdd(AspirateSequence50, SourceLabID, SourcePosID);
            cLLD50.AddAsLast(cLLD);
            FixedHeight50.AddAsLast(FixedHeight);
            DispenseHeight50.AddAsLast(DestinationDispenseHeightsArray.ElementAt( Counter -1));
            LiquidFollowing50.AddAsLast(LiquidFollowing);
            TransferVolume50.AddAsLast(TransferVolumesArray.ElementAt( Counter -1));
            if (MixVolume == 66)
            {
              MixVolume = 50;
            }
            else
            {
              MixVolume = MixVolume * 0.75;
            }
            DestinationMixVolume50.AddAsLast(MixVolume);
            DestinationMix50.AddAsLast(DestinationMix);
            SourceMixVolume50.AddAsLast(0);
            SourceMix50.AddAsLast(0);
          }
          else
          {
            if (TransferVolumesArray.ElementAt( Counter -1) <= 300)
            {
              SeqAdd(DispenseSequence300, DestinationLabID, DestinationPosID);
              SeqAdd(AspirateSequence300, SourceLabID, SourcePosID);
              cLLD300.AddAsLast(cLLD);
              FixedHeight300.AddAsLast(FixedHeight);
              DispenseHeight300.AddAsLast(DestinationDispenseHeightsArray.ElementAt( Counter -1));
              LiquidFollowing300.AddAsLast(LiquidFollowing);
              TransferVolume300.AddAsLast(TransferVolumesArray.ElementAt( Counter -1));
              if (MixVolume == 395)
              {
                MixVolume = 300;
              }
              else
              {
                MixVolume = MixVolume * 0.75;
              }
              DestinationMixVolume300.AddAsLast(MixVolume);
              DestinationMix300.AddAsLast(DestinationMix);
              SourceMixVolume300.AddAsLast(0);
              SourceMix300.AddAsLast(0);
            }
            else
            {
              if (TransferVolumesArray.ElementAt( Counter -1) <= 1000)
              {
                SeqAdd(DispenseSequence1000, DestinationLabID, DestinationPosID);
                SeqAdd(AspirateSequence1000, SourceLabID, SourcePosID);
                cLLD1000.AddAsLast(cLLD);
                FixedHeight1000.AddAsLast(FixedHeight);
                DispenseHeight1000.AddAsLast(DestinationDispenseHeightsArray.ElementAt( Counter -1));
                LiquidFollowing1000.AddAsLast(LiquidFollowing);
                TransferVolume1000.AddAsLast(TransferVolumesArray.ElementAt( Counter -1));
                if (MixVolume == 1333)
                {
                  MixVolume = 1000;
                }
                else
                {
                  MixVolume = MixVolume * 0.75;
                }
                DestinationMixVolume1000.AddAsLast(MixVolume);
                DestinationMix1000.AddAsLast(DestinationMix);
                SourceMixVolume1000.AddAsLast(0);
                SourceMix1000.AddAsLast(0);
              }
              else
              {
                TransfersRequired = TransferVolumesArray.ElementAt( Counter -1) / (1000 * 1.0);
                TransfersRequired = StrFStr(TransfersRequired);
                TransfersRequired = StrIVal(TransfersRequired);
                TransfersRequired = TransfersRequired + 1;
                TransferVolumesArray[ Counter -1] = TransferVolumesArray.ElementAt( Counter -1) / (TransfersRequired * 1.0);
                DispenseHeightDifference = DestinationFinalDispenseHeightsArray.ElementAt( Counter -1) - DestinationDispenseHeightsArray.ElementAt( Counter -1);
                DispenseHeightStep = DispenseHeightDifference / (TransfersRequired * 1.0);
                DispenseHeight = DestinationDispenseHeightsArray.ElementAt( Counter -1);
                {
                  for(Counter2 = 0; Counter2 < TransfersRequired;)
                  {
                    Counter2 = Counter2 + 1;
                    SeqAdd(DispenseSequence1000, DestinationLabID, DestinationPosID);
                    SeqAdd(AspirateSequence1000, SourceLabID, SourcePosID);
                    cLLD1000.AddAsLast(cLLD);
                    FixedHeight1000.AddAsLast(FixedHeight);
                    DispenseHeight1000.AddAsLast(DispenseHeight);
                    DispenseHeight = DispenseHeight + DispenseHeightStep;
                    LiquidFollowing1000.AddAsLast(LiquidFollowing);
                    TransferVolume1000.AddAsLast(TransferVolumesArray.ElementAt( Counter -1));
                    if (MixVolume == 1333)
                    {
                      MixVolume = 1000;
                    }
                    else
                    {
                      MixVolume = MixVolume * 0.75;
                    }
                    DestinationMixVolume1000.AddAsLast(MixVolume);
                    if (TransfersRequired == Counter2)
                    {
                      DestinationMix1000.AddAsLast(DestinationMix);
                    }
                    else
                    {
                      DestinationMix1000.AddAsLast(0);
                    }
                    SourceMixVolume1000.AddAsLast(0);
                    SourceMix1000.AddAsLast(0);
                  }
                }
              }
            }
          }
        }
        FlipTubeToolSequenceString = PIPETTE_CONFIG::GetFlipTubeToolSequenceString();
        Trash = DevGetSequenceRef(ML_STAR, FlipTubeToolSequenceString, FlipTubeToolSequence);
        CoreGripToolSequenceString = PIPETTE_CONFIG::GetCoreGripToolSequenceString();
        Trash = DevGetSequenceRef(ML_STAR, CoreGripToolSequenceString, CoreGripToolSequence);
        PIPETTE_CONFIG::GetTipSequenceStrings(TipSequenceStrings);
        PIPETTE_CONFIG::GetTipSequenceVolumes(TipSequenceVolumes);
        PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
        NumLids=LidSequenceList.GetSize();
        if (NumLids != 0)
        {
          FLIPTUBETOOL::ToolsPickUp(Translate("10000000"), FlipTubeToolSequence);
          {
            for(Counter = 0; Counter < NumLids;)
            {
              Counter = Counter + 1;
              DevGetSequenceRef(ML_STAR, LidSequenceList.ElementAt( Counter -1), Sequence);
              Flip_Tube_Functions(2, FlipTubeToolSequence, Sequence, Translate("10000000"), 0, 0, ML_STAR);
            }
          }
          FLIPTUBETOOL::ToolsEject(FlipTubeToolSequence);
        }
        SequenceIndex = TOOLS::IsInArray(50, TipSequenceVolumes);
        TipType = TipSequenceTypes.ElementAt( SequenceIndex -1);
        Trash = DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( SequenceIndex -1), TipSequence);
        TrackedIndex = TOOLS::IsInArray(TipSequenceStrings.ElementAt( SequenceIndex -1), TrackedTipSequenceStrings);
        SequenceSize = SeqGetTotal(DispenseSequence5);
        PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence5, 1, SequenceSize);
        PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence5, 1, SequenceSize);
        {
          loopCounter11 = 0;
          while (
             (DispenseSequence5.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, AspirateSequence5, 1, DispenseSequence5, 1, TipSequence, 1);
            loopCounter11 = loopCounter11 + 1;
            Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence5);
            if (TipType == "NTR")
            {
              Trash = DevGetSequenceRef(ML_STAR, TrackedTipSequencesGeneratedWasteSequence.ElementAt( TrackedIndex -1), wasteNTR);
              VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TrackedTipSequencesTipCounter.ElementAt( TrackedIndex -1), wasteNTR, CoreGripToolSequence, 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload 50 NTR Tips"), 0);
            }
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (DispenseSequence5.GetCurrentPosition() > 0 && DispenseSequence5.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          AspirateSequence5.SetMax(AspirateSequence5.GetTotal());
          DispenseSequence5.SetMax(DispenseSequence5.GetTotal());
          TipSequence.SetMax(TipSequence.GetTotal());
          AspirateSequence5.SetCurrentPosition(1);
          DispenseSequence5.SetCurrentPosition(1);
        }
        SequenceIndex = TOOLS::IsInArray(50, TipSequenceVolumes);
        TipType = TipSequenceTypes.ElementAt( SequenceIndex -1);
        Trash = DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( SequenceIndex -1), TipSequence);
        TrackedIndex = TOOLS::IsInArray(TipSequenceStrings.ElementAt( SequenceIndex -1), TrackedTipSequenceStrings);
        SequenceSize = SeqGetTotal(DispenseSequence50);
        PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence50, 1, SequenceSize);
        PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence50, 1, SequenceSize);
        {
          loopCounter11 = 0;
          while (
             (DispenseSequence50.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, TipSequence, 1, AspirateSequence50, 1, DispenseSequence50, 1);
            loopCounter11 = loopCounter11 + 1;
            Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence50);
            if (TipType == "NTR")
            {
              Trash = DevGetSequenceRef(ML_STAR, TrackedTipSequencesGeneratedWasteSequence.ElementAt( TrackedIndex -1), wasteNTR);
              VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TrackedTipSequencesTipCounter.ElementAt( TrackedIndex -1), wasteNTR, CoreGripToolSequence, 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload 50 NTR Tips"), 0);
            }
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (DispenseSequence50.GetCurrentPosition() > 0 && DispenseSequence50.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          TipSequence.SetMax(TipSequence.GetTotal());
          AspirateSequence50.SetMax(AspirateSequence50.GetTotal());
          DispenseSequence50.SetMax(DispenseSequence50.GetTotal());
          AspirateSequence50.SetCurrentPosition(1);
          DispenseSequence50.SetCurrentPosition(1);
        }
        SequenceIndex = TOOLS::IsInArray(300, TipSequenceVolumes);
        TipType = TipSequenceTypes.ElementAt( SequenceIndex -1);
        Trash = DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( SequenceIndex -1), TipSequence);
        TrackedIndex = TOOLS::IsInArray(TipSequenceStrings.ElementAt( SequenceIndex -1), TrackedTipSequenceStrings);
        SequenceSize = SeqGetTotal(DispenseSequence300);
        PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence300, 1, SequenceSize);
        PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence300, 1, SequenceSize);
        {
          loopCounter11 = 0;
          while (
             (DispenseSequence300.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, AspirateSequence300, 1, DispenseSequence300, 1, TipSequence, 1);
            loopCounter11 = loopCounter11 + 1;
            Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence50);
            if (TipType == "NTR")
            {
              Trash = DevGetSequenceRef(ML_STAR, TrackedTipSequencesGeneratedWasteSequence.ElementAt( TrackedIndex -1), wasteNTR);
              VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TrackedTipSequencesTipCounter.ElementAt( TrackedIndex -1), wasteNTR, CoreGripToolSequence, 1, 1, 0, TipSequence, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 0);
            }
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (DispenseSequence300.GetCurrentPosition() > 0 && DispenseSequence300.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          AspirateSequence300.SetMax(AspirateSequence300.GetTotal());
          DispenseSequence300.SetMax(DispenseSequence300.GetTotal());
          TipSequence.SetMax(TipSequence.GetTotal());
          AspirateSequence300.SetCurrentPosition(1);
          DispenseSequence300.SetCurrentPosition(1);
        }
        SequenceIndex = TOOLS::IsInArray(1000, TipSequenceVolumes);
        TipType = TipSequenceTypes.ElementAt( SequenceIndex -1);
        Trash = DevGetSequenceRef(ML_STAR, TipSequenceStrings.ElementAt( SequenceIndex -1), TipSequence);
        TrackedIndex = TOOLS::IsInArray(TipSequenceStrings.ElementAt( SequenceIndex -1), TrackedTipSequenceStrings);
        SequenceSize = SeqGetTotal(DispenseSequence1000);
        PFIZERTOOLSVCURRENT::SetSequence(DispenseSequence1000, 1, SequenceSize);
        PFIZERTOOLSVCURRENT::SetSequence(AspirateSequence1000, 1, SequenceSize);
        {
          loopCounter11 = 0;
          while (
             (DispenseSequence1000.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, AspirateSequence1000, 1, DispenseSequence1000, 1, TipSequence, 1);
            loopCounter11 = loopCounter11 + 1;
            Index = PFIZERTOOLSVCURRENT::GetIndex(1, DispenseSequence50);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (DispenseSequence1000.GetCurrentPosition() > 0 && DispenseSequence1000.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          AspirateSequence1000.SetMax(AspirateSequence1000.GetTotal());
          DispenseSequence1000.SetMax(DispenseSequence1000.GetTotal());
          TipSequence.SetMax(TipSequence.GetTotal());
          AspirateSequence1000.SetCurrentPosition(1);
          DispenseSequence1000.SetCurrentPosition(1);
        }
        NumLids=LidSequenceList.GetSize();
        if (NumLids != 0)
        {
          FLIPTUBETOOL::ToolsPickUp(Translate("10000000"), FlipTubeToolSequence);
          {
            for(Counter = 0; Counter < NumLids;)
            {
              Counter = Counter + 1;
              Storage = StrFind(SourcePlateLoadingLocationsArray.ElementAt( Counter -1), Translate("E"));
              DevGetSequenceRef(ML_STAR, LidSequenceList.ElementAt( Counter -1), Sequence);
              if (Storage == -1)
              {
                Flip_Tube_Functions(3, FlipTubeToolSequence, Sequence, Translate("10000000"), 0, 0, ML_STAR);
              }
              else
              {
                Flip_Tube_Functions(4, FlipTubeToolSequence, Sequence, Translate("10000000"), 0, 0, ML_STAR);
              }
            }
          }
          FLIPTUBETOOL::ToolsEject(FlipTubeToolSequence);
        }
      }
    }
  }

  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void {
    private variable ret_TipToolError;
    if (int_FlipTubeFunction == 1)
    {
      MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
      FLIPTUBETOOL::Initialize(0);
    }
    if (int_FlipTubeFunction == 2)
    {
      MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
      if (ret_TipToolError == 0)
      {
        TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 3)
    {
      MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 4)
    {
      MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
  }

  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable {
    private variable NumPlateTypes;
    private variable Counter;
    private variable Counter2;
    private variable Segments;
    private variable SegmentHeights[];
    private variable PlateTypes[];
    private variable NumSegments[];
    private variable SegmentEquations[];
    private variable OutputFile;
    private variable Height;
    private variable InputFile;
    private file File;
    private variable NumInputPlateTypes;
    private variable MatchedTypeIndexes[];
    private variable NumMatched;
    private variable MaxSegments;
    private variable Index;
    private variable PlateTypeSegments[];
    private variable Equation;
    private variable ParamsString;
    private variable CalculatedHeightsString;
    private variable RootPath;
    private variable PythonScript;
    private variable RunnableCommand;
    private variable _Temp;
    o_CalculatedHeights.SetSize( 0);
    PIPETTE_CONFIG::GetPlateTypes(PlateTypes);
    PIPETTE_CONFIG::GetNumSegments(NumSegments);
    PIPETTE_CONFIG::GetSegmentHeights(SegmentHeights);
    PIPETTE_CONFIG::GetSegmentEquations(SegmentEquations);
    NumInputPlateTypes=i_PlateTypes.GetSize();
    NumPlateTypes=PlateTypes.GetSize();
    MatchedTypeIndexes.SetSize(0);
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            if (i_PlateTypes.ElementAt( Counter -1) == PlateTypes.ElementAt( Counter2 -1))
            {
              MatchedTypeIndexes.AddAsLast(Counter2);
            }
          }
        }
      }
    }
    NumMatched=MatchedTypeIndexes.GetSize();
    if (NumMatched != NumInputPlateTypes)
    {
      return (Translate("False"));
    }
    PlateTypeSegments.SetSize(0);
    MaxSegments = 0;
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        Segments = StrIVal(Segments);
        if (Segments > MaxSegments)
        {
          MaxSegments = Segments;
        }
        PlateTypeSegments.AddAsLast(Segments);
      }
    }
    ParamsString = Translate("");
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        ParamsString = StrConcat12(ParamsString, Translate(""), i_Volumes.ElementAt( Counter -1), Translate(","), Segments, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Segments = StrIVal(Segments);
        {
          for(Counter2 = 0; Counter2 < Segments;)
          {
            Counter2 = Counter2 + 1;
            Equation = HSLExtensions::Array2D::GetValue(SegmentEquations, Index, Counter2);
            Height = HSLExtensions::Array2D::GetValue(SegmentHeights, Index, Counter2);
            ParamsString = StrConcat12(ParamsString, Translate(","), Equation, Translate(","), Height, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
        if (Counter != NumInputPlateTypes)
        {
          ParamsString = StrConcat2(ParamsString, Translate(","));
        }
      }
    }
    RootPath = SCRIPT::GetConfigurationRootPath();
    InputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Input.txt"));
    File.AddField(1, ParamsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(InputFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, InputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    PythonScript = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\CalculateVolumeHeight.py"));
    RunnableCommand = SCRIPT::GeneratePythonScriptCommand(PythonScript, Translate(""), Translate("True"));
    Util::SyncShell(RunnableCommand, 1, _Temp);
    OutputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Output.txt"));
    File.AddField(1, CalculatedHeightsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(OutputFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, OutputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    TOOLS::ParseDelimitedList(Translate(","), CalculatedHeightsString, o_CalculatedHeights);
    TOOLS::StringArrayToFloatArray(o_CalculatedHeights, o_CalculatedHeights);
    return (Translate("True"));
  }

  function ShowTipsDialog(  ) void {
    private variable NumTrackedTips;
    private variable TipLoadingArray2D[];
    NumTrackedTips=TrackedTipSequenceStrings.GetSize();
    TipLoadingArray2D = HSLExtensions::Array2D::Create(2, NumTrackedTips);
    HSLExtensions::Array2D::SetColumn(TipLoadingArray2D, TrackedTipSequenceStrings, 1);
    HSLExtensions::Array2D::SetColumn(TipLoadingArray2D, TrackedTipSequencesNumUsed, 2);
    PIPETTE_CONFIG::EDIT_TipsDialog(TipLoadingArray2D);
  }

  private function CalculateUsedTips( device & ML_STAR, variable & VolumesArray[] ) void {
    private variable Temp;
    private variable Counter;
    private variable TipsUsed;
    private variable MaxPipettingVolume;
    private variable Counter2;
    private variable Volume;
    private variable NumVolumes;
    private variable NumTipSequences;
    private variable TipSequenceVolumes[];
    private variable TipSequenceTypes[];
    private variable TipSequenceWasteSequenceStrings[];
    private variable TipSequenceStrings[];
    private variable TrackedIndex;
    private variable TrackedIndexString;
    private variable TipCounterString;
    PIPETTE_CONFIG::GetTipSequenceStrings(TipSequenceStrings);
    PIPETTE_CONFIG::GetTipSequenceTypes(TipSequenceTypes);
    PIPETTE_CONFIG::GetTipSequenceVolumes(TipSequenceVolumes);
    PIPETTE_CONFIG::GetTipSequenceWasteSequenceStrings(TipSequenceWasteSequenceStrings);
    MaxPipettingVolume = PIPETTE_CONFIG::GetMaxPipettingVolume();
    NumTipSequences=TipSequenceStrings.GetSize();
    NumVolumes=VolumesArray.GetSize();
    {
      for(Counter = 0; Counter < NumVolumes;)
      {
        Counter = Counter + 1;
        Volume = VolumesArray.ElementAt( Counter -1);
        if (MaxPipettingVolume != 0)
        {
          if (Volume > MaxPipettingVolume)
          {
            MECC::TraceComment(Translate("*******************************************************************************************\n******************************************ATTENTION**********************************\n*******************************************************************************************\n\nPipetting volumes are greater than the max pipetting volume for this \nconfiguration.\nPlease resolve by doing one of the following:\n1. reducing the pipetting volume in the method \n2. increasing the max pipetting volume by modifying the Pipette module configuration file.\n\n*******************************************************************************************\n******************************************ATTENTION**********************************\n*******************************************************************************************"));
            abort;
          }
        }
        {
          for(Counter2 = 0; Counter2 < NumTipSequences;)
          {
            Counter2 = Counter2 + 1;
            TrackedIndex = TOOLS::IsInArray(TipSequenceStrings.ElementAt( Counter2 -1), TrackedTipSequenceStrings);
            if (TrackedIndex == 0)
            {
              TrackedIndex=TrackedTipSequenceStrings.GetSize();
              TrackedIndex = TrackedIndex + 1;
              TrackedTipSequenceStrings.AddAsLast(TipSequenceStrings.ElementAt( Counter2 -1));
              TrackedTipSequenceTypes.AddAsLast(TipSequenceTypes.ElementAt( Counter2 -1));
              TrackedTipSequenceVolumes.AddAsLast(TipSequenceVolumes.ElementAt( Counter2 -1));
              TrackedTipSequencesWasteSequence.AddAsLast(TipSequenceWasteSequenceStrings.ElementAt( Counter2 -1));
              TrackedTipSequencesGeneratedWasteSequence.AddAsLast(Translate("N/A"));
              TrackedTipSequencesNumUsed.AddAsLast(0);
              TrackedIndexString = StrIStr(TrackedIndex);
              TipCounterString = StrConcat2(Translate("TipCounter"), TrackedIndexString);
              TrackedTipSequencesTipCounter.AddAsLast(TipCounterString);
            }
            if (Volume <= TipSequenceVolumes.ElementAt( Counter2 -1))
            {
              TipsUsed=TrackedTipSequencesNumUsed.GetAt(TrackedIndex-1);
              TipsUsed = TipsUsed + 1;
              TrackedTipSequencesNumUsed.SetAt(TrackedIndex-1, TipsUsed);
              break;
            }
            else
            {
              if (Counter2 == NumTipSequences)
              {
                Temp = Volume / (TipSequenceVolumes.ElementAt( Counter2 -1) * 1.0);
                Temp = StrFStr(Temp);
                Temp = StrIVal(Temp);
                Temp = Temp + 1;
                TipsUsed=TrackedTipSequencesNumUsed.GetAt(TrackedIndex-1);
                TipsUsed = TipsUsed + Temp;
                TrackedTipSequencesNumUsed.SetAt(TrackedIndex-1, TipsUsed);
                break;
              }
            }
          }
        }
      }
    }
  }

  function DoTipLoading( device & ML_STAR ) void {
    private variable Required;
    private variable NumTipsRequired;
    private variable TotalTips;
    private variable Remainder;
    private variable NumSetsRequired;
    private variable loopCounter1;
    private variable NumChannels;
    private variable Available;
    private variable Counter;
    private variable TipType;
    private variable NumTipSequences;
    private dialog customDialog_1;
    private dialog customDialog_2;
    private variable NumTipsLoaded;
    private variable WasteSequenceName;
    private variable NumUsed;
    private variable LoadingString;
    private sequence Waste;
    private sequence TipSequenceWasteSequence;
    private sequence TipSequence;
    NumChannels = PIPETTE_CONFIG::GetNumChannels();
    NumTipSequences=TrackedTipSequenceStrings.GetSize();
    {
      for(Counter = 0; Counter < NumTipSequences;)
      {
        Counter = Counter + 1;
        NumUsed = TrackedTipSequencesNumUsed.ElementAt( Counter -1);
        TipType = TrackedTipSequenceTypes.ElementAt( Counter -1);
        DevGetSequenceRef(ML_STAR, TrackedTipSequenceStrings.ElementAt( Counter -1), TipSequence);
        if (NumUsed > 0)
        {
          Remainder = NumUsed % NumChannels;
          NumSetsRequired = NumUsed / NumChannels;
          NumSetsRequired = StrFStr(NumSetsRequired);
          NumSetsRequired = StrIVal(NumSetsRequired);
          if (Remainder == 0)
          {
            NumSetsRequired = NumSetsRequired + 1;
          }
          else
          {
            NumSetsRequired = NumSetsRequired + 2;
          }
          NumTipsRequired = NumSetsRequired * NumChannels;
          if (TipType == "NTR")
          {
            LoadingString = StrConcat4(Translate("Edit "), TrackedTipSequenceVolumes.ElementAt( Counter -1), Translate("uL Tip Locations"), Translate(""));
            DevGetSequenceRef(ML_STAR, TrackedTipSequencesWasteSequence.ElementAt( Counter -1), TipSequenceWasteSequence);
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), LoadingString, 1, 1000);
                NumTipsLoaded = TipSequence.GetCurrentPosition();
                NumTipsLoaded = NumTipsLoaded - 1;
                TotalTips = SeqGetTotal(TipSequence);
                NumTipsLoaded = TotalTips - NumTipsLoaded;
                if (NumTipsRequired <= NumTipsLoaded)
                {
                  VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(TipSequenceWasteSequence, 0, Waste, ML_STAR);
                  WasteSequenceName = SeqGetName(Waste);
                  TrackedTipSequencesGeneratedWasteSequence.SetAt(Counter-1, WasteSequenceName);
                  break;
                }
                Required = NumTipsRequired;
                Available = NumTipsLoaded;
                customDialog_2.InitCustomDialog("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");
                customDialog_2.SetCustomDialogProperty( "textBox1.Text", Required );
                customDialog_2.SetCustomDialogProperty( "textBox2.Text", Available );
                customDialog_2.ShowCustomDialog();
              }
            }
          }
          if (TipType == "FTR")
          {
            TipCount::Read2(TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                TipCount::Edit2(TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), ML_STAR, 10000);
                NumTipsLoaded = SeqGetTotal(TipSequence);
                if (NumTipsRequired <= NumTipsLoaded)
                {
                  break;
                }
                Required = NumTipsRequired;
                Available = NumTipsLoaded;
                customDialog_1.InitCustomDialog("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");
                customDialog_1.SetCustomDialogProperty( "textBox1.Text", Required );
                customDialog_1.SetCustomDialogProperty( "textBox2.Text", Available );
                customDialog_1.ShowCustomDialog();
              }
            }
            TipCount::Write2(TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
          }
        }
      }
    }
  }

  function SaveTipLoading( device & ML_STAR ) void {
    private variable CoreGripToolSequenceString;
    private variable NumTips;
    private variable Counter;
    private variable TipType;
    private variable NumTipSequences;
    private variable LoadingString;
    private sequence TipSequence;
    private sequence TipWasteSequence;
    private sequence CoreGripToolSequence;
    NumTipSequences=TrackedTipSequenceStrings.GetSize();
    {
      for(Counter = 0; Counter < NumTipSequences;)
      {
        Counter = Counter + 1;
        TipType = TrackedTipSequenceTypes.ElementAt( Counter -1);
        DevGetSequenceRef(ML_STAR, TrackedTipSequenceStrings.ElementAt( Counter -1), TipSequence);
        NumTips = TipSequence.GetCurrentPosition();
        if (NumTips != 1)
        {
          if (TipType == "NTR")
          {
            LoadingString = StrConcat4(Translate("Please Reload "), TrackedTipSequenceVolumes.ElementAt( Counter -1), Translate(" NTR Tips"), Translate(""));
            CoreGripToolSequenceString = PIPETTE_CONFIG::GetCoreGripToolSequenceString();
            DevGetSequenceRef(ML_STAR, CoreGripToolSequenceString, CoreGripToolSequence);
            DevGetSequenceRef(ML_STAR, TrackedTipSequencesGeneratedWasteSequence.ElementAt( Counter -1), TipWasteSequence);
            VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), TipWasteSequence, CoreGripToolSequence, 1, 1, 0, TipWasteSequence, 0, 8, 0, 1, LoadingString, 999);
          }
          if (TipType == "FTR")
          {
            TipCount::Write2(TipSequence, TrackedTipSequencesTipCounter.ElementAt( Counter -1), ML_STAR);
          }
        }
      }
    }
  }

  function AddUsedTips( variable TipSequenceString, variable TipSequenceType, variable TipSequenceVolume, variable TipSequenceWasteSequenceString, variable NumTips ) void {
    private variable TrackedIndex;
    private variable TrackedIndexString;
    private variable Counter2;
    private variable TipCounterString;
    private variable TipSequenceVolumes[];
    private variable TipSequenceTypes[];
    private variable TipSequenceStrings[];
    TrackedIndex = TOOLS::IsInArray(TipSequenceString, TrackedTipSequenceStrings);
    if (TrackedIndex == 0)
    {
      TrackedIndex=TrackedTipSequenceStrings.GetSize();
      TrackedIndex = TrackedIndex + 1;
      TrackedTipSequenceStrings.AddAsLast(TipSequenceString);
      TrackedTipSequenceTypes.AddAsLast(TipSequenceType);
      TrackedTipSequenceVolumes.AddAsLast(TipSequenceVolume);
      TrackedTipSequencesWasteSequence.AddAsLast(TipSequenceWasteSequenceString);
      TrackedTipSequencesGeneratedWasteSequence.AddAsLast(Translate("N/A"));
      TrackedTipSequencesNumUsed.AddAsLast(0);
      TrackedIndexString = StrIStr(TrackedIndex);
      TipCounterString = StrConcat2(Translate("TipCounter"), TrackedIndexString);
      TrackedTipSequencesTipCounter.AddAsLast(TipCounterString);
    }
    TrackedIndex = TOOLS::IsInArray(TipSequenceString, TrackedTipSequenceStrings);
    TrackedTipSequencesNumUsed[ TrackedIndex -1] = TrackedTipSequencesNumUsed.ElementAt( TrackedIndex -1) + NumTips;
  }
} // library namespace
