#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Configuration\\Pipette Config.hs_"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SAVE {
  function AddToUsedTips( device & ML_STAR, variable TipType, variable & Volumes[] ) void ;
  function DoTipLoading( device & ML_STAR, sequence & i_TipsSequences[] ) void ;
  function Sub1(  ) void ;
  function _InitLibrary() {
    PIPETTE_CONFIG::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
  }

  function Sub1(  ) void {
  }

  function DoTipLoading( device & ML_STAR, sequence & i_TipsSequences[] ) void {
    private dialog customDialog_1;
    private dialog customDialog_2;
    private dialog customDialog_3;
    private dialog customDialog_4;
    private variable Tip300Counter;
    private variable Tip50Counter;
    private variable Required;
    private variable NumTips;
    private variable FTR1000Tips;
    private variable Tip1000Counter;
    private variable NumTipsRequired;
    private variable TotalTips;
    private variable Tip300SlimCounter;
    private variable Remainder;
    private variable NumSetsRequired;
    private variable NTR300Tips;
    private variable NTR50Tips;
    private variable loopCounter1;
    private variable NumChannels;
    private variable Available;
    private variable FTR300SlimTips;
    private sequence TipSeq;
    private sequence Waste50NTR;
    private sequence NTRWasteSequence;
    private sequence Waste300NTR;
    NumChannels = PIPETTE_CONFIG::GetNumChannels();
    if (NTR50Tips > 0)
    {
      Remainder = NTR50Tips % NumChannels;
      NumSetsRequired = NTR50Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, i_TipsSequences.ElementAt( 1 -1), Tip50Counter, Translate("Edit 50uL Tip Locations"), 1, 1000);
          SeqCopySequence(TipSeq, i_TipsSequences.ElementAt( 1 -1));
          NumTips = TipSeq.GetCurrentPosition();
          NumTips = NumTips - 1;
          TotalTips = SeqGetTotal(TipSeq);
          NumTips = TotalTips - NumTips;
          if (NumTipsRequired <= NumTips)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTRWasteSequence, 0, Waste50NTR, ML_STAR);
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_1.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_1.ShowCustomDialog();
          FileCheckReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (NTR300Tips > 0)
    {
      Remainder = NTR300Tips % NumChannels;
      NumSetsRequired = NTR300Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, i_TipsSequences.ElementAt( 2 -1), Tip300Counter, Translate("Edit 300uL Tip Locations"), 1, 1000);
          SeqCopySequence(TipSeq, i_TipsSequences.ElementAt( 2 -1));
          NumTips = TipSeq.GetCurrentPosition();
          NumTips = NumTips - 1;
          TotalTips = SeqGetTotal(TipSeq);
          NumTips = TotalTips - NumTips;
          if (NumTipsRequired <= NumTips)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTRWasteSequence, 0, Waste300NTR, ML_STAR);
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_4.InitCustomDialog("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");
          customDialog_4.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_4.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_4.ShowCustomDialog();
          FileCheckReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (FTR300SlimTips > 0)
    {
      Remainder = FTR300SlimTips % NumChannels;
      NumSetsRequired = FTR300SlimTips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      TipCount::Read2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          TipCount::Edit2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR, 10000);
          NumTips = SeqGetTotal(i_TipsSequences.ElementAt( 3 -1));
          if (NumTipsRequired <= NumTips)
          {
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_2.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_2.ShowCustomDialog();
          FileCheckReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR);
    }
    if (FTR1000Tips > 0)
    {
      Remainder = FTR1000Tips % NumChannels;
      NumSetsRequired = FTR1000Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      TipCount::Read2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          TipCount::Edit2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR, 10000);
          NumTips = SeqGetTotal(i_TipsSequences.ElementAt( 4 -1));
          if (NumTipsRequired <= NumTips)
          {
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_3.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_3.ShowCustomDialog();
          FileCheckReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR);
    }
  }

  function AddToUsedTips( device & ML_STAR, variable TipType, variable & Volumes[] ) void {
    private variable NumVolumes;
    private variable FTR300SlimTips;
    NumVolumes=Volumes.GetSize();
    if (TipType == "Desalting")
    {
      FTR300SlimTips = FTR300SlimTips + NumVolumes;
    }
    if (TipType == "Magnetic Beads")
    {
    }
    if (TipType == "Normal")
    {
      CalculateUsedTips(ML_STAR, Volumes);
    }
  }
} // library namespace
