#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TRANSPORT_CONFIG {
  global variable _MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString;
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth[];
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripHeight[];
  global variable _MODULE_TRANSPORT_CONFIG_TransportTypes[];
  global variable _MODULE_TRANSPORT_CONFIG_TransportableLabware[];
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth[];
  private function EDIT_Configuration(  ) void ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetISwapExists(  ) variable ;
  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void ;
  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void ;
  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void ;
  function GetNumTransportTypes(  ) variable ;
  function GetTransportTypes( variable & o_TransportTypes[] ) void ;
  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    _MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString = Translate("seq_COREGripTool");
    _MODULE_TRANSPORT_CONFIG_TransportTypes.SetSize(0);
    _MODULE_TRANSPORT_CONFIG_TransportTypes.AddAsLast(Translate("CORE"));
    _MODULE_TRANSPORT_CONFIG_TransportTypes.AddAsLast(Translate("ISwap"));
    _MODULE_TRANSPORT_CONFIG_TransportableLabware = HSLExtensions::Array2D::Create(2, 7);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_TransportableLabware, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 1, Translate("Lid"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 2, Translate("Vacuum"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 3, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 4, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 5, Translate("1200uL DeepWell 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 6, Translate("2000uL Corning 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 7, Translate("400uL Corning Costar 96 Well UV Plate"));
    _MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth = HSLExtensions::Array2D::Create(2, 7);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 1, 88);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 2, 97);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 3, 85);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 4, 85);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 5, 85);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 6, 85);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 6, 85);
    _MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth = HSLExtensions::Array2D::Create(2, 7);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 1, 81);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 2, 89);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 3, 75);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 4, 75);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 5, 75);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 6, 75);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 7, 80.5);
    _MODULE_TRANSPORT_CONFIG_LabwareGripHeight = HSLExtensions::Array2D::Create(2, 7);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 1, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 2, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 3, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 4, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 5, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 6, 10);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 7, 4);
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetNumTransportTypes(  ) variable {
    private variable NumTypes;
    NumTypes=_MODULE_TRANSPORT_CONFIG_TransportTypes.GetSize();
    return (NumTypes);
  }

  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void {
    o_TransportableLabwares.SetSize( 0);
    o_TransportableLabwares=_MODULE_TRANSPORT_CONFIG_TransportableLabware;
  }

  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void {
    o_LabwareGripOpenWidths.SetSize( 0);
    o_LabwareGripOpenWidths=_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth;
  }

  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void {
    o_LabwareGripCloseWidths.SetSize( 0);
    o_LabwareGripCloseWidths=_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth;
  }

  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void {
    o_LabwareGripHeights.SetSize( 0);
    o_LabwareGripHeights=_MODULE_TRANSPORT_CONFIG_LabwareGripHeight;
  }

  function GetISwapExists(  ) variable {
    private variable Counter;
    private variable NumTransportTypes;
    NumTransportTypes = GetNumTransportTypes();
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        if (_MODULE_TRANSPORT_CONFIG_TransportTypes.ElementAt( Counter -1) == "ISwap")
        {
          return (Translate("True"));
        }
      }
    }
    return (Translate("False"));
  }

  function GetTransportTypes( variable & o_TransportTypes[] ) void {
    o_TransportTypes.SetSize( 0);
    o_TransportTypes=_MODULE_TRANSPORT_CONFIG_TransportTypes;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (_MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString);
  }
} // library namespace
