#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TRANSPORT_CONFIG {
  variable LabwareGripHeight[];
  variable TransportableLabware[];
  variable LabwareGripCloseWidth[];
  variable LabwareGripOpenWidth[];
  variable TransportTypes[];
  variable CoreGripToolSequenceString;
  private function EDIT_Configuration(  ) void ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetISwapExists(  ) variable ;
  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void ;
  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void ;
  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void ;
  function GetNumTransportTypes(  ) variable ;
  function GetTransportTypes( variable & o_TransportTypes[] ) void ;
  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    CoreGripToolSequenceString = Translate("seq_COREGripTool");
    TransportTypes.SetSize(0);
    TransportTypes.AddAsLast(Translate("CORE"));
    TransportTypes.AddAsLast(Translate("ISwap"));
    TransportableLabware = HSLExtensions::Array2D::Create(2, 6);
    HSLExtensions::Array2D::InitializeAllValues(TransportableLabware, Translate(""));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 1, Translate("Lid"));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 2, Translate("Vacuum"));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 3, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 4, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 5, Translate("1200uL DeepWell 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(TransportableLabware, 1, 6, Translate("2000uL Corning 96 Well PCR Plate"));
    LabwareGripOpenWidth = HSLExtensions::Array2D::Create(2, 6);
    HSLExtensions::Array2D::InitializeAllValues(LabwareGripOpenWidth, Translate(""));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 1, Translate("88"));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 2, Translate("97"));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 3, Translate("85"));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 4, Translate("85"));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 5, Translate("85"));
    HSLExtensions::Array2D::SetValue(LabwareGripOpenWidth, 1, 6, Translate("85"));
    LabwareGripCloseWidth = HSLExtensions::Array2D::Create(2, 6);
    HSLExtensions::Array2D::InitializeAllValues(LabwareGripCloseWidth, Translate(""));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 1, Translate("81"));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 2, Translate("89"));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 3, Translate("75"));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 4, Translate("75"));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 5, Translate("75"));
    HSLExtensions::Array2D::SetValue(LabwareGripCloseWidth, 1, 6, Translate("75"));
    LabwareGripHeight = HSLExtensions::Array2D::Create(2, 6);
    HSLExtensions::Array2D::InitializeAllValues(LabwareGripHeight, Translate(""));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 1, Translate("4"));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 2, Translate("4"));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 3, Translate("4"));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 4, Translate("4"));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 5, Translate("4"));
    HSLExtensions::Array2D::SetValue(LabwareGripHeight, 1, 6, Translate("10"));
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetNumTransportTypes(  ) variable {
    private variable NumTypes;
    NumTypes=TransportTypes.GetSize();
    return (NumTypes);
  }

  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void {
    o_TransportableLabwares.SetSize( 0);
    o_TransportableLabwares=TransportableLabware;
  }

  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void {
    o_LabwareGripOpenWidths.SetSize( 0);
    o_LabwareGripOpenWidths=LabwareGripOpenWidth;
  }

  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void {
    o_LabwareGripCloseWidths.SetSize( 0);
    o_LabwareGripCloseWidths=LabwareGripCloseWidth;
  }

  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void {
    o_LabwareGripHeights.SetSize( 0);
    o_LabwareGripHeights=LabwareGripHeight;
  }

  function GetISwapExists(  ) variable {
    private variable Counter;
    private variable NumTransportTypes;
    NumTransportTypes = GetNumTransportTypes();
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        if (TransportTypes.ElementAt( Counter -1) == "ISwap")
        {
          return (Translate("True"));
        }
      }
    }
    return (Translate("False"));
  }

  function GetTransportTypes( variable & o_TransportTypes[] ) void {
    o_TransportTypes.SetSize( 0);
    o_TransportTypes=TransportTypes;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (CoreGripToolSequenceString);
  }
} // library namespace
