#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Configuration\\Transport Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRANSPORT {
  sequence GripperSequence;
  variable IsInit("False");
  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void ;
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function ISwapTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType ) void ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function MoveLabware( device & ML_Star, variable i_CommandParameterStrings ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TRANSPORT_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    COMMANDS::_InitLibrary();
    SEQUENCES::_InitLibrary();
    RETURNIDS::_InitLibrary();
  }
  function _ExitLibrary() {
    TRANSPORT_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable ReturnString;
    private variable SS;
    private variable SSA[];
    private variable GripperSequenceString;
    private variable ID;
    if (IsInit == "True")
    {
      ID = RETURNIDS::SuccessRequestSkipped();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Already Initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    TRANSPORT_CONFIG::Init();
    MECC::TraceComment(Translate("***** Checking Transport module sequences for validity *****"));
    MECC::TraceComment(Translate("***** Checking Transport module sequences for validity ***** Gripper"));
    SSA.SetSize(0);
    SS = TRANSPORT_CONFIG::GetCoreGripToolSequenceString();
    SSA.AddAsLast(SS);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Transport module sequences for validity *****SUCCESS"));
    GripperSequenceString = TRANSPORT_CONFIG::GetCoreGripToolSequenceString();
    DevGetSequenceRef(ML_STAR, GripperSequenceString, GripperSequence);
    IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function MoveLabware( device & ML_Star, variable i_CommandParameterStrings ) variable {
    private variable TranportType;
    private variable NumTransportableLabware;
    private variable Counter;
    private variable Counter2;
    private variable NumTransportTypes;
    private variable TransportableLabwareArray[];
    private variable TransportTypes[];
    private variable TransportableLabwares[];
    private variable Counter3;
    private sequence SourceSequence;
    private sequence DestinationSequence;
    private variable ReturnString;
    private variable Dict[];
    private variable LabwareSourceType;
    private variable CheckExists;
    private variable Park;
    private variable DestinationSequenceString;
    private variable LabwareDestinationType;
    private variable SourceSequenceString;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourceLabwareType"), LabwareSourceType);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourceSequenceString"), SourceSequenceString);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationLabwareType"), LabwareDestinationType);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationSequenceString"), DestinationSequenceString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Park"), Park);
    COMMANDS::GetDictionaryItem(Dict, Translate("CheckExists"), CheckExists);
    DevGetSequenceRef(ML_Star, SourceSequenceString, SourceSequence);
    DevGetSequenceRef(ML_Star, DestinationSequenceString, DestinationSequence);
    NumTransportTypes = TRANSPORT_CONFIG::GetNumTransportTypes();
    TRANSPORT_CONFIG::GetTransportTypes(TransportTypes);
    TRANSPORT_CONFIG::GetTransportableLabwares(TransportableLabwares);
    TranportType = 0;
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        TransportableLabwareArray = HSLExtensions::Array2D::GetColumn(TransportableLabwares, Counter);
        NumTransportableLabware=TransportableLabwareArray.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumTransportableLabware;)
          {
            Counter2 = Counter2 + 1;
            if (TransportableLabwareArray.ElementAt( Counter2 -1) == LabwareSourceType)
            {
              {
                for(Counter3 = 0; Counter3 < NumTransportableLabware;)
                {
                  Counter3 = Counter3 + 1;
                  if (TransportableLabwareArray.ElementAt( Counter3 -1) == LabwareDestinationType)
                  {
                    if (TransportTypes.ElementAt( Counter -1) == "CORE")
                    {
                      CoreTransport(ML_Star, SourceSequence, DestinationSequence, Counter, Counter2, Park, CheckExists);
                    }
                    if (TransportTypes.ElementAt( Counter -1) == "ISwap")
                    {
                      ISwapTransport(ML_Star, SourceSequence, DestinationSequence, Counter, Counter2);
                    }
                    ID = RETURNIDS::SuccessNoErrors();
                    ReturnString = RETURN::CreateReturnString(ID, Translate("Labware movement succeeded"), Translate(""), Translate(""));
                    return (ReturnString);
                  }
                }
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Could not find a gripper that satisfies labware move criteria."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void {
    private variable ISwapExists;
    private variable LabwareGripCloseWidths[];
    private variable LabwareGripHeights[];
    private variable LabwareGripOpenWidths[];
    private variable GripHeight;
    private variable CloseWidth;
    private variable OpenWidth;
    private variable LabwareGripHeightsArray[];
    private variable CheckExistsBefore;
    private variable CheckExistsAfter;
    if (CheckExists == "False")
    {
      CheckExistsBefore = 0;
      CheckExistsAfter = 0;
    }
    else
    {
      if (CheckExists == "Before")
      {
        CheckExistsBefore = 1;
      }
      if (CheckExists == "After")
      {
        CheckExistsAfter = 1;
      }
      if (CheckExists == "Both")
      {
        CheckExistsAfter = 1;
        CheckExistsBefore = 1;
      }
    }
    if (Park == "True")
    {
      Park = 1;
    }
    else
    {
      Park = 0;
    }
    ISwapExists = TRANSPORT_CONFIG::GetISwapExists();
    TRANSPORT_CONFIG::GetLabwareGripCloseWidths(LabwareGripCloseWidths);
    TRANSPORT_CONFIG::GetLabwareGripOpenWidths(LabwareGripOpenWidths);
    TRANSPORT_CONFIG::GetLabwareGripHeights(LabwareGripHeights);
    OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 1);
    CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 1);
    LabwareGripHeightsArray = HSLExtensions::Array2D::GetColumn(LabwareGripHeights, TransportType);
    GripHeight=LabwareGripHeightsArray.GetAt(LabwareType-1);
    ML_Star._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_Star._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnString;
    private variable Command;
    private variable ID;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "MoveLabware")
    {
      ReturnString = MoveLabware(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    if (IsInit == "True")
    {
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit not required"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function ISwapTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType ) void {
    private sequence SequencesArray[];
    private variable GripHeight;
    private variable Labware;
    private variable CloseWidth;
    private variable ISwapTransitionPoint;
    private variable StringFound;
    private variable OpenWidth;
    private variable LabwareGripCloseWidths[];
    private variable LabwareTypes[];
    private variable ConvertToSequenceArray[];
    private variable LabwareGripHeights[];
    private variable LabwareGripHeightsArray[];
    private variable LabwareGripOpenWidths[];
    private variable SourceString;
    private variable LabwareTypesArray[];
    ISwapTransitionPoint = Translate("_Module_Transport_ISwap_Transition");
    ConvertToSequenceArray.SetSize(0);
    ConvertToSequenceArray.AddAsLast(ISwapTransitionPoint);
    SEQUENCES::StringToSequence(ML_Star, ConvertToSequenceArray, SequencesArray);
    TRANSPORT_CONFIG::GetLabwareGripCloseWidths(LabwareGripCloseWidths);
    TRANSPORT_CONFIG::GetLabwareGripOpenWidths(LabwareGripOpenWidths);
    TRANSPORT_CONFIG::GetLabwareGripHeights(LabwareGripHeights);
    TRANSPORT_CONFIG::GetTransportableLabwares(LabwareTypes);
    LabwareTypesArray = HSLExtensions::Array2D::GetColumn(LabwareTypes, TransportType);
    Labware=LabwareTypesArray.GetAt(LabwareType-1);
    LabwareGripHeightsArray = HSLExtensions::Array2D::GetColumn(LabwareGripHeights, TransportType);
    GripHeight=LabwareGripHeightsArray.GetAt(LabwareType-1);
    StringFound = StrFind(Labware, Translate("Lid"));
    MECC::TraceComment(Translate("Ok So if we are moving a lid. Then we need to first move it to the transition point"));
    if (StringFound != -1)
    {
      SourceString = SeqGetName(SourceSequence);
      StringFound = StrFind(SourceString, Translate("Home"));
      if (StringFound != -1)
      {
        OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 1);
        CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 1);
        ML_Star._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        ML_Star._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 2);
        CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 2);
        ML_Star._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        ML_Star._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      }
      else
      {
        OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 2);
        CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 2);
        ML_Star._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        ML_Star._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 1);
        CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 1);
        ML_Star._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        ML_Star._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      }
    }
    else
    {
      OpenWidth = HSLExtensions::Array3D::GetValue(LabwareGripOpenWidths, TransportType, LabwareType, 2);
      CloseWidth = HSLExtensions::Array3D::GetValue(LabwareGripCloseWidths, TransportType, LabwareType, 2);
      ML_Star._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      ML_Star._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    }
  }
} // library namespace
