#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace VACUUM_CONFIG {
  global variable _MODULE_VACUUM_CONFIG_VacuumPressureLevels[];
  global variable _MODULE_VACUUM_CONFIG_VacuumManifoldParkSequences[];
  global variable _MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateSequences[];
  global variable _MODULE_VACUUM_CONFIG_VacuumManifoldSequences[];
  global variable _MODULE_VACUUM_CONFIG_SupportedVacuumPlateNames[];
  global variable _MODULE_VACUUM_CONFIG_VacuumComPorts[];
  global variable _MODULE_VACUUM_CONFIG_SupportedVacuumPlateSequences[];
  global variable _MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateTypes[];
  private function EDIT_Configuration(  ) void ;
  function GetSupportedVacuumCollectionPlateSequences( variable & o_SupportedVacuumCollectionPlateSequences[] ) void ;
  function GetSupportedVacuumCollectionPlateTypes( variable & o_SupportedVacuumCollectionPlateTypes[] ) void ;
  function GetSupportedVacuumPlateSequences( variable & o_SupportedVacuumPlateSequences[] ) void ;
  function GetSupportedVacuumPlates( variable & o_SupportedVacuumPlates[] ) void ;
  function GetVacuumComPorts( variable & o_VacuumComPorts[] ) void ;
  function GetVacuumManifoldSequenceStrings( variable & o_VacuumManifoldSequenceStrings[] ) void ;
  function GetVacuumParkSequenceStrings( variable & o_VacuumParkSequenceStrings[] ) void ;
  function GetVacuumPressureLevels( variable & o_VacuumPressureLevels[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    _MODULE_VACUUM_CONFIG_VacuumComPorts.SetSize(0);
    _MODULE_VACUUM_CONFIG_VacuumComPorts.AddAsLast(1);
    _MODULE_VACUUM_CONFIG_VacuumManifoldParkSequences.SetSize(0);
    _MODULE_VACUUM_CONFIG_VacuumManifoldParkSequences.AddAsLast(Translate("_Vacuum_ManifoldHome"));
    _MODULE_VACUUM_CONFIG_VacuumManifoldSequences.SetSize(0);
    _MODULE_VACUUM_CONFIG_VacuumManifoldSequences.AddAsLast(Translate("_Vacuum_Manifold"));
    _MODULE_VACUUM_CONFIG_SupportedVacuumPlateNames = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumPlateNames, 1, 1, Translate("0.45um Self Poured ProA Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumPlateNames, 1, 2, Translate("Waters Glycoworks HILIC Plate"));
    _MODULE_VACUUM_CONFIG_SupportedVacuumPlateSequences = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumPlateSequences, 1, 1, Translate("_Vacuum_ProASelfPoured045um"));
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumPlateSequences, 1, 2, Translate("_Vacuum_GlycoworksHILIC"));
    _MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateSequences = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateSequences, 1, 1, Translate("_Vacuum_96WellPCRPlate2000uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateSequences, 1, 2, Translate("_Vacuum_96WellPCRPlate1200uL"));
    _MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateTypes = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateTypes, 1, 1, Translate("2000uL Corning 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateTypes, 1, 2, Translate("1200uL DeepWell 96 Well PCR Plate"));
    _MODULE_VACUUM_CONFIG_VacuumPressureLevels = HSLExtensions::Array3D::Create(1, 2, 3);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 1, 1, 300);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 1, 2, 350);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 1, 3, 400);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 2, 1, 80);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 2, 2, 135);
    HSLExtensions::Array3D::SetValue(_MODULE_VACUUM_CONFIG_VacuumPressureLevels, 1, 2, 3, 250);
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetVacuumComPorts( variable & o_VacuumComPorts[] ) void {
    o_VacuumComPorts.SetSize( 0);
    o_VacuumComPorts=_MODULE_VACUUM_CONFIG_VacuumComPorts;
  }

  function GetVacuumParkSequenceStrings( variable & o_VacuumParkSequenceStrings[] ) void {
    o_VacuumParkSequenceStrings.SetSize( 0);
    o_VacuumParkSequenceStrings=_MODULE_VACUUM_CONFIG_VacuumManifoldParkSequences;
  }

  function GetVacuumManifoldSequenceStrings( variable & o_VacuumManifoldSequenceStrings[] ) void {
    o_VacuumManifoldSequenceStrings.SetSize( 0);
    o_VacuumManifoldSequenceStrings=_MODULE_VACUUM_CONFIG_VacuumManifoldSequences;
  }

  function GetSupportedVacuumPlates( variable & o_SupportedVacuumPlates[] ) void {
    o_SupportedVacuumPlates.SetSize( 0);
    o_SupportedVacuumPlates=_MODULE_VACUUM_CONFIG_SupportedVacuumPlateNames;
  }

  function GetSupportedVacuumPlateSequences( variable & o_SupportedVacuumPlateSequences[] ) void {
    o_SupportedVacuumPlateSequences.SetSize( 0);
    o_SupportedVacuumPlateSequences=_MODULE_VACUUM_CONFIG_SupportedVacuumPlateSequences;
  }

  function GetSupportedVacuumCollectionPlateSequences( variable & o_SupportedVacuumCollectionPlateSequences[] ) void {
    o_SupportedVacuumCollectionPlateSequences.SetSize( 0);
    o_SupportedVacuumCollectionPlateSequences=_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateSequences;
  }

  function GetVacuumPressureLevels( variable & o_VacuumPressureLevels[] ) void {
    o_VacuumPressureLevels.SetSize( 0);
    o_VacuumPressureLevels=_MODULE_VACUUM_CONFIG_VacuumPressureLevels;
  }

  function GetSupportedVacuumCollectionPlateTypes( variable & o_SupportedVacuumCollectionPlateTypes[] ) void {
    o_SupportedVacuumCollectionPlateTypes.SetSize( 0);
    o_SupportedVacuumCollectionPlateTypes=_MODULE_VACUUM_CONFIG_SupportedVacuumCollectionPlateTypes;
  }
} // library namespace
