#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace VACUUM_CONFIG {
  variable SupportedVacuumPlateSequences[];
  variable VacuumComPorts[];
  variable VacuumManifoldParkSequences[];
  variable VacuumManifoldSequences[];
  variable SupportedVacuumPlateNames[];
  variable SupportedVacuumCollectionPlateSequences[];
  variable VacuumPressureLevels[];
  variable SupportedVacuumCollectionPlateTypes[];
  private function EDIT_Configuration(  ) void ;
  function GetSupportedVacuumCollectionPlateSequences( variable & o_SupportedVacuumCollectionPlateSequences[] ) void ;
  function GetSupportedVacuumCollectionPlateTypes( variable & o_SupportedVacuumCollectionPlateTypes[] ) void ;
  function GetSupportedVacuumPlateSequences( variable & o_SupportedVacuumPlateSequences[] ) void ;
  function GetSupportedVacuumPlates( variable & o_SupportedVacuumPlates[] ) void ;
  function GetVacuumComPorts( variable & o_VacuumComPorts[] ) void ;
  function GetVacuumManifoldSequenceStrings( variable & o_VacuumManifoldSequenceStrings[] ) void ;
  function GetVacuumParkSequenceStrings( variable & o_VacuumParkSequenceStrings[] ) void ;
  function GetVacuumPressureLevels( variable & o_VacuumPressureLevels[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    VacuumComPorts.SetSize(0);
    VacuumComPorts.AddAsLast(1);
    VacuumManifoldParkSequences.SetSize(0);
    VacuumManifoldParkSequences.AddAsLast(Translate("_Vacuum_ManifoldHome"));
    VacuumManifoldSequences.SetSize(0);
    VacuumManifoldSequences.AddAsLast(Translate("_Vacuum_Manifold"));
    SupportedVacuumPlateNames = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(SupportedVacuumPlateNames, 1, 1, Translate("0.45um Self Poured ProA Plate"));
    HSLExtensions::Array2D::SetValue(SupportedVacuumPlateNames, 1, 2, Translate("Waters Glycoworks HILIC Plate"));
    SupportedVacuumPlateSequences = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::SetValue(SupportedVacuumPlateSequences, 1, 1, Translate("_Vacuum_ProASelfPoured045um"));
    HSLExtensions::Array2D::SetValue(SupportedVacuumPlateSequences, 1, 2, Translate("_Vacuum_GlycoworksHILIC"));
    SupportedVacuumCollectionPlateSequences = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(SupportedVacuumCollectionPlateSequences, 1, 1, Translate("_Vacuum_96WellPCRPlate2000uL"));
    HSLExtensions::Array2D::SetValue(SupportedVacuumCollectionPlateSequences, 1, 2, Translate("_Vacuum_96WellPCRPlate2000uL"));
    SupportedVacuumCollectionPlateTypes = HSLExtensions::Array2D::Create(1, 1);
    HSLExtensions::Array2D::SetValue(SupportedVacuumCollectionPlateTypes, 1, 1, Translate("2000uL Corning 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedVacuumCollectionPlateTypes, 1, 2, Translate("2000uL Corning 96 Well PCR Plate"));
    VacuumPressureLevels = HSLExtensions::Array3D::Create(1, 1, 3);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 1, 1, 300);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 1, 2, 350);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 1, 3, 400);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 2, 1, 750);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 2, 2, 850);
    HSLExtensions::Array3D::SetValue(VacuumPressureLevels, 1, 2, 3, 925);
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetVacuumComPorts( variable & o_VacuumComPorts[] ) void {
    o_VacuumComPorts.SetSize( 0);
    o_VacuumComPorts=VacuumComPorts;
  }

  function GetVacuumParkSequenceStrings( variable & o_VacuumParkSequenceStrings[] ) void {
    o_VacuumParkSequenceStrings.SetSize( 0);
    o_VacuumParkSequenceStrings=VacuumManifoldParkSequences;
  }

  function GetVacuumManifoldSequenceStrings( variable & o_VacuumManifoldSequenceStrings[] ) void {
    o_VacuumManifoldSequenceStrings.SetSize( 0);
    o_VacuumManifoldSequenceStrings=VacuumManifoldSequences;
  }

  function GetSupportedVacuumPlates( variable & o_SupportedVacuumPlates[] ) void {
    o_SupportedVacuumPlates.SetSize( 0);
    o_SupportedVacuumPlates=SupportedVacuumPlateNames;
  }

  function GetSupportedVacuumPlateSequences( variable & o_SupportedVacuumPlateSequences[] ) void {
    o_SupportedVacuumPlateSequences.SetSize( 0);
    o_SupportedVacuumPlateSequences=SupportedVacuumPlateSequences;
  }

  function GetSupportedVacuumCollectionPlateSequences( variable & o_SupportedVacuumCollectionPlateSequences[] ) void {
    o_SupportedVacuumCollectionPlateSequences.SetSize( 0);
    o_SupportedVacuumCollectionPlateSequences=SupportedVacuumCollectionPlateSequences;
  }

  function GetVacuumPressureLevels( variable & o_VacuumPressureLevels[] ) void {
    o_VacuumPressureLevels.SetSize( 0);
    o_VacuumPressureLevels=VacuumPressureLevels;
  }

  function GetSupportedVacuumCollectionPlateTypes( variable & o_SupportedVacuumCollectionPlateTypes[] ) void {
    o_SupportedVacuumCollectionPlateTypes.SetSize( 0);
    o_SupportedVacuumCollectionPlateTypes=SupportedVacuumCollectionPlateTypes;
  }
} // library namespace
