#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Configuration\\Vacuum Config.hs_"
#include "HSLVacuuBrandPump.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VACUUM {
  global variable _MODULE_VACUUM_IsInit("False");
  global variable _MODULE_VACUUM_VacuumHandles[];
  global variable _MODULE_VACUUM_VacuumReservations[];
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumCollectionPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumCollectionPlateTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumManifoldSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumManifoldTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumParkSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumParkTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  function Init( device & ML_STAR, variable i_CommandString ) variable ;
  private function Start( device & ML_STAR, variable i_CommandString ) variable ;
  private function Stop( device & ML_STAR, variable i_CommandString ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VACUUM_CONFIG::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    RETURN::_InitLibrary();
    SEQUENCES::_InitLibrary();
    RETURNIDS::_InitLibrary();
    LABWARE::_InitLibrary();
  }
  function _ExitLibrary() {
    VACUUM_CONFIG::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    RETURN::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
    LABWARE::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandString ) variable {
    private variable Counter;
    private variable NumComPorts;
    private variable VacuumComPorts[];
    private variable SupportedVacuumPlates[];
    private variable NumVacuumPlates;
    private variable Counter2;
    private variable Dict[];
    private variable SupportedVacuumPlatesArray[];
    private variable Delimiter;
    private variable Counter3;
    private variable BreakFlag;
    private variable VacuumPlateNamesString;
    private variable VacuumPlateNameStringsArray[];
    private variable SSA[];
    private variable SS2A[];
    private variable ID;
    private variable ReturnString;
    private variable NumVacPlates;
    private variable VacPlateSequences[];
    private variable VacPlates[];
    private variable VPA[];
    private variable VPSA[];
    private variable ComPorts[];
    private variable NumSupportedVacuumPlates;
    if (_MODULE_VACUUM_IsInit == "True")
    {
      ID = RETURNIDS::SuccessRequestSkipped();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Already Initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    VACUUM_CONFIG::Init();
    VACUUM_CONFIG::GetVacuumComPorts(VacuumComPorts);
    VACUUM_CONFIG::GetSupportedVacuumPlates(SupportedVacuumPlates);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity *****"));
    NumComPorts=VacuumComPorts.GetSize();
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Supported Vacuum Plates"));
    {
      for(Counter = 0; Counter < NumComPorts;)
      {
        Counter = Counter + 1;
        VACUUM_CONFIG::GetSupportedVacuumPlateSequences(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Supported Collection Plates"));
    {
      for(Counter = 0; Counter < NumComPorts;)
      {
        Counter = Counter + 1;
        VACUUM_CONFIG::GetSupportedVacuumCollectionPlateSequences(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Manifolds"));
    VACUUM_CONFIG::GetVacuumManifoldSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Parks"));
    VACUUM_CONFIG::GetVacuumParkSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** SUCCESS"));
    VACUUM_CONFIG::GetVacuumComPorts(ComPorts);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacPlates);
    VACUUM_CONFIG::GetSupportedVacuumPlateSequences(VacPlateSequences);
    NumComPorts=ComPorts.GetSize();
    {
      for(Counter = 0; Counter < NumComPorts;)
      {
        Counter = Counter + 1;
        VPA = HSLExtensions::Array2D::GetColumn(VacPlates, Counter);
        VPSA = HSLExtensions::Array2D::GetColumn(VacPlateSequences, Counter);
        NumVacPlates=VPA.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumVacPlates;)
          {
            Counter2 = Counter2 + 1;
            if (VPA.ElementAt( Counter2 -1) != "")
            {
              LABWARE::AddSingleLabware(VPA.ElementAt( Counter2 -1), VPSA.ElementAt( Counter2 -1), Translate(""), Translate("96 Well PCR Plate"), VPA.ElementAt( Counter2 -1), Translate(""), Translate(""), Translate(""));
            }
          }
        }
      }
    }
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateNames"), VacuumPlateNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, VacuumPlateNamesString, VacuumPlateNameStringsArray);
    NumVacuumPlates=VacuumPlateNameStringsArray.GetSize();
    NumComPorts=VacuumComPorts.GetSize();
    if (NumVacuumPlates > NumComPorts)
    {
      MECC::TraceComment(Translate("Not enough vacuums available"));
      abort;
    }
    _MODULE_VACUUM_VacuumHandles.SetSize(NumComPorts);
    _MODULE_VACUUM_VacuumReservations.SetSize(NumComPorts);
    {
      for(Counter = 0; Counter < NumVacuumPlates;)
      {
        Counter = Counter + 1;
        _MODULE_VACUUM_VacuumHandles.SetAt(Counter-1, Counter);
        {
          for(Counter2 = 0; Counter2 < NumComPorts;)
          {
            Counter2 = Counter2 + 1;
            BreakFlag = 0;
            SupportedVacuumPlatesArray = HSLExtensions::Array2D::GetColumn(SupportedVacuumPlates, Counter2);
            NumSupportedVacuumPlates=SupportedVacuumPlatesArray.GetSize();
            {
              for(Counter3 = 0; Counter3 < NumSupportedVacuumPlates;)
              {
                Counter3 = Counter3 + 1;
                if (VacuumPlateNameStringsArray.ElementAt( Counter -1) == SupportedVacuumPlatesArray.ElementAt( Counter3 -1))
                {
                  _MODULE_VACUUM_VacuumReservations.SetAt(Counter2-1, VacuumPlateNameStringsArray.ElementAt( Counter -1));
                  HSLStarBVSLib::BVSInitialize(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter2 -1), VacuumComPorts.ElementAt( Counter2 -1));
                  BreakFlag = 1;
                  break;
                }
              }
            }
            if (BreakFlag == 1)
            {
              break;
            }
            if (Counter2 == NumComPorts)
            {
              MECC::TraceComment(Translate("Could not find a vacuum the satisfies the requirements. Quitting."));
              abort;
            }
          }
        }
      }
    }
    _MODULE_VACUUM_IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetVacuumParkSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable VacuumPlateNameString;
    private variable Dict[];
    private variable NumVacuums;
    private variable Counter;
    private variable VacuumParkSequenceStrings[];
    private variable ReturnVal;
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetVacuumParkSequenceStrings(VacuumParkSequenceStrings);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          ReturnVal = VacuumParkSequenceStrings.ElementAt( Counter -1);
          ID = RETURNIDS::SuccessItemsReturned();
          ReturnString = RETURN::CreateReturnString(ID, Translate("VacuumManifoldParkSequenceString Returned"), Translate("Response"), ReturnVal);
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetVacuumManifoldSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Dict[];
    private variable VacuumManifoldSequenceStrings[];
    private variable ReturnVal;
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetVacuumManifoldSequenceStrings(VacuumManifoldSequenceStrings);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          ReturnVal = VacuumManifoldSequenceStrings.ElementAt( Counter -1);
          ID = RETURNIDS::SuccessItemsReturned();
          ReturnString = RETURN::CreateReturnString(ID, Translate("VacuumManifoldSequenceString Returned"), Translate("Response"), ReturnVal);
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetVacuumCollectionPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable NumVacuumPlates;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Counter2;
    private variable Dict[];
    private variable VacuumCollectionPlatesArray[];
    private variable VacuumPlatesArray[];
    private variable VacuumCollectionPlates[];
    private variable VacuumPlates[];
    private variable ReturnVal;
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetSupportedVacuumCollectionPlateSequences(VacuumCollectionPlates);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                VacuumCollectionPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumCollectionPlates, Counter);
                ReturnVal = VacuumCollectionPlatesArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("VacuumCollectionPlateSequenceString Returned"), Translate("Response"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetVacuumPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable NumVacuumPlates;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Counter2;
    private variable Dict[];
    private variable VacuumPlatesArray[];
    private variable VacuumPlates[];
    private variable VacuumPlateSequences[];
    private variable VacuumPlateSequencesArray[];
    private variable ReturnVal;
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetSupportedVacuumPlateSequences(VacuumPlateSequences);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                VacuumPlateSequencesArray = HSLExtensions::Array2D::GetColumn(VacuumPlateSequences, Counter);
                ReturnVal = VacuumPlateSequencesArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("VacuumPlateSequenceString Returned"), Translate("Response"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function Start( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable NumVacuumPlates;
    private variable Counter;
    private variable Counter2;
    private variable Dict[];
    private variable VacuumPlatesArray[];
    private variable VacuumPlates[];
    private variable VacuumPressureLevels[];
    private variable PressureIndex;
    private variable VacuumPressure;
    private variable AmbientPressure;
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPressure"), VacuumPressure);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetVacuumPressureLevels(VacuumPressureLevels);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                PressureIndex = 0;
                if (VacuumPressure == "Low")
                {
                  PressureIndex = 1;
                }
                if (VacuumPressure == "Normal")
                {
                  PressureIndex = 2;
                }
                if (VacuumPressure == "High")
                {
                  PressureIndex = 3;
                }
                if (PressureIndex != 0)
                {
                  VacuumPressure = HSLExtensions::Array3D::GetValue(VacuumPressureLevels, Counter, Counter2, PressureIndex);
                }
                else
                {
                  VacuumPressure = StrIVal(VacuumPressure);
                }
                AmbientPressure = HSLVacuuBrandPump::ReqActualPressure(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1));
                VacuumPressure = AmbientPressure - VacuumPressure;
                HSLVacuuBrandPump::StartPressureControl(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1), VacuumPressure, 99999, Translate("y"), 1);
                ID = RETURNIDS::SuccessNoErrors();
                ReturnString = RETURN::CreateReturnString(ID, Translate("Vacuum Started"), Translate(""), Translate(""));
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function Stop( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable Counter;
    private timer VacuumStopTimer;
    private variable Dict[];
    private variable ID;
    private variable ReturnString;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          HSLVacuuBrandPump::StopPumpImmediatly(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1));
          HSLVacuuBrandPump::OpenAirAdmittanceValve(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1));
          if( 0 == VacuumStopTimer.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == VacuumStopTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ID = RETURNIDS::SuccessNoErrors();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Vacuum Stopped"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable Command;
    private variable ReturnString;
    private variable ID;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (_MODULE_VACUUM_IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "GetVacuumCollectionPlateSequenceString")
    {
      ReturnString = GetVacuumCollectionPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumCollectionPlateTransportType")
    {
      ReturnString = GetVacuumCollectionPlateTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumParkSequenceString")
    {
      ReturnString = GetVacuumParkSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumParkTransportType")
    {
      ReturnString = GetVacuumParkTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumManifoldSequenceString")
    {
      ReturnString = GetVacuumManifoldSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumManifoldTransportType")
    {
      ReturnString = GetVacuumManifoldTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumPlateSequenceString")
    {
      ReturnString = GetVacuumPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "Start")
    {
      ReturnString = Start(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "Stop")
    {
      ReturnString = Stop(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable Counter;
    private variable ID;
    private variable ReturnString;
    if (_MODULE_VACUUM_IsInit == "True")
    {
      NumVacuums=_MODULE_VACUUM_VacuumHandles.GetSize();
      {
        for(Counter = 0; Counter < NumVacuums;)
        {
          Counter = Counter + 1;
          HSLVacuuBrandPump::StopPumpImmediatly(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1));
          HSLStarBVSLib::BVSTerminate(_MODULE_VACUUM_VacuumHandles.ElementAt( Counter -1));
        }
      }
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Deinit not required"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetVacuumManifoldTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("ManifoldTransportType Returned"), Translate("Response"), Translate("Vacuum"));
    return (ReturnString);
  }

  private function GetVacuumParkTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("ParkTransportType Returned"), Translate("Response"), Translate("Vacuum"));
    return (ReturnString);
  }

  private function GetVacuumCollectionPlateTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable NumVacuumPlates;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable ReturnVal;
    private variable Counter2;
    private variable ID;
    private variable ReturnString;
    private variable Dict[];
    private variable VacuumCollectionPlatesArray[];
    private variable VacuumPlatesArray[];
    private variable VacuumPlates[];
    private variable VacuumCollectionPlateTypes[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetSupportedVacuumCollectionPlateTypes(VacuumCollectionPlateTypes);
    NumVacuums=_MODULE_VACUUM_VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == _MODULE_VACUUM_VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                VacuumCollectionPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumCollectionPlateTypes, Counter);
                ReturnVal = VacuumCollectionPlatesArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("VacuumCollectionPlateSequenceString Returned"), Translate("Response"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }
} // library namespace
