#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Configuration\\Vacuum Config.hs_"
#include "HSLVacuuBrandPump.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VACUUM {
  variable VacuumHandles[];
  variable VacuumReservations[];
  variable IsInit;
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumCollectionPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumManifoldParkSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumManifoldSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetVacuumPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable ;
  function Init( device & ML_STAR, variable i_CommandString ) variable ;
  private function StartVacuum( device & ML_STAR, variable i_CommandString ) variable ;
  private function StopVacuum( device & ML_STAR, variable i_CommandString ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VACUUM_CONFIG::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    RETURN::_InitLibrary();
    SEQUENCES::_InitLibrary();
  }
  function _ExitLibrary() {
    VACUUM_CONFIG::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    RETURN::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandString ) variable {
    private variable Counter;
    private variable NumComPorts;
    private variable VacuumComPorts[];
    private variable SupportedVacuumPlates[];
    private variable NumVacuumPlates;
    private variable Counter2;
    private variable Dict[];
    private variable SupportedVacuumPlatesArray[];
    private variable Delimiter;
    private variable Counter3;
    private variable BreakFlag;
    private variable VacuumPlateNamesString;
    private variable VacuumPlateNameStringsArray[];
    private variable ComPort;
    private variable SSA[];
    private variable SS2A[];
    VACUUM_CONFIG::Init();
    VACUUM_CONFIG::GetVacuumComPorts(VacuumComPorts);
    VACUUM_CONFIG::GetSupportedVacuumPlates(SupportedVacuumPlates);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity *****"));
    NumComPorts=VacuumComPorts.GetSize();
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Supported Vacuum Plates"));
    {
      for(Counter = 0; Counter < NumComPorts;)
      {
        Counter = Counter + 1;
        VACUUM_CONFIG::GetSupportedVacuumPlateSequences(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Supported Collection Plates"));
    {
      for(Counter = 0; Counter < NumComPorts;)
      {
        Counter = Counter + 1;
        VACUUM_CONFIG::GetSupportedVacuumCollectionPlateSequences(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Manifolds"));
    VACUUM_CONFIG::GetVacuumManifoldSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** Parks"));
    VACUUM_CONFIG::GetVacuumParkSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Vacuum module sequences for validity ***** SUCCESS"));
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, VacuumPlateNamesString, VacuumPlateNameStringsArray);
    NumVacuumPlates=VacuumPlateNameStringsArray.GetSize();
    NumComPorts=VacuumComPorts.GetSize();
    if (NumVacuumPlates > NumComPorts)
    {
      MECC::TraceComment(Translate("Not enough vacuums available"));
      abort;
    }
    VacuumHandles.SetSize(NumComPorts);
    VacuumReservations.SetSize(NumComPorts);
    {
      for(Counter = 0; Counter < NumVacuumPlates;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumComPorts;)
          {
            Counter2 = Counter2 + 1;
            BreakFlag = 0;
            SupportedVacuumPlatesArray = HSLExtensions::Array2D::GetColumn(SupportedVacuumPlates, Counter2);
            NumVacuumPlates=SupportedVacuumPlatesArray.GetSize();
            {
              for(Counter3 = 0; Counter3 < NumVacuumPlates;)
              {
                Counter3 = Counter3 + 1;
                if (VacuumPlateNameStringsArray.ElementAt( Counter -1) == SupportedVacuumPlatesArray.ElementAt( Counter3 -1))
                {
                  VacuumReservations.SetAt(Counter2-1, VacuumPlateNameStringsArray.ElementAt( Counter -1));
                  ComPort = StrIVal(VacuumComPorts.ElementAt( Counter -1));
                  HSLStarBVSLib::BVSInitialize(VacuumHandles.ElementAt( Counter2 -1), ComPort);
                  BreakFlag = 1;
                  break;
                }
              }
            }
            if (BreakFlag == 1)
            {
              break;
            }
            if (Counter2 == NumComPorts)
            {
              MECC::TraceComment(Translate("Could not find a vacuum the satisfies the requirements. Quitting."));
              abort;
            }
          }
        }
      }
    }
    IsInit = Translate("True");
    return (0);
  }

  private function GetVacuumManifoldParkSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable VacuumPlateNameString;
    private variable Dict[];
    private variable NumVacuums;
    private variable Counter;
    private variable VacuumParkSequenceStrings[];
    private variable Ret;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetVacuumParkSequenceStrings(VacuumParkSequenceStrings);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          Ret = VacuumParkSequenceStrings.ElementAt( Counter -1);
          return (Ret);
        }
      }
    }
  }

  private function GetVacuumManifoldSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Ret;
    private variable Dict[];
    private variable VacuumManifoldSequenceStrings[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetVacuumManifoldSequenceStrings(VacuumManifoldSequenceStrings);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          Ret = VacuumManifoldSequenceStrings.ElementAt( Counter -1);
          return (Ret);
        }
      }
    }
  }

  private function GetVacuumCollectionPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable NumVacuumPlates;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Counter2;
    private variable Ret;
    private variable Dict[];
    private variable VacuumCollectionPlatesArray[];
    private variable VacuumPlatesArray[];
    private variable VacuumCollectionPlates[];
    private variable VacuumPlates[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetSupportedVacuumCollectionPlateSequences(VacuumCollectionPlates);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                VacuumCollectionPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumCollectionPlates, Counter);
                Ret = VacuumCollectionPlatesArray.ElementAt( Counter2 -1);
                return (Ret);
              }
            }
          }
        }
      }
    }
  }

  private function GetVacuumPlateSequenceString( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable NumVacuumPlates;
    private variable VacuumPlateNameString;
    private variable Counter;
    private variable Counter2;
    private variable Ret;
    private variable Dict[];
    private variable VacuumPlatesArray[];
    private variable VacuumPlates[];
    private variable VacuumPlateSequences[];
    private variable VacuumPlateSequencesArray[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetSupportedVacuumPlateSequences(VacuumPlateSequences);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                VacuumPlateSequencesArray = HSLExtensions::Array2D::GetColumn(VacuumPlateSequences, Counter);
                Ret = VacuumPlateSequencesArray.ElementAt( Counter2 -1);
                return (Ret);
              }
            }
          }
        }
      }
    }
  }

  private function StartVacuum( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable NumVacuumPlates;
    private variable Counter;
    private variable Counter2;
    private variable Dict[];
    private variable VacuumPlatesArray[];
    private variable VacuumPlates[];
    private variable VacuumPressureLevels[];
    private variable PressureIndex;
    private variable VacuumPressure;
    private variable AmbientPressure;
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPressure"), VacuumPressure);
    VACUUM_CONFIG::GetSupportedVacuumPlates(VacuumPlates);
    VACUUM_CONFIG::GetVacuumPressureLevels(VacuumPressureLevels);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          VacuumPlatesArray = HSLExtensions::Array2D::GetColumn(VacuumPlates, Counter);
          NumVacuumPlates=VacuumPlatesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumVacuumPlates;)
            {
              Counter2 = Counter2 + 1;
              if (VacuumPlateNameString == VacuumPlatesArray.ElementAt( Counter2 -1))
              {
                PressureIndex = 0;
                if (VacuumPressure == "Low")
                {
                  PressureIndex = 1;
                }
                if (VacuumPressure == "Normal")
                {
                  PressureIndex = 2;
                }
                if (VacuumPressure == "High")
                {
                  PressureIndex = 3;
                }
                if (PressureIndex != 0)
                {
                  VacuumPressure = HSLExtensions::Array3D::GetValue(VacuumPressureLevels, Counter, Counter2, PressureIndex);
                }
                VacuumPressure = StrIVal(VacuumPressure);
                AmbientPressure = HSLVacuuBrandPump::ReqActualPressure(VacuumHandles.ElementAt( Counter -1));
                VacuumPressure = AmbientPressure - VacuumPressure;
                HSLVacuuBrandPump::StartPressureControl(VacuumHandles.ElementAt( Counter -1), VacuumPressure, 99999, 1, 1);
                return (0);
              }
            }
          }
        }
      }
    }
  }

  private function StopVacuum( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable VacuumPlateNameString;
    private variable Counter;
    private timer VacuumStopTimer;
    private variable Dict[];
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("VacuumPlateName"), VacuumPlateNameString);
    NumVacuums=VacuumReservations.GetSize();
    {
      for(Counter = 0; Counter < NumVacuums;)
      {
        Counter = Counter + 1;
        if (VacuumPlateNameString == VacuumReservations.ElementAt( Counter -1))
        {
          HSLVacuuBrandPump::StopPumpImmediatly(VacuumHandles.ElementAt( Counter -1));
          HSLVacuuBrandPump::OpenAirAdmittanceValve(VacuumHandles.ElementAt( Counter -1));
          if( 0 == VacuumStopTimer.SetTimer(10) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == VacuumStopTimer.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          return (0);
        }
      }
    }
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable Command;
    private variable ReturnString;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (IsInit != "True")
    {
      ReturnString = RETURN::CreateReturnString(-2, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "GetVacuumCollectionPlateSequenceString")
    {
      ReturnString = GetVacuumCollectionPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumManifoldParkSequenceString")
    {
      ReturnString = GetVacuumManifoldParkSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumManifoldSequenceString")
    {
      ReturnString = GetVacuumManifoldSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetVacuumPlateSequenceString")
    {
      ReturnString = GetVacuumPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "StartVacuum")
    {
      ReturnString = StartVacuum(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "StopVacuum")
    {
      ReturnString = StopVacuum(ML_STAR, i_CommandString);
      return (ReturnString);
    }
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumVacuums;
    private variable Counter;
    if (IsInit == "True")
    {
      NumVacuums=VacuumHandles.GetSize();
      {
        for(Counter = 0; Counter < NumVacuums;)
        {
          Counter = Counter + 1;
          HSLStarBVSLib::BVSTerminate(VacuumHandles.ElementAt( Counter -1));
        }
      }
    }
    return (Translate("True"));
  }
} // library namespace
